def model CardiovascularSystem as
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit milliL as
    unit litre {pref: milli};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit per_m3_s as
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule;
    unit second;
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit J_per_MK as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_M as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_M_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit per_s2 as
    unit second {expo: -2};
  enddef;
  def unit Hz2 as
    unit second {expo: -2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit J_per_m4_s as
    unit metre {expo: -4};
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol_per_sec as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_kPa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1, pref: kilo};
  enddef;

  def comp parameters as
    var R_par: Js_per_m6 {init: 1.07E+07, interface: public};
    var C_par: m6_per_J {init: 3.09E-10, interface: public};
    var u_ext_par: J_per_m3 {init: 0, interface: public};
    var I_par: Js2_per_m6 {init: 1.00E-06, interface: public};
    var R_pcap: Js_per_m6 {init: 1.00E-12, interface: public};
    var C_pcap: m6_per_J {init: 1.00E-12, interface: public};
    var u_ext_pcap: J_per_m3 {init: 0, interface: public};
    var I_pcap: Js2_per_m6 {init: 1.00E-06, interface: public};
    var q_0_pulmonary_GE: m3 {init: 2.00E-03, interface: public};
    var k_O2_pulmonary_GE: m6_per_Js {init: 2.85E-10, interface: public};
    var k_CO2_pulmonary_GE: m6_per_Js {init: 8.20E-09, interface: public};
    var shunt_fraction_pulmonary_GE: dimensionless {init: 0.017, interface: public};
    var F_O2_i_respiratory_gt: dimensionless {init: 0.21, interface: public};
    var F_CO2_i_respiratory_gt: dimensionless {init: 0.000421, interface: public};
    var K_LOSSES_respiratory_gt: dimensionless {init: 1, interface: public};
    var F_O2_A_respiratory_gt: dimensionless {init: 0.21, interface: public};
    var P_mus_min_lung: J_per_m3 {init: -490, interface: public};
    var P_plEE_lung: J_per_m3 {init: -490, interface: public};
    var q_l_us_lung: m3 {init: 3.44E-05, interface: public};
    var q_t_us_lung: m3 {init: 6.63E-06, interface: public};
    var q_b_us_lung: m3 {init: 1.87E-05, interface: public};
    var q_A_us_lung: m3 {init: 1.26E-06, interface: public};
    var R_ml_lung: Js_per_m6 {init: 400058, interface: public};
    var R_lt_lung: Js_per_m6 {init: 132064, interface: public};
    var R_tb_lung: Js_per_m6 {init: 120017, interface: public};
    var R_bA_lung: Js_per_m6 {init: 32006, interface: public};
    var R_plwall_lung: Js_per_m6 {init: 4.00E+04, interface: public};
    var C_l_lung: m6_per_J {init: 1.30E-08, interface: public};
    var C_t_lung: m6_per_J {init: 2.43E-08, interface: public};
    var C_b_lung: m6_per_J {init: 1.34E-06, interface: public};
    var C_A_lung: m6_per_J {init: 2.04E-06, interface: public};
    var C_pl_lung: m6_per_J {init: 2.50E-06, interface: public};
    var T_resp_lung: second {init: 5, interface: public};
    var IE_ratio_lung: dimensionless {init: 0.6, interface: public};
    var R_pvn: Js_per_m6 {init: 1.33E+06, interface: public};
    var C_pvn: m6_per_J {init: 6.00E-09, interface: public};
    var u_ext_pvn: J_per_m3 {init: 0, interface: public};
    var I_pvn: Js2_per_m6 {init: 1.00E-06, interface: public};
    var q_C_init_pvn: m3 {init: 0, interface: public};
    var q_us_0_pvn: m3 {init: 0, interface: public};
    var Delta_q_us_pvn: m3 {init: 0, interface: public};
    var E_ascending_aorta_A: J_per_m3 {init: 4.00E+05, interface: public};
    var l_ascending_aorta_A: metre {init: 1.53E-02, interface: public};
    var r_ascending_aorta_A: metre {init: 1.56E-02, interface: public};
    var theta_ascending_aorta_A: dimensionless {init: 0, interface: public};
    var u_ext_ascending_aorta_A: J_per_m3 {init: 0, interface: public};
    var E_ascending_aorta_B: J_per_m3 {init: 4.00E+05, interface: public};
    var l_ascending_aorta_B: metre {init: 1.48E-02, interface: public};
    var r_ascending_aorta_B: metre {init: 1.51E-02, interface: public};
    var u_ext_ascending_aorta_B: J_per_m3 {init: 0, interface: public};
    var theta_ascending_aorta_B: dimensionless {init: 0, interface: public};
    var E_ascending_aorta_C: J_per_m3 {init: 4.00E+05, interface: public};
    var l_ascending_aorta_C: metre {init: 1.48E-02, interface: public};
    var r_ascending_aorta_C: metre {init: 1.45E-02, interface: public};
    var u_ext_ascending_aorta_C: J_per_m3 {init: 0, interface: public};
    var theta_ascending_aorta_C: dimensionless {init: 0, interface: public};
    var E_ascending_aorta_D: J_per_m3 {init: 4.00E+05, interface: public};
    var l_ascending_aorta_D: metre {init: 1.48E-02, interface: public};
    var r_ascending_aorta_D: metre {init: 1.39E-02, interface: public};
    var u_ext_ascending_aorta_D: J_per_m3 {init: 0, interface: public};
    var theta_ascending_aorta_D: dimensionless {init: 0, interface: public};
    var E_aortic_arch_C2: J_per_m3 {init: 133642.1674, interface: public};
    var l_aortic_arch_C2: metre {init: 1.48E-02, interface: public};
    var r_aortic_arch_C2: metre {init: 1.33E-02, interface: public};
    var theta_aortic_arch_C2: dimensionless {init: 90, interface: public};
    var u_ext_aortic_arch_C2: J_per_m3 {init: 0, interface: public};
    var E_aortic_arch_C46: J_per_m3 {init: 133642.1674, interface: public};
    var l_aortic_arch_C46: metre {init: 9.61E-03, interface: public};
    var r_aortic_arch_C46: metre {init: 1.28E-02, interface: public};
    var theta_aortic_arch_C46: dimensionless {init: 90, interface: public};
    var u_ext_aortic_arch_C46: J_per_m3 {init: 0, interface: public};
    var E_aortic_arch_C64: J_per_m3 {init: 133642.1674, interface: public};
    var l_aortic_arch_C64: metre {init: 6.98E-03, interface: public};
    var r_aortic_arch_C64: metre {init: 1.24E-02, interface: public};
    var theta_aortic_arch_C64: dimensionless {init: 90, interface: public};
    var u_ext_aortic_arch_C64: J_per_m3 {init: 0, interface: public};
    var E_brachiocephalic_trunk_C4: J_per_m3 {init: 4.00E+05, interface: public};
    var l_brachiocephalic_trunk_C4: metre {init: 4.74E-02, interface: public};
    var r_brachiocephalic_trunk_C4: metre {init: 6.42E-03, interface: public};
    var theta_brachiocephalic_trunk_C4: dimensionless {init: 0, interface: public};
    var u_ext_brachiocephalic_trunk_C4: J_per_m3 {init: 0, interface: public};
    var E_subclavian_L66: J_per_m3 {init: 4.00E+05, interface: public};
    var l_subclavian_L66: metre {init: 4.95E-02, interface: public};
    var r_subclavian_L66: metre {init: 3.99E-03, interface: public};
    var theta_subclavian_L66: dimensionless {init: 90, interface: public};
    var u_ext_subclavian_L66: J_per_m3 {init: 0, interface: public};
    var E_subclavian_L78: J_per_m3 {init: 4.00E+05, interface: public};
    var l_subclavian_L78: metre {init: 4.11E-02, interface: public};
    var r_subclavian_L78: metre {init: 2.91E-03, interface: public};
    var u_ext_subclavian_L78: J_per_m3 {init: 0, interface: public};
    var theta_subclavian_L78: dimensionless {init: 90, interface: public};
    var E_brachial_L82: J_per_m3 {init: 4.00E+05, interface: public};
    var l_brachial_L82: metre {init: 2.23E-01, interface: public};
    var r_brachial_L82: metre {init: 1.97E-03, interface: public};
    var u_ext_brachial_L82: J_per_m3 {init: 0, interface: public};
    var theta_brachial_L82: dimensionless {init: 180, interface: public};
    var E_common_carotid_L48_A: J_per_m3 {init: 4.00E+05, interface: public};
    var l_common_carotid_L48_A: metre {init: 3.03E-02, interface: public};
    var r_common_carotid_L48_A: metre {init: 4.37E-03, interface: public};
    var u_ext_common_carotid_L48_A: J_per_m3 {init: 0, interface: public};
    var theta_common_carotid_L48_A: dimensionless {init: 0, interface: public};
    var E_common_carotid_L48_B: J_per_m3 {init: 4.00E+05, interface: public};
    var l_common_carotid_L48_B: metre {init: 3.03E-02, interface: public};
    var r_common_carotid_L48_B: metre {init: 4.13E-03, interface: public};
    var u_ext_common_carotid_L48_B: J_per_m3 {init: 0, interface: public};
    var theta_common_carotid_L48_B: dimensionless {init: 0, interface: public};
    var E_common_carotid_L48_C: J_per_m3 {init: 4.00E+05, interface: public};
    var l_common_carotid_L48_C: metre {init: 3.03E-02, interface: public};
    var r_common_carotid_L48_C: metre {init: 3.92E-03, interface: public};
    var u_ext_common_carotid_L48_C: J_per_m3 {init: 0, interface: public};
    var theta_common_carotid_L48_C: dimensionless {init: 0, interface: public};
    var E_common_carotid_L48_D: J_per_m3 {init: 4.00E+05, interface: public};
    var l_common_carotid_L48_D: metre {init: 3.03E-02, interface: public};
    var r_common_carotid_L48_D: metre {init: 3.58E-03, interface: public};
    var theta_common_carotid_L48_D: dimensionless {init: 0, interface: public};
    var u_ext_common_carotid_L48_D: J_per_m3 {init: 0, interface: public};
    var E_common_carotid_R6_A: J_per_m3 {init: 4.00E+05, interface: public};
    var l_common_carotid_R6_A: metre {init: 2.71E-02, interface: public};
    var r_common_carotid_R6_A: metre {init: 4.43E-03, interface: public};
    var u_ext_common_carotid_R6_A: J_per_m3 {init: 0, interface: public};
    var theta_common_carotid_R6_A: dimensionless {init: 0, interface: public};
    var E_common_carotid_R6_B: J_per_m3 {init: 4.00E+05, interface: public};
    var l_common_carotid_R6_B: metre {init: 2.71E-02, interface: public};
    var r_common_carotid_R6_B: metre {init: 4.14E-03, interface: public};
    var u_ext_common_carotid_R6_B: J_per_m3 {init: 0, interface: public};
    var theta_common_carotid_R6_B: dimensionless {init: 0, interface: public};
    var E_common_carotid_R6_C: J_per_m3 {init: 4.00E+05, interface: public};
    var l_common_carotid_R6_C: metre {init: 2.71E-02, interface: public};
    var r_common_carotid_R6_C: metre {init: 3.65E-03, interface: public};
    var theta_common_carotid_R6_C: dimensionless {init: 0, interface: public};
    var u_ext_common_carotid_R6_C: J_per_m3 {init: 0, interface: public};
    var E_external_carotid_L62: J_per_m3 {init: 8.00E+05, interface: public};
    var l_external_carotid_L62: metre {init: 6.10E-02, interface: public};
    var r_external_carotid_L62: metre {init: 2.27E-03, interface: public};
    var u_ext_external_carotid_L62: J_per_m3 {init: 0, interface: public};
    var theta_external_carotid_L62: dimensionless {init: 0, interface: public};
    var E_external_carotid_R26: J_per_m3 {init: 8.00E+05, interface: public};
    var l_external_carotid_R26: metre {init: 6.10E-02, interface: public};
    var r_external_carotid_R26: metre {init: 2.27E-03, interface: public};
    var u_ext_external_carotid_R26: J_per_m3 {init: 0, interface: public};
    var theta_external_carotid_R26: dimensionless {init: 0, interface: public};
    var E_internal_carotid_L50_A: J_per_m3 {init: 8.00E+05, interface: public};
    var l_internal_carotid_L50_A: metre {init: 4.50E-02, interface: public};
    var r_internal_carotid_L50_A: metre {init: 2.54E-03, interface: public};
    var u_ext_internal_carotid_L50_A: J_per_m3 {init: 0, interface: public};
    var theta_internal_carotid_L50_A: dimensionless {init: 0, interface: public};
    var E_internal_carotid_L50_B: J_per_m3 {init: 8.00E+05, interface: public};
    var l_internal_carotid_L50_B: metre {init: 4.50E-02, interface: public};
    var r_internal_carotid_L50_B: metre {init: 2.05E-03, interface: public};
    var u_ext_internal_carotid_L50_B: J_per_m3 {init: 0, interface: public};
    var theta_internal_carotid_L50_B: dimensionless {init: 0, interface: public};
    var E_internal_carotid_L50_C: J_per_m3 {init: 1.60E+06, interface: public};
    var l_internal_carotid_L50_C: metre {init: 4.50E-02, interface: public};
    var r_internal_carotid_L50_C: metre {init: 1.57E-03, interface: public};
    var theta_internal_carotid_L50_C: dimensionless {init: 0, interface: public};
    var u_ext_internal_carotid_L50_C: J_per_m3 {init: 0, interface: public};
    var E_internal_carotid_R8_A: J_per_m3 {init: 8.00E+05, interface: public};
    var l_internal_carotid_R8_A: metre {init: 4.50E-02, interface: public};
    var r_internal_carotid_R8_A: metre {init: 2.54E-03, interface: public};
    var u_ext_internal_carotid_R8_A: J_per_m3 {init: 0, interface: public};
    var theta_internal_carotid_R8_A: dimensionless {init: 0, interface: public};
    var E_internal_carotid_R8_B: J_per_m3 {init: 8.00E+05, interface: public};
    var l_internal_carotid_R8_B: metre {init: 4.50E-02, interface: public};
    var r_internal_carotid_R8_B: metre {init: 2.05E-03, interface: public};
    var u_ext_internal_carotid_R8_B: J_per_m3 {init: 0, interface: public};
    var theta_internal_carotid_R8_B: dimensionless {init: 0, interface: public};
    var E_internal_carotid_R8_C: J_per_m3 {init: 1.60E+06, interface: public};
    var l_internal_carotid_R8_C: metre {init: 4.50E-02, interface: public};
    var r_internal_carotid_R8_C: metre {init: 1.57E-03, interface: public};
    var theta_internal_carotid_R8_C: dimensionless {init: 0, interface: public};
    var u_ext_internal_carotid_R8_C: J_per_m3 {init: 0, interface: public};
    var E_posterior_communicating_L8: J_per_m3 {init: 1.60E+06, interface: public};
    var l_posterior_communicating_L8: metre {init: 1.66E-02, interface: public};
    var r_posterior_communicating_L8: metre {init: 4.94E-04, interface: public};
    var u_ext_posterior_communicating_L8: J_per_m3 {init: 0, interface: public};
    var theta_posterior_communicating_L8: dimensionless {init: 90, interface: public};
    var E_posterior_communicating_R206: J_per_m3 {init: 1.60E+06, interface: public};
    var l_posterior_communicating_R206: metre {init: 1.66E-02, interface: public};
    var r_posterior_communicating_R206: metre {init: 4.94E-04, interface: public};
    var u_ext_posterior_communicating_R206: J_per_m3 {init: 0, interface: public};
    var theta_posterior_communicating_R206: dimensionless {init: 90, interface: public};
    var E_internal_carotid_L112: J_per_m3 {init: 1.60E+06, interface: public};
    var l_internal_carotid_L112: metre {init: 1.97E-03, interface: public};
    var r_internal_carotid_L112: metre {init: 1.33E-03, interface: public};
    var theta_internal_carotid_L112: dimensionless {init: 90, interface: public};
    var u_ext_internal_carotid_L112: J_per_m3 {init: 0, interface: public};
    var E_internal_carotid_R48: J_per_m3 {init: 1.60E+06, interface: public};
    var l_internal_carotid_R48: metre {init: 1.97E-03, interface: public};
    var r_internal_carotid_R48: metre {init: 1.33E-03, interface: public};
    var theta_internal_carotid_R48: dimensionless {init: 90, interface: public};
    var u_ext_internal_carotid_R48: J_per_m3 {init: 0, interface: public};
    var E_middle_cerebral_L114: J_per_m3 {init: 1.60E+06, interface: public};
    var l_middle_cerebral_L114: metre {init: 1.82E-03, interface: public};
    var r_middle_cerebral_L114: metre {init: 1.04E-03, interface: public};
    var u_ext_middle_cerebral_L114: J_per_m3 {init: 0, interface: public};
    var theta_middle_cerebral_L114: dimensionless {init: 90, interface: public};
    var E_middle_cerebral_R52: J_per_m3 {init: 1.60E+06, interface: public};
    var l_middle_cerebral_R52: metre {init: 1.82E-03, interface: public};
    var r_middle_cerebral_R52: metre {init: 1.04E-03, interface: public};
    var u_ext_middle_cerebral_R52: J_per_m3 {init: 0, interface: public};
    var theta_middle_cerebral_R52: dimensionless {init: 90, interface: public};
    var E_anterior_cerebral_L110: J_per_m3 {init: 1.60E+06, interface: public};
    var l_anterior_cerebral_L110: metre {init: 1.06E-02, interface: public};
    var r_anterior_cerebral_L110: metre {init: 9.65E-04, interface: public};
    var u_ext_anterior_cerebral_L110: J_per_m3 {init: 0, interface: public};
    var theta_anterior_cerebral_L110: dimensionless {init: 90, interface: public};
    var E_anterior_cerebral_R46: J_per_m3 {init: 1.60E+06, interface: public};
    var l_anterior_cerebral_R46: metre {init: 1.06E-02, interface: public};
    var r_anterior_cerebral_R46: metre {init: 9.65E-04, interface: public};
    var theta_anterior_cerebral_R46: dimensionless {init: 90, interface: public};
    var u_ext_anterior_cerebral_R46: J_per_m3 {init: 0, interface: public};
    var E_anterior_cerebral_R238: J_per_m3 {init: 1.60E+06, interface: public};
    var l_anterior_cerebral_R238: metre {init: 1.15E-03, interface: public};
    var r_anterior_cerebral_R238: metre {init: 9.65E-04, interface: public};
    var u_ext_anterior_cerebral_R238: J_per_m3 {init: 0, interface: public};
    var theta_anterior_cerebral_R238: dimensionless {init: 90, interface: public};
    var E_anterior_cerebral_L42: J_per_m3 {init: 1.60E+06, interface: public};
    var l_anterior_cerebral_L42: metre {init: 1.15E-03, interface: public};
    var r_anterior_cerebral_L42: metre {init: 9.65E-04, interface: public};
    var u_ext_anterior_cerebral_L42: J_per_m3 {init: 0, interface: public};
    var theta_anterior_cerebral_L42: dimensionless {init: 90, interface: public};
    var E_anterior_communicating_C44: J_per_m3 {init: 1.60E+06, interface: public};
    var l_anterior_communicating_C44: metre {init: 5.66E-03, interface: public};
    var r_anterior_communicating_C44: metre {init: 6.57E-04, interface: public};
    var u_ext_anterior_communicating_C44: J_per_m3 {init: 0, interface: public};
    var theta_anterior_communicating_C44: dimensionless {init: 90, interface: public};
    var E_vertebral_L2: J_per_m3 {init: 8.00E+05, interface: public};
    var l_vertebral_L2: metre {init: 2.10E-01, interface: public};
    var r_vertebral_L2: metre {init: 1.34E-03, interface: public};
    var u_ext_vertebral_L2: J_per_m3 {init: 0, interface: public};
    var theta_vertebral_L2: dimensionless {init: 0, interface: public};
    var E_subclavian_R28: J_per_m3 {init: 4.00E+05, interface: public};
    var l_subclavian_R28: metre {init: 1.57E-02, interface: public};
    var r_subclavian_R28: metre {init: 4.52E-03, interface: public};
    var theta_subclavian_R28: dimensionless {init: 90, interface: public};
    var u_ext_subclavian_R28: J_per_m3 {init: 0, interface: public};
    var E_subclavian_R30: J_per_m3 {init: 4.00E+05, interface: public};
    var l_subclavian_R30: metre {init: 4.11E-02, interface: public};
    var r_subclavian_R30: metre {init: 3.32E-03, interface: public};
    var u_ext_subclavian_R30: J_per_m3 {init: 0, interface: public};
    var theta_subclavian_R30: dimensionless {init: 90, interface: public};
    var E_brachial_R34: J_per_m3 {init: 4.00E+05, interface: public};
    var l_brachial_R34: metre {init: 2.23E-01, interface: public};
    var r_brachial_R34: metre {init: 1.97E-03, interface: public};
    var u_ext_brachial_R34: J_per_m3 {init: 0, interface: public};
    var theta_brachial_R34: dimensionless {init: 180, interface: public};
    var E_vertebral_R272: J_per_m3 {init: 8.00E+05, interface: public};
    var l_vertebral_R272: metre {init: 2.10E-01, interface: public};
    var r_vertebral_R272: metre {init: 1.34E-03, interface: public};
    var u_ext_vertebral_R272: J_per_m3 {init: 0, interface: public};
    var theta_vertebral_R272: dimensionless {init: 0, interface: public};
    var E_basilar_C4: J_per_m3 {init: 1.60E+06, interface: public};
    var l_basilar_C4: metre {init: 2.26E-02, interface: public};
    var r_basilar_C4: metre {init: 1.72E-03, interface: public};
    var theta_basilar_C4: dimensionless {init: 90, interface: public};
    var u_ext_basilar_C4: J_per_m3 {init: 0, interface: public};
    var E_posterior_cerebral_pre_L6: J_per_m3 {init: 1.60E+06, interface: public};
    var l_posterior_cerebral_pre_L6: metre {init: 6.98E-03, interface: public};
    var r_posterior_cerebral_pre_L6: metre {init: 8.16E-04, interface: public};
    var u_ext_posterior_cerebral_pre_L6: J_per_m3 {init: 0, interface: public};
    var theta_posterior_cerebral_pre_L6: dimensionless {init: 90, interface: public};
    var E_posterior_cerebral_post_L12: J_per_m3 {init: 1.60E+06, interface: public};
    var l_posterior_cerebral_post_L12: metre {init: 1.28E-02, interface: public};
    var r_posterior_cerebral_post_L12: metre {init: 8.69E-04, interface: public};
    var u_ext_posterior_cerebral_post_L12: J_per_m3 {init: 0, interface: public};
    var theta_posterior_cerebral_post_L12: dimensionless {init: 90, interface: public};
    var E_posterior_cerebral_pre_R204: J_per_m3 {init: 1.60E+06, interface: public};
    var l_posterior_cerebral_pre_R204: metre {init: 7.78E-03, interface: public};
    var r_posterior_cerebral_pre_R204: metre {init: 8.16E-04, interface: public};
    var u_ext_posterior_cerebral_pre_R204: J_per_m3 {init: 0, interface: public};
    var theta_posterior_cerebral_pre_R204: dimensionless {init: 90, interface: public};
    var E_posterior_cerebral_post_R208: J_per_m3 {init: 1.60E+06, interface: public};
    var l_posterior_cerebral_post_R208: metre {init: 1.28E-02, interface: public};
    var r_posterior_cerebral_post_R208: metre {init: 8.69E-04, interface: public};
    var u_ext_posterior_cerebral_post_R208: J_per_m3 {init: 0, interface: public};
    var theta_posterior_cerebral_post_R208: dimensionless {init: 90, interface: public};
    var R_T_posterior_cerebral_L_T: Js_per_m6 {init: 9.85E+09, interface: public};
    var C_T_posterior_cerebral_L_T: m6_per_J {init: 1.00E-11, interface: public};
    var I_T_posterior_cerebral_L_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_posterior_cerebral_L_T: J_per_m3 {init: 0, interface: public};
    var Delta_R_posterior_cerebral_L_T: Js_per_m6 {init: 0, interface: public};
    var R_T_posterior_cerebral_R_T: Js_per_m6 {init: 9.85E+09, interface: public};
    var C_T_posterior_cerebral_R_T: m6_per_J {init: 1.00E-11, interface: public};
    var I_T_posterior_cerebral_R_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_posterior_cerebral_R_T: J_per_m3 {init: 0, interface: public};
    var Delta_R_posterior_cerebral_R_T: Js_per_m6 {init: 0, interface: public};
    var R_T_external_carotid_L_T: Js_per_m6 {init: 3.73E+09, interface: public};
    var C_T_external_carotid_L_T: m6_per_J {init: 6.01E-11, interface: public};
    var I_T_external_carotid_L_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_external_carotid_L_T: J_per_m3 {init: 0, interface: public};
    var Delta_R_external_carotid_L_T: Js_per_m6 {init: 0, interface: public};
    var R_T_external_carotid_R_T: Js_per_m6 {init: 3.73E+09, interface: public};
    var C_T_external_carotid_R_T: m6_per_J {init: 6.03E-11, interface: public};
    var I_T_external_carotid_R_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_external_carotid_R_T: J_per_m3 {init: 0, interface: public};
    var Delta_R_external_carotid_R_T: Js_per_m6 {init: 0, interface: public};
    var R_T_middle_cerebral_L_T: Js_per_m6 {init: 5.34E+09, interface: public};
    var C_T_middle_cerebral_L_T: m6_per_J {init: 1.00E-11, interface: public};
    var I_T_middle_cerebral_L_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_middle_cerebral_L_T: J_per_m3 {init: 0, interface: public};
    var Delta_R_middle_cerebral_L_T: Js_per_m6 {init: 0, interface: public};
    var R_T_middle_cerebral_R_T: Js_per_m6 {init: 5.34E+09, interface: public};
    var C_T_middle_cerebral_R_T: m6_per_J {init: 1.00E-11, interface: public};
    var I_T_middle_cerebral_R_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_middle_cerebral_R_T: J_per_m3 {init: 0, interface: public};
    var Delta_R_middle_cerebral_R_T: Js_per_m6 {init: 0, interface: public};
    var R_T_anterior_cerebral_L_T: Js_per_m6 {init: 9.15E+09, interface: public};
    var C_T_anterior_cerebral_L_T: m6_per_J {init: 1.00E-11, interface: public};
    var I_T_anterior_cerebral_L_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_anterior_cerebral_L_T: J_per_m3 {init: 0, interface: public};
    var Delta_R_anterior_cerebral_L_T: Js_per_m6 {init: 0, interface: public};
    var R_T_anterior_cerebral_R_T: Js_per_m6 {init: 9.15E+09, interface: public};
    var C_T_anterior_cerebral_R_T: m6_per_J {init: 1.00E-11, interface: public};
    var I_T_anterior_cerebral_R_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_anterior_cerebral_R_T: J_per_m3 {init: 0, interface: public};
    var Delta_R_anterior_cerebral_R_T: Js_per_m6 {init: 0, interface: public};
    var R_T_arm_L_T: Js_per_m6 {init: 6.95E+09, interface: public};
    var C_T_arm_L_T: m6_per_J {init: 1.00E-10, interface: public};
    var I_T_arm_L_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_arm_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_arm_R_T: Js_per_m6 {init: 6.95E+09, interface: public};
    var C_T_arm_R_T: m6_per_J {init: 1.00E-10, interface: public};
    var I_T_arm_R_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_arm_R_T: J_per_m3 {init: 0, interface: public};
    var E_aortic_arch_C94: J_per_m3 {init: 133642.1674, interface: public};
    var l_aortic_arch_C94: metre {init: 4.32E-02, interface: public};
    var r_aortic_arch_C94: metre {init: 1.17E-02, interface: public};
    var u_ext_aortic_arch_C94: J_per_m3 {init: 0, interface: public};
    var theta_aortic_arch_C94: dimensionless {init: 90, interface: public};
    var E_thoracic_aorta_C96: J_per_m3 {init: 4.00E+05, interface: public};
    var l_thoracic_aorta_C96: metre {init: 9.90E-03, interface: public};
    var r_thoracic_aorta_C96: metre {init: 1.05E-02, interface: public};
    var u_ext_thoracic_aorta_C96: J_per_m3 {init: 0, interface: public};
    var theta_thoracic_aorta_C96: dimensionless {init: 180, interface: public};
    var E_thoracic_aorta_C100: J_per_m3 {init: 4.00E+05, interface: public};
    var l_thoracic_aorta_C100: metre {init: 7.88E-03, interface: public};
    var r_thoracic_aorta_C100: metre {init: 1.03E-02, interface: public};
    var u_ext_thoracic_aorta_C100: J_per_m3 {init: 0, interface: public};
    var theta_thoracic_aorta_C100: dimensionless {init: 180, interface: public};
    var E_thoracic_aorta_C104: J_per_m3 {init: 4.00E+05, interface: public};
    var l_thoracic_aorta_C104: metre {init: 1.56E-02, interface: public};
    var r_thoracic_aorta_C104: metre {init: 1.01E-02, interface: public};
    var u_ext_thoracic_aorta_C104: J_per_m3 {init: 0, interface: public};
    var theta_thoracic_aorta_C104: dimensionless {init: 180, interface: public};
    var E_thoracic_aorta_C108: J_per_m3 {init: 4.00E+05, interface: public};
    var l_thoracic_aorta_C108: metre {init: 5.33E-03, interface: public};
    var r_thoracic_aorta_C108: metre {init: 9.87E-03, interface: public};
    var u_ext_thoracic_aorta_C108: J_per_m3 {init: 0, interface: public};
    var theta_thoracic_aorta_C108: dimensionless {init: 180, interface: public};
    var E_thoracic_aorta_C112: J_per_m3 {init: 4.00E+05, interface: public};
    var l_thoracic_aorta_C112: metre {init: 1.22E-01, interface: public};
    var r_thoracic_aorta_C112: metre {init: 8.48E-03, interface: public};
    var u_ext_thoracic_aorta_C112: J_per_m3 {init: 0, interface: public};
    var theta_thoracic_aorta_C112: dimensionless {init: 180, interface: public};
    var E_abdominal_aorta_C114: J_per_m3 {init: 4.00E+05, interface: public};
    var l_abdominal_aorta_C114: metre {init: 3.25E-03, interface: public};
    var r_abdominal_aorta_C114: metre {init: 7.52E-03, interface: public};
    var theta_abdominal_aorta_C114: dimensionless {init: 180, interface: public};
    var u_ext_abdominal_aorta_C114: J_per_m3 {init: 0, interface: public};
    var R_T_trunk_C_T: Js_per_m6 {init: 7.32E+08, interface: public};
    var C_T_trunk_C_T: m6_per_J {init: 4.00E-09, interface: public};
    var I_T_trunk_C_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_trunk_C_T: J_per_m3 {init: 0, interface: public};
    var R_local_multiplier_trunk_C_T: dimensionless {init: 1, interface: public};
    var E_abdominal_aorta_C136: J_per_m3 {init: 4.00E+05, interface: public};
    var l_abdominal_aorta_C136: metre {init: 1.40E-02, interface: public};
    var r_abdominal_aorta_C136: metre {init: 7.43E-03, interface: public};
    var u_ext_abdominal_aorta_C136: J_per_m3 {init: 0, interface: public};
    var theta_abdominal_aorta_C136: dimensionless {init: 180, interface: public};
    var E_abdominal_aorta_C164: J_per_m3 {init: 4.00E+05, interface: public};
    var l_abdominal_aorta_C164: metre {init: 4.32E-03, interface: public};
    var r_abdominal_aorta_C164: metre {init: 7.29E-03, interface: public};
    var u_ext_abdominal_aorta_C164: J_per_m3 {init: 0, interface: public};
    var theta_abdominal_aorta_C164: dimensionless {init: 180, interface: public};
    var E_abdominal_aorta_C176: J_per_m3 {init: 4.00E+05, interface: public};
    var l_abdominal_aorta_C176: metre {init: 1.20E-02, interface: public};
    var r_abdominal_aorta_C176: metre {init: 7.19E-03, interface: public};
    var u_ext_abdominal_aorta_C176: J_per_m3 {init: 0, interface: public};
    var theta_abdominal_aorta_C176: dimensionless {init: 180, interface: public};
    var E_abdominal_aorta_C188: J_per_m3 {init: 4.00E+05, interface: public};
    var l_abdominal_aorta_C188: metre {init: 5.41E-02, interface: public};
    var r_abdominal_aorta_C188: metre {init: 6.80E-03, interface: public};
    var u_ext_abdominal_aorta_C188: J_per_m3 {init: 0, interface: public};
    var theta_abdominal_aorta_C188: dimensionless {init: 180, interface: public};
    var E_abdominal_aorta_C192: J_per_m3 {init: 4.00E+05, interface: public};
    var l_abdominal_aorta_C192: metre {init: 4.22E-02, interface: public};
    var r_abdominal_aorta_C192: metre {init: 6.12E-03, interface: public};
    var theta_abdominal_aorta_C192: dimensionless {init: 180, interface: public};
    var u_ext_abdominal_aorta_C192: J_per_m3 {init: 0, interface: public};
    var E_common_iliac_L194: J_per_m3 {init: 4.00E+05, interface: public};
    var l_common_iliac_L194: metre {init: 7.41E-02, interface: public};
    var r_common_iliac_L194: metre {init: 4.28E-03, interface: public};
    var u_ext_common_iliac_L194: J_per_m3 {init: 0, interface: public};
    var theta_common_iliac_L194: dimensionless {init: 180, interface: public};
    var E_external_iliac_L198: J_per_m3 {init: 8.00E+05, interface: public};
    var l_external_iliac_L198: metre {init: 1.02E-01, interface: public};
    var r_external_iliac_L198: metre {init: 3.29E-03, interface: public};
    var u_ext_external_iliac_L198: J_per_m3 {init: 0, interface: public};
    var theta_external_iliac_L198: dimensionless {init: 180, interface: public};
    var E_common_iliac_R216: J_per_m3 {init: 4.00E+05, interface: public};
    var l_common_iliac_R216: metre {init: 7.64E-02, interface: public};
    var r_common_iliac_R216: metre {init: 4.31E-03, interface: public};
    var u_ext_common_iliac_R216: J_per_m3 {init: 0, interface: public};
    var theta_common_iliac_R216: dimensionless {init: 180, interface: public};
    var E_external_iliac_R220: J_per_m3 {init: 8.00E+05, interface: public};
    var l_external_iliac_R220: metre {init: 1.02E-01, interface: public};
    var r_external_iliac_R220: metre {init: 3.29E-03, interface: public};
    var u_ext_external_iliac_R220: J_per_m3 {init: 0, interface: public};
    var theta_external_iliac_R220: dimensionless {init: 180, interface: public};
    var E_femoral_L200: J_per_m3 {init: 8.00E+05, interface: public};
    var l_femoral_L200: metre {init: 3.16E-02, interface: public};
    var r_femoral_L200: metre {init: 3.17E-03, interface: public};
    var u_ext_femoral_L200: J_per_m3 {init: 0, interface: public};
    var theta_femoral_L200: dimensionless {init: 180, interface: public};
    var E_femoral_R222: J_per_m3 {init: 8.00E+05, interface: public};
    var l_femoral_R222: metre {init: 3.16E-02, interface: public};
    var r_femoral_R222: metre {init: 3.17E-03, interface: public};
    var u_ext_femoral_R222: J_per_m3 {init: 0, interface: public};
    var theta_femoral_R222: dimensionless {init: 180, interface: public};
    var R_T_leg_L_T: Js_per_m6 {init: 1.90E+09, interface: public};
    var C_T_leg_L_T: m6_per_J {init: 4.00E-10, interface: public};
    var I_T_leg_L_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_leg_L_T: J_per_m3 {init: 0, interface: public};
    var R_T_leg_R_T: Js_per_m6 {init: 1.90E+09, interface: public};
    var C_T_leg_R_T: m6_per_J {init: 4.00E-10, interface: public};
    var I_T_leg_R_T: Js2_per_m6 {init: 1.00E-06, interface: public};
    var u_ext_leg_R_T: J_per_m3 {init: 0, interface: public};
    var R_venous_lb: Js_per_m6 {init: 1.00E-07, interface: public};
    var C_venous_lb: m6_per_J {init: 5.00E-07, interface: public};
    var u_ext_venous_lb: J_per_m3 {init: 0, interface: public};
    var I_venous_lb: Js2_per_m6 {init: 1.00E-07, interface: public};
    var q_us_0_venous_lb: m3 {init: 9.00E-04, interface: public};
    var q_C_init_venous_lb: m3 {init: 0, interface: public};
    var R_venous_ub: Js_per_m6 {init: 1.00E-07, interface: public};
    var C_venous_ub: m6_per_J {init: 5.00E-07, interface: public};
    var u_ext_venous_ub: J_per_m3 {init: 0, interface: public};
    var I_venous_ub: Js2_per_m6 {init: 1.00E-07, interface: public};
    var q_us_0_venous_ub: m3 {init: 9.00E-04, interface: public};
    var q_C_init_venous_ub: m3 {init: 0, interface: public};
    var R_venous_ivc: Js_per_m6 {init: 1.00E-07, interface: public};
    var C_venous_ivc: m6_per_J {init: 5.00E-07, interface: public};
    var u_ext_venous_ivc: J_per_m3 {init: 0, interface: public};
    var I_venous_ivc: Js2_per_m6 {init: 1.00E-07, interface: public};
    var q_us_0_venous_ivc: m3 {init: 3.50E-04, interface: public};
    var q_C_init_venous_ivc: m3 {init: 0, interface: public};
    var R_venous_svc: Js_per_m6 {init: 1.00E-07, interface: public};
    var C_venous_svc: m6_per_J {init: 5.00E-07, interface: public};
    var u_ext_venous_svc: J_per_m3 {init: 0, interface: public};
    var I_venous_svc: Js2_per_m6 {init: 1.00E-07, interface: public};
    var q_us_0_venous_svc: m3 {init: 3.50E-04, interface: public};
    var q_C_init_venous_svc: m3 {init: 0, interface: public};
    var q_0_middle_cerebral_L_GE: m3 {init: 1.64E-04, interface: public};
    var M_CO2_middle_cerebral_L_GE: m3_per_s {init: 8.30E-08, interface: public};
    var M_O2_middle_cerebral_L_GE: m3_per_s {init: -9.90E-08, interface: public};
    var q_0_middle_cerebral_R_GE: m3 {init: 1.64E-04, interface: public};
    var M_CO2_middle_cerebral_R_GE: m3_per_s {init: 8.30E-08, interface: public};
    var M_O2_middle_cerebral_R_GE: m3_per_s {init: -9.90E-08, interface: public};
    var q_0_anterior_cerebral_L_GE: m3 {init: 1.64E-04, interface: public};
    var M_CO2_anterior_cerebral_L_GE: m3_per_s {init: 8.30E-08, interface: public};
    var M_O2_anterior_cerebral_L_GE: m3_per_s {init: -9.90E-08, interface: public};
    var q_0_anterior_cerebral_R_GE: m3 {init: 1.64E-04, interface: public};
    var M_CO2_anterior_cerebral_R_GE: m3_per_s {init: 8.30E-08, interface: public};
    var M_O2_anterior_cerebral_R_GE: m3_per_s {init: -9.90E-08, interface: public};
    var q_0_posterior_cerebral_L_GE: m3 {init: 1.64E-04, interface: public};
    var M_CO2_posterior_cerebral_L_GE: m3_per_s {init: 8.30E-08, interface: public};
    var M_O2_posterior_cerebral_L_GE: m3_per_s {init: -9.90E-08, interface: public};
    var q_0_posterior_cerebral_R_GE: m3 {init: 1.64E-04, interface: public};
    var M_CO2_posterior_cerebral_R_GE: m3_per_s {init: 8.30E-08, interface: public};
    var M_O2_posterior_cerebral_R_GE: m3_per_s {init: -9.90E-08, interface: public};
    var q_0_external_carotid_L_GE: m3 {init: 1.64E-04, interface: public};
    var M_CO2_external_carotid_L_GE: m3_per_s {init: 8.30E-08, interface: public};
    var M_O2_external_carotid_L_GE: m3_per_s {init: -9.90E-08, interface: public};
    var q_0_external_carotid_R_GE: m3 {init: 1.64E-04, interface: public};
    var M_CO2_external_carotid_R_GE: m3_per_s {init: 8.30E-08, interface: public};
    var M_O2_external_carotid_R_GE: m3_per_s {init: -9.90E-08, interface: public};
    var q_0_arm_L_GE: m3 {init: 5.60E-03, interface: public};
    var M_CO2_arm_L_GE: m3_per_s {init: 1.08E-07, interface: public};
    var M_O2_arm_L_GE: m3_per_s {init: -1.38E-07, interface: public};
    var q_0_arm_R_GE: m3 {init: 5.60E-03, interface: public};
    var M_CO2_arm_R_GE: m3_per_s {init: 1.08E-07, interface: public};
    var M_O2_arm_R_GE: m3_per_s {init: -1.38E-07, interface: public};
    var q_0_leg_L_GE: m3 {init: 1.00E-02, interface: public};
    var M_CO2_leg_L_GE: m3_per_s {init: 2.50E-07, interface: public};
    var M_O2_leg_L_GE: m3_per_s {init: -2.50E-07, interface: public};
    var q_0_leg_R_GE: m3 {init: 1.00E-02, interface: public};
    var M_CO2_leg_R_GE: m3_per_s {init: 2.50E-07, interface: public};
    var M_O2_leg_R_GE: m3_per_s {init: -2.50E-07, interface: public};
    var q_0_trunk_C_GE: m3 {init: 2.67E-03, interface: public};
    var M_CO2_trunk_C_GE: m3_per_s {init: 1.50E-06, interface: public};
    var M_O2_trunk_C_GE: m3_per_s {init: 1.80E-06, interface: public};
    var q_0_arterial_gas_transport: m3 {init: 3.00E-04, interface: public};
    var q_0_venous_gas_transport: m3 {init: 3.00E-04, interface: public};
    var P_baro_init_common_carotid_L_baro: J_per_m3 {init: 12399, interface: public};
    var P_nom_common_carotid_L_baro: J_per_m3 {init: 1.25E+04, interface: public};
    var tau_zb_common_carotid_L_baro: second {init: 6.37, interface: public};
    var tau_pb_common_carotid_L_baro: second {init: 2.076, interface: public};
    var f_ab_min_common_carotid_L_baro: Hz {init: 2.52, interface: public};
    var f_ab_max_common_carotid_L_baro: Hz {init: 47.78, interface: public};
    var k_ab_common_carotid_L_baro: J_per_m3 {init: 1.61E+03, interface: public};
    var AA_arterial_chemoreceptor: dimensionless {init: 600, interface: public};
    var BB_arterial_chemoreceptor: dimensionless {init: 10.18, interface: public};
    var C_CO2_a_nom_arterial_chemoreceptor: dimensionless {init: 0.34, interface: public};
    var K_O2_arterial_chemoreceptor: dimensionless {init: 200, interface: public};
    var K_CO2_arterial_chemoreceptor: Hz {init: 1, interface: public};
    var K_stat_arterial_chemoreceptor: Hz {init: 20, interface: public};
    var K_dyn_arterial_chemoreceptor: Hz {init: 45, interface: public};
    var tau_cap_arterial_chemoreceptor: second {init: 3.5, interface: public};
    var tau_CO2_cc_dyn_arterial_chemoreceptor: dimensionless {init: 600, interface: public};
    var tau_lung_lung_stretch: second {init: 2, interface: public};
    var G_al_lung_stretch: per_ml_s {init: 23.291, interface: public};
    var tau_cp_cardiopulm_receptor: second {init: 2, interface: public};
    var P_l_init_cardiopulm_receptor: mmHg {init: 0, interface: public};
    var f_maxl_cardiopulm_receptor: Hz {init: 20, interface: public};
    var P_tn_cardiopulm_receptor: mmHg {init: 10.8, interface: public};
    var k_l_cardiopulm_receptor: mmHg {init: 1.4286, interface: public};
    var f_min_br_NTS: Hz {init: 0.304, interface: public};
    var f_max_br_NTS: Hz {init: 21.499, interface: public};
    var f_mid_br_NTS: Hz {init: 44.125, interface: public};
    var f_min_ls_NTS: Hz {init: 2.75, interface: public};
    var f_max_ls_NTS: Hz {init: 31.569, interface: public};
    var f_mid_ls_NTS: Hz {init: 0.13, interface: public};
    var f_min_cp_NTS: Hz {init: 0.451, interface: public};
    var f_max_cp_NTS: Hz {init: 28.327, interface: public};
    var f_mid_cp_NTS: Hz {init: 20.2, interface: public};
    var f_min_ch_NTS: Hz {init: 2.2343941, interface: public};
    var f_max_ch_NTS: Hz {init: 25, interface: public};
    var f_mid_ch_NTS: Hz {init: 0.05, interface: public};
    var k_NTS_br_NTS: dimensionless {init: 21, interface: public};
    var k_NTS_ls_NTS: dimensionless {init: 2, interface: public};
    var k_NTS_cp_NTS: dimensionless {init: 7, interface: public};
    var k_NTS_ch_NTS: dimensionless {init: 1, interface: public};
    var f_min_DMV_DMV: Hz {init: 2.59, interface: public};
    var f_max_DMV_DMV: Hz {init: 6.66, interface: public};
    var f_mid_DMV_DMV: Hz {init: 42.91, interface: public};
    var k_DMV_DMV: dimensionless {init: 33.5, interface: public};
    var f_min_NA_NA: Hz {init: 4.88, interface: public};
    var f_max_NA_NA: Hz {init: 15.78, interface: public};
    var f_mid_NA_NA: Hz {init: 30, interface: public};
    var k_RSA_NA: dimensionless {init: 0.5, interface: public};
    var k_NA_NA: dimensionless {init: 23, interface: public};
    var s_NA: dimensionless {init: 0.2, interface: public};
    var f_min_NActr_NActr: Hz {init: 0.61, interface: public};
    var f_max_NActr_NActr: Hz {init: 11, interface: public};
    var f_mid_NActr_NActr: Hz {init: 12.81, interface: public};
    var k_NActr_NActr: dimensionless {init: 23, interface: public};
    var f_min_LCN_LCN: Hz {init: 1.25E+00, interface: public};
    var f_max_LCN_LCN: Hz {init: 3.05E+01, interface: public};
    var f_mid_LCN_LCN: Hz {init: 7.37E+02, interface: public};
    var k_evEmax_gainLCN_LCN: dimensionless {init: 4.47E+00, interface: public};
    var k_br_gainLCN_LCN: dimensionless {init: 2.49E+00, interface: public};
    var k_esh_gainLCN_LCN: dimensionless {init: 5.94E-02, interface: public};
    var k_cp_gainLCN_LCN: dimensionless {init: 6.95E+00, interface: public};
    var k_LCN_LCN: dimensionless {init: 4.32E+00, interface: public};
    var f_min_PNNA_PNNA: Hz {init: 6.39E-01, interface: public};
    var f_max_PNNA_PNNA: Hz {init: 1.79E+01, interface: public};
    var f_mid_PNNA_PNNA: Hz {init: 1.05E+01, interface: public};
    var k_PNNA_PNNA: dimensionless {init: 1.98E+00, interface: public};
    var f_min_PNDMV_PNDMV: Hz {init: 4.35E+00, interface: public};
    var f_max_PNDMV_PNDMV: Hz {init: 2.82E+01, interface: public};
    var f_mid_PNDMV_PNDMV: Hz {init: 2.84E+01, interface: public};
    var k_PNDMV_PNDMV: dimensionless {init: 2.38E+01, interface: public};
    var tau_PNDMV_PNDMV: second {init: 2.53E+00, interface: public};
    var W_bs_sympathetic_efferent: dimensionless {init: -1.14E+00, interface: public};
    var W_cs_sympathetic_efferent: dimensionless {init: 1.20E+01, interface: public};
    var G_theta_trunk_resistance_effector: Js_per_m6 {init: 6.56E+07, interface: public};
    var tau_theta_trunk_resistance_effector: second {init: 6, interface: public};
    var G_theta_arm_leg_resistance_effector: Js_per_m6 {init: 2.27E+08, interface: public};
    var tau_theta_arm_leg_resistance_effector: second {init: 6, interface: public};
    var inv_G_Es_lv_elastance_effector: m6_per_J {init: 7.73E-10, interface: public};
    var tau_Es_lv_elastance_effector: second {init: 2, interface: public};
    var inv_G_Ev_lv_elastance_effector: m6s_per_J {init: 1.54E-09, interface: public};
    var tau_Ev_lv_elastance_effector: second {init: 0.2, interface: public};
    var scale_lv_elastance_effector: dimensionless {init: 1, interface: public};
    var inv_G_Es_rv_elastance_effector: m6_per_J {init: 7.73E-10, interface: public};
    var tau_Es_rv_elastance_effector: second {init: 2, interface: public};
    var inv_G_Ev_rv_elastance_effector: m6s_per_J {init: 1.54E-09, interface: public};
    var tau_Ev_rv_elastance_effector: second {init: 0.2, interface: public};
    var scale_rv_elastance_effector: dimensionless {init: 0.5903, interface: public};
    var G_Ts_heart_period_effector: second {init: -5.99E-01, interface: public};
    var G_Tv_heart_period_effector: second {init: 0.05, interface: public};
    var tau_Ts_heart_period_effector: second {init: 2, interface: public};
    var tau_Tv_heart_period_effector: second {init: 1.5, interface: public};
    var G_theta_venous_us_volume_effector: m3 {init: -2.00E-04, interface: public};
    var tau_theta_venous_us_volume_effector: second {init: 20, interface: public};
  enddef;

  def comp parameters_global as
    var k_1: J_per_m3 {init: 1998.5, interface: public};
    var k_2: J_per_m3 {init: 25917.4, interface: public};
    var h_1: dimensionless {init: 0.3836, interface: public};
    var h_2: dimensionless {init: 1.819, interface: public};
    var alpha_1: m3_per_J {init: 2.40E-04, interface: public};
    var alpha_2: m3_per_J {init: 4.19E-04, interface: public};
    var beta_1: m3_per_J {init: 6.21E-05, interface: public};
    var beta_2: m3_per_J {init: 2.44E-05, interface: public};
    var C_O2_sat: dimensionless {init: 0.20448, interface: public};
    var C_CO2_sat: dimensionless {init: 1.9564, interface: public};
    var P_atm: J_per_m3 {init: 101300, interface: public};
    var P_ws: J_per_m3 {init: 6266.15, interface: public};
    var P_m: J_per_m3 {init: 0, interface: public};
    var rho: kg_per_m3 {init: 1050, interface: public};
    var T: second {init: 1, interface: public};
    var q_ra_us: m3 {init: 4.00E-06, interface: public};
    var q_rv_us: m3 {init: 1.00E-05, interface: public};
    var q_la_us: m3 {init: 4.00E-06, interface: public};
    var q_lv_us: m3 {init: 5.00E-06, interface: public};
    var q_ra_init: m3 {init: 4.00E-06, interface: public};
    var q_rv_init: m3 {init: 1.00E-05, interface: public};
    var q_la_init: m3 {init: 4.00E-06, interface: public};
    var q_lv_init: m3 {init: 1.47E-03, interface: public};
    var T_ac: second {init: 0.17, interface: public};
    var T_ar: second {init: 0.17, interface: public};
    var t_astart: second {init: 0.8, interface: public};
    var T_vc: second {init: 0.34, interface: public};
    var T_vr: second {init: 0.15, interface: public};
    var t_vstart: second {init: 0, interface: public};
    var E_ra_A: J_per_m6 {init: 8.00E+06, interface: public};
    var E_ra_B: J_per_m6 {init: 9.33E+06, interface: public};
    var E_rv_A: J_per_m6 {init: 7.33E+07, interface: public};
    var E_rv_B: J_per_m6 {init: 6.67E+06, interface: public};
    var E_la_A: J_per_m6 {init: 9.33E+06, interface: public};
    var E_la_B: J_per_m6 {init: 1.20E+07, interface: public};
    var E_lv_A: J_per_m6 {init: 3.26E+07, interface: public};
    var E_lv_B: J_per_m6 {init: 4.81E+07, interface: public};
    var K_vo_trv: m3_per_Js {init: 0.3, interface: public};
    var K_vo_puv: m3_per_Js {init: 0.2, interface: public};
    var K_vo_miv: m3_per_Js {init: 0.3, interface: public};
    var K_vo_aov: m3_per_Js {init: 0.12, interface: public};
    var K_vc_trv: m3_per_Js {init: 0.4, interface: public};
    var K_vc_puv: m3_per_Js {init: 0.2, interface: public};
    var K_vc_miv: m3_per_Js {init: 0.4, interface: public};
    var K_vc_aov: m3_per_Js {init: 0.12, interface: public};
    var M_rg_trv: dimensionless {init: 0, interface: public};
    var M_rg_puv: dimensionless {init: 0, interface: public};
    var M_rg_miv: dimensionless {init: 0, interface: public};
    var M_rg_aov: dimensionless {init: 0, interface: public};
    var M_st_trv: dimensionless {init: 1, interface: public};
    var M_st_puv: dimensionless {init: 1, interface: public};
    var M_st_miv: dimensionless {init: 1, interface: public};
    var M_st_aov: dimensionless {init: 1, interface: public};
    var l_eff: metre {init: 0.02, interface: public};
    var A_nn_trv: m2 {init: 0.0008, interface: public};
    var A_nn_puv: m2 {init: 0.00071, interface: public};
    var A_nn_miv: m2 {init: 0.00077, interface: public};
    var A_nn_aov: m2 {init: 0.00068, interface: public};
    var beta_g: dimensionless {init: 0, interface: public};
    var mu: Js_per_m3 {init: 0.004, interface: public};
    var g: m_per_s2 {init: 9.81, interface: public};
    var a_vessel: dimensionless {init: 0.2802, interface: public};
    var b_vessel: per_m {init: -505.3, interface: public};
    var c_vessel: dimensionless {init: 0.1324, interface: public};
    var d_vessel: per_m {init: -11.14, interface: public};
    var Hgb: kg_per_m3 {init: 1.50E+02, interface: public};
    var f_es_0: Hz {init: 16.11, interface: public};
    var f_es_inf: Hz {init: 2.1, interface: public};
    var f_es_max: Hz {init: 60, interface: public};
    var k_es: Hz {init: 0.0675, interface: public};
    var f_es_min: Hz {init: 2.66, interface: public};
    var P_CO2_a_nom: J_per_m3 {init: 5332.8, interface: public};
    var k_CO2_m: J_per_m3 {init: 19038, interface: public};
    var C_O2_vm_nom: dimensionless {init: 0.155, interface: public};
    var tau_O2: second {init: 10, interface: public};
    var tau_CO2: second {init: 20, interface: public};
    var g_O2_m: dimensionless {init: 30, interface: public};
    var C_O2_vb_nom: dimensionless {init: 0.14, interface: public};
    var g_O2_b: dimensionless {init: 10, interface: public};
    var A_b_lc: dimensionless {init: 20.9, interface: public};
    var B_b_lc: dimensionless {init: 92.8, interface: public};
    var C_b_lc: dimensionless {init: 1.53E+15, interface: public};
    var D_b_lc: dimensionless {init: -5.2551, interface: public};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp par_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v_in-v);
  enddef;

  def comp pcap_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v_in-v);
  enddef;

  def comp pulmonary_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_v: dimensionless {interface: public};
    var C_CO2_v: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.2, interface: public};
    var C_CO2_p: dimensionless {init: 0.34, interface: public};
    var k_O2: m6_per_Js {interface: public};
    var k_CO2: m6_per_Js {interface: public};
    var P_O2_A: J_per_m3 {interface: public};
    var P_CO2_A: J_per_m3 {interface: public};
    var shunt_fraction: dimensionless {interface: public};
    var P_O2_p: J_per_m3 {interface: public};
    var P_CO2_p: J_per_m3 {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var v_p: m3_per_s {interface: public};
    var v_sh: m3_per_s {interface: public};
    var d_C_O2_p_dt: Hz {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    M_O2 = k_O2*(P_O2_A-P_O2_p);
    M_CO2 = k_CO2*(P_CO2_A-P_CO2_p);
    ode(C_O2_p, t) = (v_p*(C_O2_v-C_O2_p)+M_O2)/q_0;
    d_C_O2_p_dt = (v_p*(C_CO2_v-C_CO2_p)+M_CO2)/q_0;
    ode(C_CO2_p, t) = d_C_O2_p_dt;
    // from inverted dissociation
    P_O2_p = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_p = d_2*(1{dimensionless}+alpha_2*P_O2_p)/(1{dimensionless}+beta_2*P_O2_p);
    // flows from shunt todo model this??
    v_p = v*(1{dimensionless}-shunt_fraction);
    v_sh = v*shunt_fraction;
    // calculate arterial gas concentration due to pulmonary shunt
    C_O2_a = max((v_p*C_O2_p+v_sh*C_O2_v)/v, 0{dimensionless});
    C_CO2_a = max((v_p*C_CO2_p+v_sh*C_CO2_v)/v, 0{dimensionless});
    d_1 = max(k_1*pow(C_O2_p/(C_O2_sat-C_O2_p), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_p/(C_CO2_sat-C_CO2_p), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp respiratory_gt_module as
    var t: second {interface: public};
    var F_O2_i: dimensionless {interface: public};
    var F_CO2_i: dimensionless {interface: public};
    var P_atm: J_per_m3 {interface: public};
    var P_ws: J_per_m3 {interface: public};
    var K_LOSSES: dimensionless {interface: public};
    var F_O2_D: dimensionless {init: 0.21, interface: public};
    var F_CO2_D: dimensionless {init: 0.000421, interface: public};
    var F_O2_A: dimensionless {interface: public};
    var F_CO2_A: dimensionless {init: 0.000421, interface: public};
    var P_O2_A: J_per_m3 {interface: public};
    var P_CO2_A: J_per_m3 {interface: public};
    var v_ml: m3_per_s {interface: public};
    var v_bA: m3_per_s {interface: public};
    var q_D: m3 {interface: public};
    var q_A: m3 {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    ode(F_O2_D, t) = (max(v_ml, 0{m3_per_s})*(F_O2_i-F_O2_D)-max(-v_bA, 0{m3_per_s})*(F_O2_D-F_O2_A))/q_D;
    ode(F_CO2_D, t) = (max(v_ml, 0{m3_per_s})*(F_CO2_i-F_CO2_D)-max(-v_bA, 0{m3_per_s})*(F_CO2_D-F_CO2_A))/q_D;
    ode(F_O2_A, t) = (max(v_bA, 0{m3_per_s})*(F_O2_D-F_O2_A)-K_LOSSES*M_O2)/q_A;
    ode(F_CO2_A, t) = (max(v_bA, 0{m3_per_s})*(F_CO2_D-F_CO2_A)-K_LOSSES*M_CO2)/q_A;
    P_O2_A = F_O2_A*(P_atm-P_ws);
    P_CO2_A = F_CO2_A*(P_atm-P_ws);
  enddef;

  def comp lung_module as
    var t: second {interface: public};
    var P_m: J_per_m3 {interface: public};
    var P_l: J_per_m3 {interface: public};
    var P_t: J_per_m3 {interface: public};
    var P_b: J_per_m3 {interface: public};
    var P_A: J_per_m3 {interface: public};
    var P_pl: J_per_m3 {interface: public};
    var P_mus: J_per_m3 {interface: public};
    var P_mus_min: J_per_m3 {interface: public};
    var P_plEE: J_per_m3 {interface: public};
    var q_l: m3 {init: 1.0e-2, interface: public};
    var q_t: m3 {init: 1.0e-3, interface: public};
    var q_b: m3 {init: 1.0e-3, interface: public};
    var q_A_stressed: m3 {init: 0.0, interface: public};
    var q_A: m3 {interface: public};
    var q_pl: m3 {init: 0.0, interface: public};
    var q_D: m3 {interface: public};
    var v_ml: m3_per_s {interface: public};
    var v_lt: m3_per_s {interface: public};
    var v_tb: m3_per_s {interface: public};
    var v_bA: m3_per_s {interface: public};
    var v_twall: m3_per_s {interface: public};
    var v_bwall: m3_per_s {interface: public};
    var v_plwall: m3_per_s {interface: public};
    var R_ml: Js_per_m6 {interface: public};
    var R_lt: Js_per_m6 {interface: public};
    var R_tb: Js_per_m6 {interface: public};
    var R_bA: Js_per_m6 {interface: public};
    var R_plwall: Js_per_m6 {interface: public};
    var C_l: m6_per_J {interface: public};
    var C_t: m6_per_J {interface: public};
    var C_b: m6_per_J {interface: public};
    var C_A: m6_per_J {interface: public};
    var C_pl: m6_per_J {interface: public};
    var t_floor: second {interface: public};
    var T_resp: second {interface: public};
    var T_I: second {interface: public};
    var T_E: second {interface: public};
    var tau: second {interface: public};
    var IE_ratio: dimensionless {interface: public};
    var q_l_us: m3 {interface: public};
    var q_t_us: m3 {interface: public};
    var q_b_us: m3 {interface: public};
    var q_A_us: m3 {interface: public};
    T_E = T_resp/(1{dimensionless}+IE_ratio);
    T_I = T_E*IE_ratio;
    tau = T_E/5{dimensionless};
    // TODO split this into submodules
    v_ml = (P_m-P_l)/R_ml;
    ode(q_l, t) = v_ml-v_lt;
    P_l = q_l/C_l;
    v_lt = (P_l-P_t)/R_lt;
    v_twall = v_lt-v_tb;
    ode(q_t, t) = v_twall;
    P_t = q_t/C_t+P_pl;
    v_tb = (P_t-P_b)/R_tb;
    v_bwall = v_tb-v_bA;
    ode(q_b, t) = v_bwall;
    P_b = q_b/C_b+P_pl;
    v_bA = (P_b-P_A)/R_bA;
    // v_Awall = v_bA
    ode(q_A_stressed, t) = v_bA;
    P_A = q_A_stressed/C_A+P_pl;
    ode(q_pl, t) = v_plwall-v_twall-v_bwall-v_bA;
    P_pl = q_pl/C_pl-P_plEE;
    v_plwall = (P_mus-P_pl)/R_plwall;
    // Dead space volume
    q_D = q_l+q_t+q_b+q_l_us+q_t_us+q_b_us;
    q_A = q_A_stressed+q_A_us;
    // TODO + unstressed volume
    // calculate time through this period
    t_floor = t-floor(t/T_resp)*T_resp;
    // TODO swap this muscle model for the one used in ben tal and smith 2008
    P_mus = sel
      case t_floor < T_I:
        -P_mus_min/(T_I*T_E)*sqr(t_floor)+P_mus_min*T_resp/(T_I*T_E)*t_floor;
      otherwise:
        P_mus_min/(1{dimensionless}-exp(-T_E/tau))*(exp(-(t_floor-T_I)/tau)-exp(-T_E/tau));
    endsel;
  enddef;

  def comp pvn_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {init: q_C_init, interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: m3 {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v_in-v);
    q_us_wCont = q_us_0+Delta_q_us;
  enddef;

  def comp heart_module as
    var t: second {interface: public};
    var s: dimensionless {init: 0.0, interface: public};
    var mt: dimensionless {interface: public};
    var e_a: dimensionless {interface: public};
    var e_v: dimensionless {interface: public};
    var T: second {interface: public};
    var T_ac: second {interface: public};
    var T_ar: second {interface: public};
    var t_astart: second {interface: public};
    var t_astart_norm: dimensionless {interface: public};
    var T_vc: second {interface: public};
    var T_vr: second {interface: public};
    var t_vstart: second {interface: public};
    var t_vstart_norm: dimensionless {interface: public};
    var T_wCont: second {interface: public};
    var T_ac_wCont: second {interface: public};
    var T_ar_wCont: second {interface: public};
    var T_vc_wCont: second {interface: public};
    var T_vr_wCont: second {interface: public};
    var E_lv_A: J_per_m6 {interface: public};
    var E_lv_B: J_per_m6 {interface: public};
    var E_la_A: J_per_m6 {interface: public};
    var E_la_B: J_per_m6 {interface: public};
    var E_rv_A: J_per_m6 {interface: public};
    var E_rv_B: J_per_m6 {interface: public};
    var E_ra_A: J_per_m6 {interface: public};
    var E_ra_B: J_per_m6 {interface: public};
    var q_ra_us: m3 {interface: public};
    var q_rv_us: m3 {interface: public};
    var q_la_us: m3 {interface: public};
    var q_lv_us: m3 {interface: public};
    var q_ra_init: m3 {interface: public};
    var q_rv_init: m3 {interface: public};
    var q_la_init: m3 {interface: public};
    var q_lv_init: m3 {interface: public};
    var u_ra: J_per_m3 {interface: public};
    var u_rv: J_per_m3 {interface: public};
    var u_la: J_per_m3 {interface: public};
    var u_lv: J_per_m3 {interface: public};
    var u_root: J_per_m3 {interface: public};
    var u_par: J_per_m3 {interface: public};
    var v_trv: m3_per_s {init: 0, interface: public};
    var v_puv: m3_per_s {init: 0, interface: public};
    var v_miv: m3_per_s {init: 0, interface: public};
    var v_aov: m3_per_s {init: 0, interface: public};
    var v_svc: m3_per_s {interface: public};
    var v_ivc: m3_per_s {interface: public};
    var v_pvn: m3_per_s {interface: public};
    var L_trv: Js2_per_m6;
    var L_puv: Js2_per_m6;
    var L_miv: Js2_per_m6;
    var L_aov: Js2_per_m6;
    var A_eff_trv: m2 {interface: public};
    var A_eff_puv: m2 {interface: public};
    var A_eff_miv: m2 {interface: public};
    var A_eff_aov: m2 {interface: public};
    var A_nn_trv: m2 {interface: public};
    var A_nn_puv: m2 {interface: public};
    var A_nn_miv: m2 {interface: public};
    var A_nn_aov: m2 {interface: public};
    var l_eff: metre {interface: public};
    var K_vo_trv: m3_per_Js {interface: public};
    var K_vo_puv: m3_per_Js {interface: public};
    var K_vo_miv: m3_per_Js {interface: public};
    var K_vo_aov: m3_per_Js {interface: public};
    var K_vc_trv: m3_per_Js {interface: public};
    var K_vc_puv: m3_per_Js {interface: public};
    var K_vc_miv: m3_per_Js {interface: public};
    var K_vc_aov: m3_per_Js {interface: public};
    var M_rg_trv: dimensionless {interface: public};
    var M_rg_puv: dimensionless {interface: public};
    var M_rg_miv: dimensionless {interface: public};
    var M_rg_aov: dimensionless {interface: public};
    var M_st_trv: dimensionless {interface: public};
    var M_st_puv: dimensionless {interface: public};
    var M_st_miv: dimensionless {interface: public};
    var M_st_aov: dimensionless {interface: public};
    var rho: kg_per_m3 {interface: public};
    var B_trv: Js2_per_m9 {interface: public};
    var B_puv: Js2_per_m9 {interface: public};
    var B_miv: Js2_per_m9 {interface: public};
    var B_aov: Js2_per_m9 {interface: public};
    var zeta_trv: dimensionless {interface: public};
    var zeta_puv: dimensionless {interface: public};
    var zeta_miv: dimensionless {interface: public};
    var zeta_aov: dimensionless {interface: public};
    var zeta_trv_pre: dimensionless {init: 0, interface: public};
    var zeta_puv_pre: dimensionless {init: 0, interface: public};
    var zeta_miv_pre: dimensionless {init: 0, interface: public};
    var zeta_aov_pre: dimensionless {init: 0, interface: public};
    var eps_m4: m4 {init: 1e-14};
    var eps_m2: m2 {init: 1e-14};
    var eps_1: dimensionless {init: 0.07};
    var eps_2: dimensionless {init: 0.02};
    var q_lv: m3 {init: q_lv_init, interface: public};
    var q_rv: m3 {init: q_rv_init, interface: public};
    var q_la: m3 {init: q_la_init, interface: public};
    var q_ra: m3 {init: q_ra_init, interface: public};
    var chi_a: dimensionless {init: 0.0, interface: public};
    var chi_afloor: dimensionless {interface: public};
    var chi_v: dimensionless {init: 0.0};
    var chi_vfloor: dimensionless;
    var Delta_T: second {interface: public};
    var E_rv_A_wCont: J_per_m6 {interface: public};
    var E_lv_A_wCont: J_per_m6 {interface: public};
    var Delta_E_rv: J_per_m6 {interface: public};
    var Delta_E_lv: J_per_m6 {interface: public};
    chi_afloor = chi_a-floor(chi_a);
    // the below are the wrong units, the 0.5 should be dimensionless
    ode(chi_a, t) = sel
      case (mt >= t_astart_norm) and (mt <= t_astart_norm+eps_1) and (chi_afloor <= 0.5{dimensionless}):
        0.5{dimensionless}/T_ac_wCont;
      case (t_astart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_astart_norm+eps_1-1.0{dimensionless}) and (chi_afloor <= 0.5{dimensionless}):
        0.5{dimensionless}/T_ac_wCont;
      case (chi_afloor > eps_2) and (chi_afloor <= 0.5{dimensionless}):
        0.5{dimensionless}/T_ac_wCont;
      case chi_afloor >= 0.5{dimensionless}:
        0.5{dimensionless}/T_ar_wCont;
      otherwise:
        0{Hz};
    endsel;
    chi_vfloor = chi_v-floor(chi_v);
    ode(chi_v, t) = sel
      case (mt >= t_vstart_norm) and (mt <= t_vstart_norm+eps_1) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{dimensionless}/T_vc_wCont;
      case (t_vstart_norm+eps_1 > 1.0{dimensionless}) and (mt <= t_vstart_norm+eps_1-1.0{dimensionless}) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{dimensionless}/T_vc_wCont;
      case (chi_vfloor > eps_2) and (chi_vfloor <= 0.5{dimensionless}):
        0.5{dimensionless}/T_vc_wCont;
      case chi_vfloor > 0.5{dimensionless}:
        0.5{dimensionless}/T_vr_wCont;
      otherwise:
        0{Hz};
    endsel;
    ode(s, t) = 1{dimensionless}/T_wCont;
    mt = s-floor(s);
    T_wCont = T+Delta_T;
    T_ac_wCont = T_ac*T_wCont/T;
    T_ar_wCont = T_ar*T_wCont/T;
    T_vc_wCont = T_vc*T_wCont/T;
    T_vr_wCont = T_vr*T_wCont/T;
    // Elastance Functions
    t_astart_norm = t_astart/T;
    // T_ac_norm = T_ac/T;
    // T_ar_norm = T_vc/T;
    t_vstart_norm = t_vstart/T;
    // T_vc_norm = T_vc/T;
    // T_vr_norm = T_vr/T;
    e_a = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_afloor));
    e_v = 0.5{dimensionless}*(1{dimensionless}-cos(2{dimensionless}*pi*chi_vfloor));
    // Valve model
    B_trv = rho/(2{dimensionless}*sqr(A_eff_trv)+eps_m4);
    B_puv = rho/(2{dimensionless}*sqr(A_eff_puv)+eps_m4);
    B_miv = rho/(2{dimensionless}*sqr(A_eff_miv)+eps_m4);
    B_aov = rho/(2{dimensionless}*sqr(A_eff_aov)+eps_m4);
    L_trv = rho*l_eff/(A_eff_trv+eps_m2);
    L_puv = rho*l_eff/(A_eff_puv+eps_m2);
    L_miv = rho*l_eff/(A_eff_miv+eps_m2);
    L_aov = rho*l_eff/(A_eff_aov+eps_m2);
    A_eff_trv = (M_st_trv*A_nn_trv-M_rg_trv*A_nn_trv)*zeta_trv+M_rg_trv*A_nn_trv;
    A_eff_puv = (M_st_puv*A_nn_puv-M_rg_puv*A_nn_puv)*zeta_puv+M_rg_puv*A_nn_puv;
    A_eff_miv = (M_st_miv*A_nn_miv-M_rg_miv*A_nn_miv)*zeta_miv+M_rg_miv*A_nn_miv;
    A_eff_aov = (M_st_aov*A_nn_aov-M_rg_aov*A_nn_aov)*zeta_aov+M_rg_aov*A_nn_aov;
    ode(zeta_trv_pre, t) = sel
      case u_ra >= u_rv:
        (1{dimensionless}-zeta_trv_pre)*K_vo_trv*(u_ra-u_rv);
      otherwise:
        zeta_trv_pre*K_vc_trv*(u_ra-u_rv);
    endsel;
    ode(zeta_puv_pre, t) = sel
      case u_rv >= u_par:
        (1{dimensionless}-zeta_puv_pre)*K_vo_puv*(u_rv-u_par);
      otherwise:
        zeta_puv_pre*K_vc_puv*(u_rv-u_par);
    endsel;
    ode(zeta_miv_pre, t) = sel
      case u_la >= u_lv:
        (1{dimensionless}-zeta_miv_pre)*K_vo_miv*(u_la-u_lv);
      otherwise:
        zeta_miv_pre*K_vc_miv*(u_la-u_lv);
    endsel;
    ode(zeta_aov_pre, t) = sel
      case u_lv >= u_root:
        (1{dimensionless}-zeta_aov_pre)*K_vo_aov*(u_lv-u_root);
      otherwise:
        zeta_aov_pre*K_vc_aov*(u_lv-u_root);
    endsel;
    // The below ensures zeta can't be negative
    zeta_trv = max(zeta_trv_pre, 0{dimensionless});
    zeta_puv = max(zeta_puv_pre, 0{dimensionless});
    zeta_miv = max(zeta_miv_pre, 0{dimensionless});
    zeta_aov = max(zeta_aov_pre, 0{dimensionless});
    // calculate the flow through the valves
    ode(v_trv, t) = (-B_trv*v_trv*abs(v_trv)+u_ra-u_rv)/L_trv;
    ode(v_puv, t) = (-B_puv*v_puv*abs(v_puv)+u_rv-u_par)/L_puv;
    ode(v_miv, t) = (-B_miv*v_miv*abs(v_miv)+u_la-u_lv)/L_miv;
    ode(v_aov, t) = (-B_aov*v_aov*abs(v_aov)+u_lv-u_root)/L_aov;
    E_rv_A_wCont = E_rv_A+Delta_E_rv;
    E_lv_A_wCont = E_lv_A+Delta_E_lv;
    // Constitutive Relations
    u_ra = (e_a*E_ra_A+E_ra_B)*(q_ra-q_ra_us);
    u_rv = (e_v*E_rv_A_wCont+E_rv_B)*(q_rv-q_rv_us);
    u_la = (e_a*E_la_A+E_la_B)*(q_la-q_la_us);
    u_lv = (e_v*E_lv_A_wCont+E_lv_B)*(q_lv-q_lv_us);
    // Conservation Laws
    ode(q_ra, t) = v_svc+v_ivc-v_trv;
    ode(q_rv, t) = v_trv-v_puv;
    ode(q_la, t) = v_pvn-v_miv;
    ode(q_lv, t) = v_miv-v_aov;
  enddef;

  def comp ascending_aorta_A_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp ascending_aorta_B_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp ascending_aorta_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp ascending_aorta_D_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp aortic_arch_C2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp aortic_arch_C46_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp aortic_arch_C64_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp brachiocephalic_trunk_C4_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp subclavian_L66_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp subclavian_L78_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp brachial_L82_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp common_carotid_L48_A_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp common_carotid_L48_B_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp common_carotid_L48_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp common_carotid_L48_D_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp common_carotid_R6_A_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp common_carotid_R6_B_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp common_carotid_R6_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp external_carotid_L62_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp external_carotid_R26_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp internal_carotid_L50_A_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp internal_carotid_L50_B_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp internal_carotid_L50_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp internal_carotid_R8_A_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp internal_carotid_R8_B_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp internal_carotid_R8_C_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp posterior_communicating_L8_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp posterior_communicating_R206_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp internal_carotid_L112_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp internal_carotid_R48_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp middle_cerebral_L114_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp middle_cerebral_R52_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp anterior_cerebral_L110_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp anterior_cerebral_R46_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp anterior_cerebral_R238_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp anterior_cerebral_L42_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in_1: m3_per_s {interface: public};
    var v_in_2: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp anterior_communicating_C44_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vertebral_L2_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp subclavian_R28_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp subclavian_R30_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp brachial_R34_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp vertebral_R272_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp basilar_C4_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in_1: m3_per_s {interface: public};
    var v_in_2: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp posterior_cerebral_pre_L6_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp posterior_cerebral_post_L12_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in_1: m3_per_s {interface: public};
    var v_in_2: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp posterior_cerebral_pre_R204_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_d: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp posterior_cerebral_post_R208_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in_1: m3_per_s {interface: public};
    var v_in_2: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_C_d: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    var q_C_d: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp posterior_cerebral_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp posterior_cerebral_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp external_carotid_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp external_carotid_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp middle_cerebral_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp middle_cerebral_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp anterior_cerebral_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp anterior_cerebral_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp arm_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp arm_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp aortic_arch_C94_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp thoracic_aorta_C96_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp thoracic_aorta_C100_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp thoracic_aorta_C104_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp thoracic_aorta_C108_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp thoracic_aorta_C112_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp abdominal_aorta_C114_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp trunk_C_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp abdominal_aorta_C136_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp abdominal_aorta_C164_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp abdominal_aorta_C176_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp abdominal_aorta_C188_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp abdominal_aorta_C192_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var du_C_dt: J_per_m3s {interface: public};
    var v_out_1: m3_per_s {interface: public};
    var v_out_2: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp common_iliac_L194_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp external_iliac_L198_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp common_iliac_R216_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp external_iliac_R220_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp femoral_L200_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp femoral_R222_module as
    var t: second {interface: public};
    var mu: Js_per_m3 {interface: public};
    var rho: kg_per_m3 {interface: public};
    var g: m_per_s2 {interface: public};
    var beta_g: dimensionless {interface: public};
    var theta: dimensionless {interface: public};
    var E: J_per_m3 {interface: public};
    var l: metre {interface: public};
    var h: metre {interface: public};
    var r: metre {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var a_vessel: dimensionless {interface: public};
    var b_vessel: per_m {interface: public};
    var c_vessel: dimensionless {interface: public};
    var d_vessel: per_m {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_out: m3_per_s {interface: public};
    var q_C: m3 {init: 0.0, interface: public};
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp leg_L_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp leg_R_T_module as
    var t: second {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_in: J_per_m3 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v_T: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_T: m3 {init: 0.0, interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp venous_lb_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {init: q_C_init, interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: m3 {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v_in-v);
    q_us_wCont = q_us_0+Delta_q_us;
  enddef;

  def comp venous_ub_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {init: q_C_init, interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: m3 {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v_in-v);
    q_us_wCont = q_us_0+Delta_q_us;
  enddef;

  def comp venous_ivc_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {init: q_C_init, interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: m3 {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v_in-v);
    q_us_wCont = q_us_0+Delta_q_us;
  enddef;

  def comp venous_svc_module as
    var t: second {interface: public};
    var I: Js2_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {init: q_C_init, interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
    var v: m3_per_s {init: 0.0, interface: public};
    var u_out: J_per_m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: m3 {interface: public};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v_in-v);
    q_us_wCont = q_us_0+Delta_q_us;
  enddef;

  def comp middle_cerebral_L_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp middle_cerebral_R_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp anterior_cerebral_L_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp anterior_cerebral_R_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp posterior_cerebral_L_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp posterior_cerebral_R_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp external_carotid_L_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp external_carotid_R_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp arm_L_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp arm_R_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp leg_L_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp leg_R_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp trunk_C_GE_module as
    var t: second {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {init: 0.15, interface: public};
    var C_CO2_p: dimensionless {init: 0.38, interface: public};
    ode(C_O2_p, t) = (v*(C_O2_a-C_O2_p)+M_O2)/q_0;
    ode(C_CO2_p, t) = (v*(C_CO2_a-C_CO2_p)+M_CO2)/q_0;
  enddef;

  def comp arterial_gas_transport_module as
    var t: second {interface: public};
    var C_O2_in: dimensionless {init: 0.18, interface: public};
    var C_CO2_in: dimensionless {init: 0.36, interface: public};
    var C_O2_out: dimensionless {init: 0.18, interface: public};
    var C_CO2_out: dimensionless {init: 0.36, interface: public};
    var dot_C_CO2_out: Hz {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    ode(C_O2_out, t) = v*(C_O2_in-C_O2_out)/q_0;
    dot_C_CO2_out = v*(C_CO2_in-C_CO2_out)/q_0;
    ode(C_CO2_out, t) = dot_C_CO2_out;
  enddef;

  def comp venous_gas_transport_module as
    var t: second {interface: public};
    var C_O2_in: dimensionless {init: 0.18, interface: public};
    var C_CO2_in: dimensionless {init: 0.36, interface: public};
    var C_O2_out: dimensionless {init: 0.18, interface: public};
    var C_CO2_out: dimensionless {init: 0.36, interface: public};
    var dot_C_CO2_out: Hz {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
    ode(C_O2_out, t) = v*(C_O2_in-C_O2_out)/q_0;
    dot_C_CO2_out = v*(C_CO2_in-C_CO2_out)/q_0;
    ode(C_CO2_out, t) = dot_C_CO2_out;
  enddef;

  def comp common_carotid_L_baro_module as
    var t: second {interface: public};
    var P_sys: J_per_m3 {interface: public};
    var P_baro_init: J_per_m3 {interface: public};
    var P_baro: J_per_m3 {init: P_baro_init, interface: public};
    var f_ab: Hz {interface: public};
    var dP_sys_dt: J_per_m3s {interface: public};
    var P_nom: J_per_m3 {interface: public};
    var f_ab_min: Hz {interface: public};
    var f_ab_max: Hz {interface: public};
    var k_ab: J_per_m3 {interface: public};
    var tau_zb: second {interface: public};
    var tau_pb: second {interface: public};
    ode(P_baro, t) = (P_sys+tau_zb*dP_sys_dt-P_baro)/tau_pb;
    f_ab = (f_ab_min+f_ab_max*exp((P_baro-P_nom)/k_ab))/(1{dimensionless}+exp((P_baro-P_nom)/k_ab));
  enddef;

  def comp arterial_chemoreceptor_module as
    var t: second {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var dot_C_CO2_a: Hz {interface: public};
    var X_O2: dimensionless {interface: public};
    var phi_stat: Hz {interface: public};
    var phi_CO2_dyn: Hz {init: 0.0, interface: public};
    var f_c_stat: Hz {interface: public};
    var f_c_dyn: Hz {interface: public};
    var f_apc: Hz {interface: public};
    var phi_apc: Hz {init: 0.0, interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var AA: dimensionless {interface: public};
    var BB: dimensionless {interface: public};
    var C_CO2_a_nom: dimensionless {interface: public};
    var K_O2: dimensionless {interface: public};
    var K_CO2: Hz {interface: public};
    var K_stat: Hz {interface: public};
    var K_dyn: Hz {interface: public};
    var tau_cap: second {interface: public};
    var tau_CO2_cc_dyn: dimensionless {interface: public};
    var C_O2_a_diss: dimensionless {interface: public};
    var S_O2_a: dimensionless {interface: public};
    var Hgb: kg_per_m3 {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    X_O2 = AA*(1{dimensionless}-S_O2_a)+BB;
    phi_stat = K_CO2*(C_CO2_a-C_CO2_a_nom)*K_O2*(1{dimensionless}-exp(-X_O2/K_O2));
    f_c_stat = sel
      case C_CO2_a >= C_CO2_a_nom:
        K_stat*(1{dimensionless}-exp(-phi_stat/K_stat));
      otherwise:
        0{Hz};
    endsel;
    ode(phi_CO2_dyn, t) = (dot_C_CO2_a*tau_CO2_cc_dyn-phi_CO2_dyn)/tau_cap;
    f_c_dyn = K_dyn*(1{dimensionless}-exp(-phi_CO2_dyn/K_dyn));
    ode(phi_apc, t) = (f_c_stat+f_c_dyn-phi_apc)/tau_cap;
    f_apc = max(phi_apc, 0{Hz});
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    // P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_p)/(1{dimensionless}+beta_2*P_O2_p);
    C_O2_a_diss = sel
      case C_O2_sat-Hgb*1.34e-3{m3_per_kg}-P_O2_a*0.003{dimensionless}/100{dimensionless} >= 0{dimensionless}:
        P_O2_a*0.003{dimensionless}/100{dimensionless};
      otherwise:
        C_O2_sat-Hgb*1.34e-3{m3_per_kg};
    endsel;
    S_O2_a = (C_O2_a-C_O2_a_diss)/(Hgb*1.34e-3{m3_per_kg});
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp lung_stretch_module as
    var q_A: m3 {interface: public};
    var q_b: m3 {interface: public};
    var V_lung: m3 {interface: public};
    var t: second {interface: public};
    var f_ls: Hz {init: 0, interface: public};
    var tau_lung: second {interface: public};
    var G_al: per_ml_s {interface: public};
    V_lung = q_A+q_b;
    ode(f_ls, t) = (-f_ls+G_al*V_lung)/tau_lung;
  enddef;

  def comp cardiopulm_receptor_module as
    var u_out: mmHg {interface: public};
    var P_mus: mmHg {interface: public};
    var P_pv_P_thor: mmHg {interface: public};
    var t: second {interface: public};
    var tau_cp: second {interface: public};
    var P_l_init: mmHg {interface: public};
    var P_l: mmHg {init: P_l_init, interface: public};
    var f_cp: Hz {interface: public};
    var f_maxl: Hz {interface: public};
    var P_tn: mmHg {interface: public};
    var k_l: mmHg {interface: public};
    P_pv_P_thor = u_out-P_mus;
    ode(P_l, t) = (-P_l+P_pv_P_thor)/tau_cp;
    f_cp = f_maxl/(1{dimensionless}+exp((P_tn-P_l)/k_l));
  enddef;

  def comp NTS_module as
    var t: second {interface: public};
    var f_br: Hz {interface: public};
    var f_min_br: Hz {interface: public};
    var f_max_br: Hz {interface: public};
    var f_mid_br: Hz {interface: public};
    var f_NTS_br: Hz {interface: public};
    var k_NTS_br: dimensionless {interface: public};
    var f_ls: Hz {interface: public};
    var f_min_ls: Hz {interface: public};
    var f_max_ls: Hz {interface: public};
    var f_mid_ls: Hz {interface: public};
    var f_NTS_ls: Hz {interface: public};
    var k_NTS_ls: dimensionless {interface: public};
    var f_cp: Hz {interface: public};
    var f_min_cp: Hz {interface: public};
    var f_max_cp: Hz {interface: public};
    var f_mid_cp: Hz {interface: public};
    var f_NTS_cp: Hz {interface: public};
    var k_NTS_cp: dimensionless {interface: public};
    var f_apc: Hz {interface: public};
    var f_min_ch: Hz {interface: public};
    var f_max_ch: Hz {interface: public};
    var f_mid_ch: Hz {interface: public};
    var f_NTS_ch: Hz {interface: public};
    var k_NTS_ch: dimensionless {interface: public};
    f_NTS_br = (f_min_br-f_max_br)/(1{dimensionless}+pow(f_br/f_mid_br, k_NTS_br))+f_max_br;
    f_NTS_ls = (f_min_ls-f_max_ls)/(1{dimensionless}+pow(f_ls/f_mid_ls, k_NTS_ls))+f_max_ls;
    f_NTS_cp = (f_min_cp-f_max_cp)/(1{dimensionless}+pow(f_cp/f_mid_cp, k_NTS_cp))+f_max_cp;
    f_NTS_ch = (f_min_ch-f_max_ch)/(1{dimensionless}+pow(f_apc/f_mid_ch, k_NTS_ch))+f_max_ch;
  enddef;

  def comp DMV_module as
    var t: second {interface: public};
    var f_NTS_ls: Hz {interface: public};
    var f_NTS_cp: Hz {interface: public};
    var f_min_DMV: Hz {interface: public};
    var f_max_DMV: Hz {interface: public};
    var f_mid_DMV: Hz {interface: public};
    var f_DMV: Hz {interface: public};
    var k_DMV: dimensionless {interface: public};
    f_DMV = (f_min_DMV-f_max_DMV)/(1{dimensionless}+pow((f_NTS_ls+f_NTS_cp)/f_mid_DMV, k_DMV))+f_max_DMV;
  enddef;

  def comp NA_module as
    var t: second {interface: public};
    var f_NTS_br: Hz {interface: public};
    var f_NTS_ls: Hz {interface: public};
    var f_NTS_cp: Hz {interface: public};
    var f_NTS_ch: Hz {interface: public};
    var f_NTS_output: Hz {interface: public};
    var f_NA_input: Hz {interface: public};
    var k_RSA: dimensionless {interface: public};
    var s: dimensionless {interface: public};
    var f_min_NA: Hz {interface: public};
    var f_max_NA: Hz {interface: public};
    var f_mid_NA: Hz {interface: public};
    var f_NA: Hz {interface: public};
    var k_NA: dimensionless {interface: public};
    f_NTS_output = f_NTS_br+f_NTS_ls+f_NTS_cp+f_NTS_ch;
    f_NA_input = sel
      case s > 0.4{dimensionless}:
        f_NTS_output;
      otherwise:
        f_NTS_output*k_RSA;
    endsel;
    f_NA = (f_min_NA-f_max_NA)/(1{dimensionless}+pow(f_NA_input/f_mid_NA, k_NA))+f_max_NA;
  enddef;

  def comp NActr_module as
    var t: second {interface: public};
    var f_NA: Hz {interface: public};
    var f_min_NActr: Hz {interface: public};
    var f_max_NActr: Hz {interface: public};
    var f_mid_NActr: Hz {interface: public};
    var f_NActr: Hz {interface: public};
    var k_NActr: dimensionless {interface: public};
    f_NActr = (f_min_NActr-f_max_NActr)/(1{dimensionless}+pow(f_NA/f_mid_NActr, k_NActr))+f_max_NActr;
  enddef;

  def comp LCN_module as
    var t: second {interface: public};
    var k_evEmax_gainLCN: dimensionless {interface: public};
    var f_DMV: Hz {interface: public};
    var f_NActr: Hz {interface: public};
    var k_br_gainLCN: dimensionless {interface: public};
    var f_br: Hz {interface: public};
    var k_esh_gainLCN: dimensionless {interface: public};
    var f_esh: Hz {interface: public};
    var k_cp_gainLCN: dimensionless {interface: public};
    var f_cp: Hz {interface: public};
    var f_input_LCN_sum: Hz {interface: public};
    var f_input_LCN: Hz {interface: public};
    var f_LCN: Hz {interface: public};
    var f_mid_LCN: Hz {interface: public};
    var f_min_LCN: Hz {interface: public};
    var f_max_LCN: Hz {interface: public};
    var k_LCN: dimensionless {interface: public};
    f_input_LCN_sum = k_evEmax_gainLCN*(f_DMV+f_NActr)+k_br_gainLCN*f_br-k_esh_gainLCN*f_esh+k_cp_gainLCN*f_cp;
    f_input_LCN = sel
      case f_input_LCN_sum >= 0{dimensionless}:
        f_input_LCN_sum;
      otherwise:
        0{dimensionless};
    endsel;
    f_LCN = (f_min_LCN-f_max_LCN)/(1{dimensionless}+pow(f_input_LCN/f_mid_LCN, k_LCN))+f_max_LCN;
  enddef;

  def comp PNNA_module as
    var t: second {interface: public};
    var f_PNNA: Hz {interface: public};
    var f_NA: Hz {interface: public};
    var f_LCN: Hz {interface: public};
    var f_mid_PNNA: Hz {interface: public};
    var f_min_PNNA: Hz {interface: public};
    var f_max_PNNA: Hz {interface: public};
    var k_PNNA: dimensionless {interface: public};
    f_PNNA = (f_min_PNNA-f_max_PNNA)/(1{dimensionless}+pow((f_NA+f_LCN)/f_mid_PNNA, k_PNNA))+f_max_PNNA;
  enddef;

  def comp PNDMV_module as
    var f_PNDMV: Hz {interface: public};
    var f_DMV: Hz {interface: public};
    var f_NActr: Hz {interface: public};
    var f_LCN: Hz {interface: public};
    var f_mid_PNDMV: Hz {interface: public};
    var f_min_PNDMV: Hz {interface: public};
    var f_max_PNDMV: Hz {interface: public};
    var k_PNDMV: dimensionless {interface: public};
    var f_PNDMV_filt: Hz {init: 0, interface: public};
    var tau_PNDMV: second {interface: public};
    var t: second {interface: public};
    f_PNDMV = (f_min_PNDMV-f_max_PNDMV)/(1{dimensionless}+pow((f_DMV+f_NActr+f_LCN)/f_mid_PNDMV, k_PNDMV))+f_max_PNDMV;
    ode(f_PNDMV_filt, t) = (f_PNDMV-f_PNDMV_filt)/tau_PNDMV;
  enddef;

  def comp sympathetic_efferent_module as
    var t: second {interface: public};
    var f_es_0: Hz {interface: public};
    var f_es_inf: Hz {interface: public};
    var f_es_max: Hz {interface: public};
    var k_es: Hz {interface: public};
    var W_bs: dimensionless {interface: public};
    var W_cs: dimensionless {interface: public};
    var f_apc: Hz {interface: public};
    var f_ab: Hz {interface: public};
    var f_s_premax: Hz {interface: public};
    var f_s: Hz {interface: public};
    f_s_premax = f_es_inf+(f_es_0-f_es_inf)*exp(k_es*(W_bs*f_ab+W_cs*f_apc));
    // IGNORING CNS and LUNG STRETCH
    f_s = sel
      case f_s_premax <= f_es_max:
        f_s_premax;
      otherwise:
        f_es_max;
    endsel;
  enddef;

  def comp trunk_resistance_effector_module as
    var t: second {interface: public};
    var G_theta: Js_per_m6 {interface: public};
    var f_es_min: Hz {interface: public};
    var tau_theta: second {interface: public};
    var f_s: Hz {interface: public};
    var Delta_theta: Js_per_m6 {init: 0.0, interface: public};
    var sigma_theta: Js_per_m6 {interface: public};
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{Hz}));
      otherwise:
        0{Js_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp arm_leg_resistance_effector_module as
    var t: second {interface: public};
    var G_theta: Js_per_m6 {interface: public};
    var f_es_min: Hz {interface: public};
    var tau_theta: second {interface: public};
    var f_s: Hz {interface: public};
    var Delta_theta: Js_per_m6 {init: 0.0, interface: public};
    var sigma_theta: Js_per_m6 {interface: public};
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{Hz}));
      otherwise:
        0{Js_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp lv_elastance_effector_module as
    var inv_sigma_Es: m6_per_J {interface: public};
    var inv_G_Es: m6_per_J {interface: public};
    var f_esh: Hz {interface: public};
    var t: second {interface: public};
    var f_es_min: Hz {interface: public};
    var inv_delta_Es: m6_per_J {init: 1e-6, interface: public};
    var tau_Es: second {interface: public};
    var inv_sigma_Ev: m6_per_J {interface: public};
    var inv_G_Ev: m6s_per_J {interface: public};
    var f_PNDMV_filt: Hz {interface: public};
    var inv_delta_Ev: m6_per_J {init: 1e-6, interface: public};
    var tau_Ev: second {interface: public};
    var delta_Emax: J_per_m6 {interface: public};
    var scale: dimensionless {interface: public};
    inv_sigma_Es = sel
      case f_esh >= f_es_min:
        -inv_G_Es*ln(f_esh-f_es_min+1{Hz});
      otherwise:
        0{dimensionless};
    endsel;
    ode(inv_delta_Es, t) = 1{dimensionless}/tau_Es*(-inv_delta_Es+inv_sigma_Es);
    inv_sigma_Ev = inv_G_Ev*f_PNDMV_filt;
    ode(inv_delta_Ev, t) = 1{dimensionless}/tau_Ev*(-inv_delta_Ev+inv_sigma_Ev);
    delta_Emax = scale/(inv_delta_Es+inv_delta_Ev);
  enddef;

  def comp rv_elastance_effector_module as
    var inv_sigma_Es: m6_per_J {interface: public};
    var inv_G_Es: m6_per_J {interface: public};
    var f_esh: Hz {interface: public};
    var t: second {interface: public};
    var f_es_min: Hz {interface: public};
    var inv_delta_Es: m6_per_J {init: 1e-6, interface: public};
    var tau_Es: second {interface: public};
    var inv_sigma_Ev: m6_per_J {interface: public};
    var inv_G_Ev: m6s_per_J {interface: public};
    var f_PNDMV_filt: Hz {interface: public};
    var inv_delta_Ev: m6_per_J {init: 1e-6, interface: public};
    var tau_Ev: second {interface: public};
    var delta_Emax: J_per_m6 {interface: public};
    var scale: dimensionless {interface: public};
    inv_sigma_Es = sel
      case f_esh >= f_es_min:
        -inv_G_Es*ln(f_esh-f_es_min+1{Hz});
      otherwise:
        0{dimensionless};
    endsel;
    ode(inv_delta_Es, t) = 1{dimensionless}/tau_Es*(-inv_delta_Es+inv_sigma_Es);
    inv_sigma_Ev = inv_G_Ev*f_PNDMV_filt;
    ode(inv_delta_Ev, t) = 1{dimensionless}/tau_Ev*(-inv_delta_Ev+inv_sigma_Ev);
    delta_Emax = scale/(inv_delta_Es+inv_delta_Ev);
  enddef;

  def comp heart_period_effector_module as
    var t: second {interface: public};
    var G_Ts: second {interface: public};
    var G_Tv: second {interface: public};
    var f_es_min: Hz {interface: public};
    var tau_Ts: second {interface: public};
    var tau_Tv: second {interface: public};
    var f_s: Hz {interface: public};
    var f_v: Hz {interface: public};
    var Delta_Ts: second {init: 0.0, interface: public};
    var Delta_Tv: second {init: 0.0, interface: public};
    var Delta_T: second {interface: public};
    var sigma_Ts: second {interface: public};
    var sigma_Tv: second {interface: public};
    sigma_Ts = sel
      case f_s >= f_es_min:
        G_Ts*ln(1{second}*(f_s-f_es_min+1{Hz}));
      otherwise:
        0{second};
    endsel;
    ode(Delta_Ts, t) = (-Delta_Ts+sigma_Ts)/tau_Ts;
    sigma_Tv = G_Tv*f_v;
    // DELAY IGNORED
    ode(Delta_Tv, t) = (-Delta_Tv+sigma_Tv)/tau_Tv;
    Delta_T = Delta_Tv+Delta_Ts;
  enddef;

  def comp venous_us_volume_effector_module as
    var t: second {interface: public};
    var G_theta: m3 {interface: public};
    var f_es_min: Hz {interface: public};
    var tau_theta: second {interface: public};
    var f_s: Hz {interface: public};
    var Delta_theta: m3 {init: 0.0, interface: public};
    var sigma_theta: m3 {interface: public};
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{Hz}));
      otherwise:
        0{m3};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp arm_L_LC_module as
    var t: second {interface: public};
    var x_O2: dimensionless {init: 0.0, interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var x_CO2: dimensionless {init: 0.0, interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var k_CO2_m: J_per_m3 {interface: public};
    var C_O2_vm_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_m: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vm_nom)/tau_O2;
    phi_P_CO2_a = (1{dimensionless}-exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m))/(1{dimensionless}+exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m));
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    R_local_multiplier = (1{dimensionless}+x_CO2)/(1{dimensionless}-g_O2_m*x_O2);
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp arm_R_LC_module as
    var t: second {interface: public};
    var x_O2: dimensionless {init: 0.0, interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var x_CO2: dimensionless {init: 0.0, interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var k_CO2_m: J_per_m3 {interface: public};
    var C_O2_vm_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_m: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vm_nom)/tau_O2;
    phi_P_CO2_a = (1{dimensionless}-exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m))/(1{dimensionless}+exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m));
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    R_local_multiplier = (1{dimensionless}+x_CO2)/(1{dimensionless}-g_O2_m*x_O2);
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp leg_L_LC_module as
    var t: second {interface: public};
    var x_O2: dimensionless {init: 0.0, interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var x_CO2: dimensionless {init: 0.0, interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var k_CO2_m: J_per_m3 {interface: public};
    var C_O2_vm_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_m: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vm_nom)/tau_O2;
    phi_P_CO2_a = (1{dimensionless}-exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m))/(1{dimensionless}+exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m));
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    R_local_multiplier = (1{dimensionless}+x_CO2)/(1{dimensionless}-g_O2_m*x_O2);
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp leg_R_LC_module as
    var t: second {interface: public};
    var x_O2: dimensionless {init: 0.0, interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var x_CO2: dimensionless {init: 0.0, interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var k_CO2_m: J_per_m3 {interface: public};
    var C_O2_vm_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_m: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vm_nom)/tau_O2;
    phi_P_CO2_a = (1{dimensionless}-exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m))/(1{dimensionless}+exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m));
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    R_local_multiplier = (1{dimensionless}+x_CO2)/(1{dimensionless}-g_O2_m*x_O2);
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp middle_cerebral_L_LC_module as
    var t: second {interface: public};
    var x_O2: dimensionless {init: 0.0, interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var x_CO2: dimensionless {init: 0.0, interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var G_p: dimensionless {interface: public};
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vb_nom)/tau_O2;
    phi_P_CO2_a = (A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a))))/(A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a_nom))))-1{dimensionless};
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    G_p = 1{dimensionless}-g_O2_b*x_O2+x_CO2;
    R_local_multiplier = 1{dimensionless}/G_p;
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp middle_cerebral_R_LC_module as
    var t: second {interface: public};
    var x_O2: dimensionless {init: 0.0, interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var x_CO2: dimensionless {init: 0.0, interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var G_p: dimensionless {interface: public};
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vb_nom)/tau_O2;
    phi_P_CO2_a = (A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a))))/(A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a_nom))))-1{dimensionless};
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    G_p = 1{dimensionless}-g_O2_b*x_O2+x_CO2;
    R_local_multiplier = 1{dimensionless}/G_p;
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp anterior_cerebral_L_LC_module as
    var t: second {interface: public};
    var x_O2: dimensionless {init: 0.0, interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var x_CO2: dimensionless {init: 0.0, interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var G_p: dimensionless {interface: public};
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vb_nom)/tau_O2;
    phi_P_CO2_a = (A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a))))/(A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a_nom))))-1{dimensionless};
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    G_p = 1{dimensionless}-g_O2_b*x_O2+x_CO2;
    R_local_multiplier = 1{dimensionless}/G_p;
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp anterior_cerebral_R_LC_module as
    var t: second {interface: public};
    var x_O2: dimensionless {init: 0.0, interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var x_CO2: dimensionless {init: 0.0, interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var G_p: dimensionless {interface: public};
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vb_nom)/tau_O2;
    phi_P_CO2_a = (A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a))))/(A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a_nom))))-1{dimensionless};
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    G_p = 1{dimensionless}-g_O2_b*x_O2+x_CO2;
    R_local_multiplier = 1{dimensionless}/G_p;
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp posterior_cerebral_L_LC_module as
    var t: second {interface: public};
    var x_O2: dimensionless {init: 0.0, interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var x_CO2: dimensionless {init: 0.0, interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var G_p: dimensionless {interface: public};
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vb_nom)/tau_O2;
    phi_P_CO2_a = (A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a))))/(A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a_nom))))-1{dimensionless};
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    G_p = 1{dimensionless}-g_O2_b*x_O2+x_CO2;
    R_local_multiplier = 1{dimensionless}/G_p;
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp posterior_cerebral_R_LC_module as
    var t: second {interface: public};
    var x_O2: dimensionless {init: 0.0, interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var x_CO2: dimensionless {init: 0.0, interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var G_p: dimensionless {interface: public};
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vb_nom)/tau_O2;
    phi_P_CO2_a = (A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a))))/(A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a_nom))))-1{dimensionless};
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    G_p = 1{dimensionless}-g_O2_b*x_O2+x_CO2;
    R_local_multiplier = 1{dimensionless}/G_p;
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp external_carotid_L_LC_module as
    var t: second {interface: public};
    var x_O2: dimensionless {init: 0.0, interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var x_CO2: dimensionless {init: 0.0, interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var G_p: dimensionless {interface: public};
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vb_nom)/tau_O2;
    phi_P_CO2_a = (A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a))))/(A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a_nom))))-1{dimensionless};
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    G_p = 1{dimensionless}-g_O2_b*x_O2+x_CO2;
    R_local_multiplier = 1{dimensionless}/G_p;
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp external_carotid_R_LC_module as
    var t: second {interface: public};
    var x_O2: dimensionless {init: 0.0, interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var x_CO2: dimensionless {init: 0.0, interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var P_O2_a: J_per_m3 {interface: public};
    var G_p: dimensionless {interface: public};
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var d_1: J_per_m3 {interface: public};
    var d_2: J_per_m3 {interface: public};
    var r_1: J_per_m3 {interface: public};
    var r_2: J_per_m3 {interface: public};
    var s_1: J2_per_m6 {interface: public};
    var s_2: J2_per_m6 {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vb_nom)/tau_O2;
    phi_P_CO2_a = (A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a))))/(A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a_nom))))-1{dimensionless};
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    G_p = 1{dimensionless}-g_O2_b*x_O2+x_CO2;
    R_local_multiplier = 1{dimensionless}/G_p;
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp terminal_venous_connection as
    var v_posterior_cerebral_L_T: m3_per_s {interface: public};
    var v_posterior_cerebral_R_T: m3_per_s {interface: public};
    var v_external_carotid_L_T: m3_per_s {interface: public};
    var v_external_carotid_R_T: m3_per_s {interface: public};
    var v_middle_cerebral_L_T: m3_per_s {interface: public};
    var v_middle_cerebral_R_T: m3_per_s {interface: public};
    var v_anterior_cerebral_L_T: m3_per_s {interface: public};
    var v_anterior_cerebral_R_T: m3_per_s {interface: public};
    var v_arm_L_T: m3_per_s {interface: public};
    var v_arm_R_T: m3_per_s {interface: public};
    var v_trunk_C_T: m3_per_s {interface: public};
    var v_leg_L_T: m3_per_s {interface: public};
    var v_leg_R_T: m3_per_s {interface: public};
    var v_venous_lb: m3_per_s {interface: public};
    var v_venous_ub: m3_per_s {interface: public};
    var C_O2_p_middle_cerebral_L_GE: dimensionless {interface: public};
    var C_CO2_p_middle_cerebral_L_GE: dimensionless {interface: public};
    var C_O2_p_middle_cerebral_R_GE: dimensionless {interface: public};
    var C_CO2_p_middle_cerebral_R_GE: dimensionless {interface: public};
    var C_O2_p_anterior_cerebral_L_GE: dimensionless {interface: public};
    var C_CO2_p_anterior_cerebral_L_GE: dimensionless {interface: public};
    var C_O2_p_anterior_cerebral_R_GE: dimensionless {interface: public};
    var C_CO2_p_anterior_cerebral_R_GE: dimensionless {interface: public};
    var C_O2_p_posterior_cerebral_L_GE: dimensionless {interface: public};
    var C_CO2_p_posterior_cerebral_L_GE: dimensionless {interface: public};
    var C_O2_p_posterior_cerebral_R_GE: dimensionless {interface: public};
    var C_CO2_p_posterior_cerebral_R_GE: dimensionless {interface: public};
    var C_O2_p_external_carotid_L_GE: dimensionless {interface: public};
    var C_CO2_p_external_carotid_L_GE: dimensionless {interface: public};
    var C_O2_p_external_carotid_R_GE: dimensionless {interface: public};
    var C_CO2_p_external_carotid_R_GE: dimensionless {interface: public};
    var C_O2_p_arm_L_GE: dimensionless {interface: public};
    var C_CO2_p_arm_L_GE: dimensionless {interface: public};
    var C_O2_p_arm_R_GE: dimensionless {interface: public};
    var C_CO2_p_arm_R_GE: dimensionless {interface: public};
    var C_O2_p_leg_L_GE: dimensionless {interface: public};
    var C_CO2_p_leg_L_GE: dimensionless {interface: public};
    var C_O2_p_leg_R_GE: dimensionless {interface: public};
    var C_CO2_p_leg_R_GE: dimensionless {interface: public};
    var C_O2_p_trunk_C_GE: dimensionless {interface: public};
    var C_CO2_p_trunk_C_GE: dimensionless {interface: public};
    var C_O2_p_venous_ave: dimensionless {interface: public};
    var C_CO2_p_venous_ave: dimensionless {interface: public};
    var v_venous_total: m3_per_s {interface: public};
    v_venous_lb = v_trunk_C_T+v_leg_L_T+v_leg_R_T;
    v_venous_ub = v_posterior_cerebral_L_T+v_posterior_cerebral_R_T+v_external_carotid_L_T+v_external_carotid_R_T+v_middle_cerebral_L_T+v_middle_cerebral_R_T+v_anterior_cerebral_L_T+v_anterior_cerebral_R_T+v_arm_L_T+v_arm_R_T;
    v_venous_total = v_posterior_cerebral_L_T+v_posterior_cerebral_R_T+v_external_carotid_L_T+v_external_carotid_R_T+v_middle_cerebral_L_T+v_middle_cerebral_R_T+v_anterior_cerebral_L_T+v_anterior_cerebral_R_T+v_arm_L_T+v_arm_R_T+v_trunk_C_T+v_leg_L_T+v_leg_R_T;
    C_O2_p_venous_ave = (C_O2_p_middle_cerebral_L_GE*v_posterior_cerebral_L_T+C_O2_p_middle_cerebral_R_GE*v_posterior_cerebral_R_T+C_O2_p_anterior_cerebral_L_GE*v_external_carotid_L_T+C_O2_p_anterior_cerebral_R_GE*v_external_carotid_R_T+C_O2_p_posterior_cerebral_L_GE*v_middle_cerebral_L_T+C_O2_p_posterior_cerebral_R_GE*v_middle_cerebral_R_T+C_O2_p_external_carotid_L_GE*v_anterior_cerebral_L_T+C_O2_p_external_carotid_R_GE*v_anterior_cerebral_R_T+C_O2_p_arm_L_GE*v_arm_L_T+C_O2_p_arm_R_GE*v_arm_R_T+C_O2_p_leg_L_GE*v_trunk_C_T+C_O2_p_leg_R_GE*v_leg_L_T+C_O2_p_trunk_C_GE*v_leg_R_T)/(abs(v_posterior_cerebral_L_T+v_posterior_cerebral_R_T+v_external_carotid_L_T+v_external_carotid_R_T+v_middle_cerebral_L_T+v_middle_cerebral_R_T+v_anterior_cerebral_L_T+v_anterior_cerebral_R_T+v_arm_L_T+v_arm_R_T+v_trunk_C_T+v_leg_L_T+v_leg_R_T)+1e-10{m3_per_s});
    C_CO2_p_venous_ave = (C_CO2_p_middle_cerebral_L_GE*v_posterior_cerebral_L_T+C_CO2_p_middle_cerebral_R_GE*v_posterior_cerebral_R_T+C_CO2_p_anterior_cerebral_L_GE*v_external_carotid_L_T+C_CO2_p_anterior_cerebral_R_GE*v_external_carotid_R_T+C_CO2_p_posterior_cerebral_L_GE*v_middle_cerebral_L_T+C_CO2_p_posterior_cerebral_R_GE*v_middle_cerebral_R_T+C_CO2_p_external_carotid_L_GE*v_anterior_cerebral_L_T+C_CO2_p_external_carotid_R_GE*v_anterior_cerebral_R_T+C_CO2_p_arm_L_GE*v_arm_L_T+C_CO2_p_arm_R_GE*v_arm_R_T+C_CO2_p_leg_L_GE*v_trunk_C_T+C_CO2_p_leg_R_GE*v_leg_L_T+C_CO2_p_trunk_C_GE*v_leg_R_T)/(abs(v_posterior_cerebral_L_T+v_posterior_cerebral_R_T+v_external_carotid_L_T+v_external_carotid_R_T+v_middle_cerebral_L_T+v_middle_cerebral_R_T+v_anterior_cerebral_L_T+v_anterior_cerebral_R_T+v_arm_L_T+v_arm_R_T+v_trunk_C_T+v_leg_L_T+v_leg_R_T)+1e-10{m3_per_s});
  enddef;

  def comp par as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
  enddef;

  def comp pcap as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var q_C: m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
  enddef;

  def comp pulmonary_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var C_CO2_v: dimensionless {interface: public};
    var C_O2_v: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
    var k_O2: m6_per_Js {interface: public};
    var k_CO2: m6_per_Js {interface: public};
    var P_O2_A: J_per_m3 {interface: public};
    var P_CO2_A: J_per_m3 {interface: public};
    var shunt_fraction: dimensionless {interface: public};
    var P_O2_p: J_per_m3 {interface: public};
    var P_CO2_p: J_per_m3 {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
    var d_C_O2_p_dt: Hz {interface: public};
  enddef;

  def comp respiratory_gt as
    var F_O2_i: dimensionless {interface: public};
    var F_CO2_i: dimensionless {interface: public};
    var P_atm: J_per_m3 {interface: public};
    var P_ws: J_per_m3 {interface: public};
    var K_LOSSES: dimensionless {interface: public};
    var F_CO2_D: dimensionless {interface: public};
    var F_O2_D: dimensionless {interface: public};
    var F_CO2_A: dimensionless {interface: public};
    var F_O2_A: dimensionless {interface: public};
    var P_CO2_A: J_per_m3 {interface: public};
    var P_O2_A: J_per_m3 {interface: public};
  enddef;

  def comp lung as
    var P_m: J_per_m3 {interface: public};
    var P_l: J_per_m3 {interface: public};
    var P_t: J_per_m3 {interface: public};
    var P_b: J_per_m3 {interface: public};
    var P_A: J_per_m3 {interface: public};
    var P_pl: J_per_m3 {interface: public};
    var P_mus: J_per_m3 {interface: public};
    var P_mus_min: J_per_m3 {interface: public};
    var P_plEE: J_per_m3 {interface: public};
    var q_l: m3 {interface: public};
    var q_t: m3 {interface: public};
    var q_b: m3 {interface: public};
    var q_A: m3 {interface: public};
    var q_pl: m3 {interface: public};
    var q_D: m3 {interface: public};
    var q_l_us: m3 {interface: public};
    var q_t_us: m3 {interface: public};
    var q_b_us: m3 {interface: public};
    var q_A_us: m3 {interface: public};
    var v_ml: m3_per_s {interface: public};
    var v_lt: m3_per_s {interface: public};
    var v_tb: m3_per_s {interface: public};
    var v_bA: m3_per_s {interface: public};
    var v_twall: m3_per_s {interface: public};
    var v_bwall: m3_per_s {interface: public};
    var v_plwall: m3_per_s {interface: public};
    var R_ml: Js_per_m6 {interface: public};
    var R_lt: Js_per_m6 {interface: public};
    var R_tb: Js_per_m6 {interface: public};
    var R_bA: Js_per_m6 {interface: public};
    var R_plwall: Js_per_m6 {interface: public};
    var C_l: m6_per_J {interface: public};
    var C_t: m6_per_J {interface: public};
    var C_b: m6_per_J {interface: public};
    var C_A: m6_per_J {interface: public};
    var C_pl: m6_per_J {interface: public};
    var t_floor: second {interface: public};
    var T_resp: second {interface: public};
    var IE_ratio: dimensionless {interface: public};
    var T_I: second {interface: public};
    var T_E: second {interface: public};
    var tau: second {interface: public};
  enddef;

  def comp pvn as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var Delta_q_us: m3 {interface: public};
  enddef;

  def comp heart as
    var rho: Js2_per_m5 {interface: public};
    var T: second {interface: public};
    var T_wCont: second {interface: public};
    var mt: dimensionless {interface: public};
    var u_ra: J_per_m3 {interface: public};
    var u_rv: J_per_m3 {interface: public};
    var u_la: J_per_m3 {interface: public};
    var u_lv: J_per_m3 {interface: public};
    var q_ra: m3 {interface: public};
    var q_rv: m3 {interface: public};
    var q_la: m3 {interface: public};
    var q_lv: m3 {interface: public};
    var q_ra_us: m3 {interface: public};
    var q_rv_us: m3 {interface: public};
    var q_la_us: m3 {interface: public};
    var q_lv_us: m3 {interface: public};
    var q_ra_init: m3 {interface: public};
    var q_rv_init: m3 {interface: public};
    var q_la_init: m3 {interface: public};
    var q_lv_init: m3 {interface: public};
    var T_ac: second {interface: public};
    var T_ar: second {interface: public};
    var T_ac_wCont: second {interface: public};
    var T_ar_wCont: second {interface: public};
    var t_astart: second {interface: public};
    var t_astart_norm: dimensionless {interface: public};
    var chi_a: dimensionless {interface: public};
    var chi_afloor: dimensionless {interface: public};
    var T_vc: second {interface: public};
    var T_vr: second {interface: public};
    var T_vc_wCont: second {interface: public};
    var T_vr_wCont: second {interface: public};
    var t_vstart: second {interface: public};
    var t_vstart_norm: dimensionless {interface: public};
    var E_ra_A: J_per_m6 {interface: public};
    var E_ra_B: J_per_m6 {interface: public};
    var E_rv_A: J_per_m6 {interface: public};
    var E_rv_A_wCont: J_per_m6 {interface: public};
    var E_rv_B: J_per_m6 {interface: public};
    var E_la_A: J_per_m6 {interface: public};
    var E_la_B: J_per_m6 {interface: public};
    var E_lv_A: J_per_m6 {interface: public};
    var E_lv_A_wCont: J_per_m6 {interface: public};
    var E_lv_B: J_per_m6 {interface: public};
    var e_a: dimensionless {interface: public};
    var e_v: dimensionless {interface: public};
    var v_trv: m3_per_s {interface: public};
    var v_puv: m3_per_s {interface: public};
    var v_miv: m3_per_s {interface: public};
    var v_aov: m3_per_s {interface: public};
    var K_vo_trv: m3_per_Js {interface: public};
    var K_vo_puv: m3_per_Js {interface: public};
    var K_vo_miv: m3_per_Js {interface: public};
    var K_vo_aov: m3_per_Js {interface: public};
    var K_vc_trv: m3_per_Js {interface: public};
    var K_vc_puv: m3_per_Js {interface: public};
    var K_vc_miv: m3_per_Js {interface: public};
    var K_vc_aov: m3_per_Js {interface: public};
    var M_rg_trv: dimensionless {interface: public};
    var M_rg_puv: dimensionless {interface: public};
    var M_rg_miv: dimensionless {interface: public};
    var M_rg_aov: dimensionless {interface: public};
    var M_st_trv: dimensionless {interface: public};
    var M_st_puv: dimensionless {interface: public};
    var M_st_miv: dimensionless {interface: public};
    var M_st_aov: dimensionless {interface: public};
    var l_eff: metre {interface: public};
    var A_nn_trv: m2 {interface: public};
    var A_nn_puv: m2 {interface: public};
    var A_nn_miv: m2 {interface: public};
    var A_nn_aov: m2 {interface: public};
    var A_eff_trv: m2 {interface: public};
    var A_eff_puv: m2 {interface: public};
    var A_eff_miv: m2 {interface: public};
    var A_eff_aov: m2 {interface: public};
  enddef;

  def comp ascending_aorta_A as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var mu: Js_per_m3 {interface: public};
  enddef;

  def comp ascending_aorta_B as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp ascending_aorta_C as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp ascending_aorta_D as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp aortic_arch_C2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp aortic_arch_C46 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp aortic_arch_C64 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp brachiocephalic_trunk_C4 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp subclavian_L66 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp subclavian_L78 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp brachial_L82 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp common_carotid_L48_A as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp common_carotid_L48_B as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp common_carotid_L48_C as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp common_carotid_L48_D as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp common_carotid_R6_A as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp common_carotid_R6_B as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp common_carotid_R6_C as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp external_carotid_L62 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp external_carotid_R26 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp internal_carotid_L50_A as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp internal_carotid_L50_B as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp internal_carotid_L50_C as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp internal_carotid_R8_A as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp internal_carotid_R8_B as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp internal_carotid_R8_C as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp posterior_communicating_L8 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp posterior_communicating_R206 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp internal_carotid_L112 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp internal_carotid_R48 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp middle_cerebral_L114 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp middle_cerebral_R52 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp anterior_cerebral_L110 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp anterior_cerebral_R46 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp anterior_cerebral_R238 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp anterior_cerebral_L42 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp anterior_communicating_C44 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp vertebral_L2 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp subclavian_R28 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp subclavian_R30 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp brachial_R34 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp vertebral_R272 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp basilar_C4 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp posterior_cerebral_pre_L6 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp posterior_cerebral_post_L12 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp posterior_cerebral_pre_R204 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp posterior_cerebral_post_R208 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp posterior_cerebral_L_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp posterior_cerebral_R_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp external_carotid_L_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp external_carotid_R_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp middle_cerebral_L_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp middle_cerebral_R_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp anterior_cerebral_L_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp anterior_cerebral_R_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var Delta_R: Js_per_m6 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp arm_L_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp arm_R_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp aortic_arch_C94 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp thoracic_aorta_C96 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp thoracic_aorta_C100 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp thoracic_aorta_C104 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp thoracic_aorta_C108 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp thoracic_aorta_C112 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp abdominal_aorta_C114 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp trunk_C_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
  enddef;

  def comp abdominal_aorta_C136 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp abdominal_aorta_C164 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp abdominal_aorta_C176 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp abdominal_aorta_C188 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp abdominal_aorta_C192 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp common_iliac_L194 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp external_iliac_L198 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp common_iliac_R216 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp external_iliac_R220 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp femoral_L200 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp femoral_R222 as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var E: J_per_m3 {interface: public};
    var r: metre {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp leg_L_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp leg_R_T as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var v_T: m3_per_s {interface: public};
    var R_T: Js_per_m6 {interface: public};
    var R_T_wCont: Js_per_m6 {interface: public};
    var C_T: m6_per_J {interface: public};
    var I_T: Js2_per_m6 {interface: public};
    var q_T: m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
  enddef;

  def comp venous_lb as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var q_C: m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
  enddef;

  def comp venous_ub as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var q_C: m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
  enddef;

  def comp venous_ivc as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var q_C: m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
  enddef;

  def comp venous_svc as
    var u: J_per_m3 {interface: public};
    var v: m3_per_s {interface: public};
    var R: Js_per_m6 {interface: public};
    var C: m6_per_J {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var I: Js2_per_m6 {interface: public};
    var q_C: m3 {interface: public};
    var q_us_0: m3 {interface: public};
    var q_us_wCont: m3 {interface: public};
    var R_v: Js_per_m6 {interface: public};
    var q_C_init: m3 {interface: public};
    var q_C_change: m3 {interface: public};
    var q: m3 {interface: public};
    var u_C: J_per_m3 {interface: public};
  enddef;

  def comp middle_cerebral_L_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp middle_cerebral_R_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp anterior_cerebral_L_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp anterior_cerebral_R_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp posterior_cerebral_L_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp posterior_cerebral_R_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp external_carotid_L_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp external_carotid_R_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp arm_L_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp arm_R_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp leg_L_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp leg_R_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp trunk_C_GE as
    var C_CO2_p: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var q_0: m3 {interface: public};
    var M_CO2: m3_per_s {interface: public};
    var M_O2: m3_per_s {interface: public};
  enddef;

  def comp arterial_gas_transport as
    var C_CO2_out: dimensionless {interface: public};
    var C_O2_out: dimensionless {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
  enddef;

  def comp venous_gas_transport as
    var C_CO2_out: dimensionless {interface: public};
    var C_O2_out: dimensionless {interface: public};
    var q_0: m3 {interface: public};
    var v: m3_per_s {interface: public};
  enddef;

  def comp common_carotid_L_baro as
    var P_baro: J_per_m3 {interface: public};
    var P_baro_init: J_per_m3 {interface: public};
    var P_nom: J_per_m3 {interface: public};
    var f_ab: per_s {interface: public};
    var tau_zb: second {interface: public};
    var tau_pb: second {interface: public};
    var f_ab_min: per_s {interface: public};
    var f_ab_max: per_s {interface: public};
    var k_ab: J_per_m3 {interface: public};
  enddef;

  def comp arterial_chemoreceptor as
    var AA: dimensionless {interface: public};
    var BB: dimensionless {interface: public};
    var C_CO2_a_nom: dimensionless {interface: public};
    var K_O2: dimensionless {interface: public};
    var K_CO2: per_s {interface: public};
    var K_stat: per_s {interface: public};
    var K_dyn: per_s {interface: public};
    var tau_cap: second {interface: public};
    var tau_CO2_cc_dyn: dimensionless {interface: public};
    var S_O2_a: dimensionless {interface: public};
    var X_O2: dimensionless {interface: public};
    var phi_stat: per_s {interface: public};
    var phi_CO2_dyn: per_s {interface: public};
    var f_c_stat: per_s {interface: public};
    var f_c_dyn: per_s {interface: public};
    var f_apc: per_s {interface: public};
    var phi_apc: per_s {interface: public};
    var C_O2_a_diss: dimensionless {interface: public};
    var Hgb: kg_per_m3 {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;

  def comp lung_stretch as
    var f_ls: Hz {interface: public};
    var tau_lung: second {interface: public};
    var G_al: per_ml_s {interface: public};
    var q_A: m3 {interface: public};
    var q_b: m3 {interface: public};
    var V_lung: m3 {interface: public};
  enddef;

  def comp cardiopulm_receptor as
    var f_cp: Hz {interface: public};
    var P_pv_P_thor: mmHg {interface: public};
    var tau_cp: second {interface: public};
    var P_l_init: mmHg {interface: public};
    var P_l: mmHg {interface: public};
    var f_maxl: Hz {interface: public};
    var P_tn: mmHg {interface: public};
    var k_l: mmHg {interface: public};
    var u_out: mmHg {interface: public};
  enddef;

  def comp NTS as
    var f_NTS_br: Hz {interface: public};
    var f_NTS_ls: Hz {interface: public};
    var f_NTS_cp: Hz {interface: public};
    var f_NTS_ch: Hz {interface: public};
    var f_min_br: Hz {interface: public};
    var f_max_br: Hz {interface: public};
    var f_mid_br: Hz {interface: public};
    var f_min_ls: Hz {interface: public};
    var f_max_ls: Hz {interface: public};
    var f_mid_ls: Hz {interface: public};
    var f_min_cp: Hz {interface: public};
    var f_max_cp: Hz {interface: public};
    var f_mid_cp: Hz {interface: public};
    var f_min_ch: Hz {interface: public};
    var f_max_ch: Hz {interface: public};
    var f_mid_ch: Hz {interface: public};
    var k_NTS_br: dimensionless {interface: public};
    var k_NTS_ls: dimensionless {interface: public};
    var k_NTS_cp: dimensionless {interface: public};
    var k_NTS_ch: dimensionless {interface: public};
  enddef;

  def comp DMV as
    var f_DMV: Hz {interface: public};
    var f_min_DMV: Hz {interface: public};
    var f_max_DMV: Hz {interface: public};
    var f_mid_DMV: Hz {interface: public};
    var k_DMV: dimensionless {interface: public};
  enddef;

  def comp NA as
    var s: dimensionless {interface: public};
    var f_NA: Hz {interface: public};
    var f_NTS_output: Hz {interface: public};
    var f_NA_input: Hz {interface: public};
    var f_min_NA: Hz {interface: public};
    var f_max_NA: Hz {interface: public};
    var f_mid_NA: Hz {interface: public};
    var k_RSA: dimensionless {interface: public};
    var k_NA: dimensionless {interface: public};
  enddef;

  def comp NActr as
    var f_NActr: Hz {interface: public};
    var f_min_NActr: Hz {interface: public};
    var f_max_NActr: Hz {interface: public};
    var f_mid_NActr: Hz {interface: public};
    var k_NActr: dimensionless {interface: public};
  enddef;

  def comp LCN as
    var f_LCN: Hz {interface: public};
    var f_input_LCN_sum: Hz {interface: public};
    var f_input_LCN: Hz {interface: public};
    var f_min_LCN: Hz {interface: public};
    var f_max_LCN: Hz {interface: public};
    var f_mid_LCN: Hz {interface: public};
    var k_evEmax_gainLCN: dimensionless {interface: public};
    var k_br_gainLCN: dimensionless {interface: public};
    var k_esh_gainLCN: dimensionless {interface: public};
    var k_cp_gainLCN: dimensionless {interface: public};
    var k_LCN: dimensionless {interface: public};
  enddef;

  def comp PNNA as
    var f_PNNA: Hz {interface: public};
    var f_min_PNNA: Hz {interface: public};
    var f_max_PNNA: Hz {interface: public};
    var f_mid_PNNA: Hz {interface: public};
    var k_PNNA: dimensionless {interface: public};
  enddef;

  def comp PNDMV as
    var f_PNDMV: Hz {interface: public};
    var f_PNDMV_filt: Hz {interface: public};
    var f_min_PNDMV: Hz {interface: public};
    var f_max_PNDMV: Hz {interface: public};
    var f_mid_PNDMV: Hz {interface: public};
    var k_PNDMV: dimensionless {interface: public};
    var tau_PNDMV: second {interface: public};
  enddef;

  def comp sympathetic_efferent as
    var W_bs: dimensionless {interface: public};
    var W_cs: dimensionless {interface: public};
    var f_es_0: per_s {interface: public};
    var f_es_inf: per_s {interface: public};
    var f_es_max: per_s {interface: public};
    var k_es: per_s {interface: public};
    var f_ab: per_s {interface: public};
    var f_s: per_s {interface: public};
  enddef;

  def comp trunk_resistance_effector as
    var G_theta: Js_per_m6 {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_theta: second {interface: public};
    var f_s: per_s {interface: public};
    var Delta_theta: Js_per_m6 {interface: public};
    var sigma_theta: Js_per_m6 {interface: public};
  enddef;

  def comp arm_leg_resistance_effector as
    var G_theta: Js_per_m6 {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_theta: second {interface: public};
    var f_s: per_s {interface: public};
    var Delta_theta: Js_per_m6 {interface: public};
    var sigma_theta: Js_per_m6 {interface: public};
  enddef;

  def comp lv_elastance_effector as
    var inv_G_Es: m6_per_J {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_Es: second {interface: public};
    var inv_delta_Es: m6_per_J {interface: public};
    var inv_sigma_Es: m6_per_J {interface: public};
    var inv_G_Ev: m6s_per_J {interface: public};
    var tau_Ev: second {interface: public};
    var inv_delta_Ev: m6_per_J {interface: public};
    var inv_sigma_Ev: m6_per_J {interface: public};
    var delta_Emax: J_per_m6 {interface: public};
    var scale: dimensionless {interface: public};
  enddef;

  def comp rv_elastance_effector as
    var inv_G_Es: m6_per_J {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_Es: second {interface: public};
    var inv_delta_Es: m6_per_J {interface: public};
    var inv_sigma_Es: m6_per_J {interface: public};
    var inv_G_Ev: m6s_per_J {interface: public};
    var tau_Ev: second {interface: public};
    var inv_delta_Ev: m6_per_J {interface: public};
    var inv_sigma_Ev: m6_per_J {interface: public};
    var delta_Emax: J_per_m6 {interface: public};
    var scale: dimensionless {interface: public};
  enddef;

  def comp heart_period_effector as
    var G_Ts: second {interface: public};
    var G_Tv: second {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_Ts: second {interface: public};
    var tau_Tv: second {interface: public};
    var f_s: per_s {interface: public};
    var f_v: per_s {interface: public};
    var Delta_Ts: second {interface: public};
    var Delta_Tv: second {interface: public};
    var Delta_T: second {interface: public};
    var sigma_Ts: second {interface: public};
    var sigma_Tv: second {interface: public};
  enddef;

  def comp venous_us_volume_effector as
    var G_theta: m3 {interface: public};
    var f_es_min: per_s {interface: public};
    var tau_theta: second {interface: public};
    var f_s: per_s {interface: public};
    var Delta_theta: m3 {interface: public};
    var sigma_theta: m3 {interface: public};
  enddef;

  def comp arm_L_LC as
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var k_CO2_m: J_per_m3 {interface: public};
    var C_O2_vm_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_m: dimensionless {interface: public};
    var x_O2: dimensionless {interface: public};
    var x_CO2: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;

  def comp arm_R_LC as
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var k_CO2_m: J_per_m3 {interface: public};
    var C_O2_vm_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_m: dimensionless {interface: public};
    var x_O2: dimensionless {interface: public};
    var x_CO2: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;

  def comp leg_L_LC as
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var k_CO2_m: J_per_m3 {interface: public};
    var C_O2_vm_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_m: dimensionless {interface: public};
    var x_O2: dimensionless {interface: public};
    var x_CO2: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;

  def comp leg_R_LC as
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var k_CO2_m: J_per_m3 {interface: public};
    var C_O2_vm_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_m: dimensionless {interface: public};
    var x_O2: dimensionless {interface: public};
    var x_CO2: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;

  def comp middle_cerebral_L_LC as
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var x_O2: dimensionless {interface: public};
    var x_CO2: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var G_p: dimensionless {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;

  def comp middle_cerebral_R_LC as
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var x_O2: dimensionless {interface: public};
    var x_CO2: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var G_p: dimensionless {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;

  def comp anterior_cerebral_L_LC as
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var x_O2: dimensionless {interface: public};
    var x_CO2: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var G_p: dimensionless {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;

  def comp anterior_cerebral_R_LC as
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var x_O2: dimensionless {interface: public};
    var x_CO2: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var G_p: dimensionless {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;

  def comp posterior_cerebral_L_LC as
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var x_O2: dimensionless {interface: public};
    var x_CO2: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var G_p: dimensionless {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;

  def comp posterior_cerebral_R_LC as
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var x_O2: dimensionless {interface: public};
    var x_CO2: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var G_p: dimensionless {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;

  def comp external_carotid_L_LC as
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var x_O2: dimensionless {interface: public};
    var x_CO2: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var G_p: dimensionless {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;

  def comp external_carotid_R_LC as
    var P_CO2_a_nom: J_per_m3 {interface: public};
    var C_O2_vb_nom: dimensionless {interface: public};
    var tau_O2: second {interface: public};
    var tau_CO2: second {interface: public};
    var g_O2_b: dimensionless {interface: public};
    var A_b_lc: dimensionless {interface: public};
    var B_b_lc: dimensionless {interface: public};
    var C_b_lc: dimensionless {interface: public};
    var D_b_lc: dimensionless {interface: public};
    var x_O2: dimensionless {interface: public};
    var x_CO2: dimensionless {interface: public};
    var P_CO2_a: J_per_m3 {interface: public};
    var phi_P_CO2_a: dimensionless {interface: public};
    var C_O2_a: dimensionless {interface: public};
    var C_CO2_a: dimensionless {interface: public};
    var C_O2_p: dimensionless {interface: public};
    var G_p: dimensionless {interface: public};
    var R_local_multiplier: dimensionless {interface: public};
    var k_1: J_per_m3 {interface: public};
    var k_2: J_per_m3 {interface: public};
    var h_1: dimensionless {interface: public};
    var h_2: dimensionless {interface: public};
    var alpha_1: m3_per_J {interface: public};
    var alpha_2: m3_per_J {interface: public};
    var beta_1: m3_per_J {interface: public};
    var beta_2: m3_per_J {interface: public};
    var C_O2_sat: dimensionless {interface: public};
    var C_CO2_sat: dimensionless {interface: public};
  enddef;
  def map between parameters and par_module for
    vars R_par and R;
    vars C_par and C;
    vars u_ext_par and u_ext;
    vars I_par and I;
  enddef;
  def map between parameters and pcap_module for
    vars R_pcap and R;
    vars C_pcap and C;
    vars u_ext_pcap and u_ext;
    vars I_pcap and I;
  enddef;
  def map between parameters and pulmonary_GE_module for
    vars q_0_pulmonary_GE and q_0;
    vars k_O2_pulmonary_GE and k_O2;
    vars k_CO2_pulmonary_GE and k_CO2;
    vars shunt_fraction_pulmonary_GE and shunt_fraction;
  enddef;
  def map between parameters and respiratory_gt_module for
    vars F_O2_i_respiratory_gt and F_O2_i;
    vars F_CO2_i_respiratory_gt and F_CO2_i;
    vars K_LOSSES_respiratory_gt and K_LOSSES;
    vars F_O2_A_respiratory_gt and F_O2_A;
  enddef;
  def map between parameters and lung_module for
    vars P_mus_min_lung and P_mus_min;
    vars P_plEE_lung and P_plEE;
    vars q_l_us_lung and q_l_us;
    vars q_t_us_lung and q_t_us;
    vars q_b_us_lung and q_b_us;
    vars q_A_us_lung and q_A_us;
    vars R_ml_lung and R_ml;
    vars R_lt_lung and R_lt;
    vars R_tb_lung and R_tb;
    vars R_bA_lung and R_bA;
    vars R_plwall_lung and R_plwall;
    vars C_l_lung and C_l;
    vars C_t_lung and C_t;
    vars C_b_lung and C_b;
    vars C_A_lung and C_A;
    vars C_pl_lung and C_pl;
    vars T_resp_lung and T_resp;
    vars IE_ratio_lung and IE_ratio;
  enddef;
  def map between parameters and pvn_module for
    vars R_pvn and R;
    vars C_pvn and C;
    vars u_ext_pvn and u_ext;
    vars I_pvn and I;
    vars q_C_init_pvn and q_C_init;
    vars q_us_0_pvn and q_us_0;
    vars Delta_q_us_pvn and Delta_q_us;
  enddef;
  def map between parameters and ascending_aorta_A_module for
    vars E_ascending_aorta_A and E;
    vars l_ascending_aorta_A and l;
    vars r_ascending_aorta_A and r;
    vars theta_ascending_aorta_A and theta;
    vars u_ext_ascending_aorta_A and u_ext;
  enddef;
  def map between parameters and ascending_aorta_B_module for
    vars E_ascending_aorta_B and E;
    vars l_ascending_aorta_B and l;
    vars r_ascending_aorta_B and r;
    vars u_ext_ascending_aorta_B and u_ext;
    vars theta_ascending_aorta_B and theta;
  enddef;
  def map between parameters and ascending_aorta_C_module for
    vars E_ascending_aorta_C and E;
    vars l_ascending_aorta_C and l;
    vars r_ascending_aorta_C and r;
    vars u_ext_ascending_aorta_C and u_ext;
    vars theta_ascending_aorta_C and theta;
  enddef;
  def map between parameters and ascending_aorta_D_module for
    vars E_ascending_aorta_D and E;
    vars l_ascending_aorta_D and l;
    vars r_ascending_aorta_D and r;
    vars u_ext_ascending_aorta_D and u_ext;
    vars theta_ascending_aorta_D and theta;
  enddef;
  def map between parameters and aortic_arch_C2_module for
    vars E_aortic_arch_C2 and E;
    vars l_aortic_arch_C2 and l;
    vars r_aortic_arch_C2 and r;
    vars theta_aortic_arch_C2 and theta;
    vars u_ext_aortic_arch_C2 and u_ext;
  enddef;
  def map between parameters and aortic_arch_C46_module for
    vars E_aortic_arch_C46 and E;
    vars l_aortic_arch_C46 and l;
    vars r_aortic_arch_C46 and r;
    vars theta_aortic_arch_C46 and theta;
    vars u_ext_aortic_arch_C46 and u_ext;
  enddef;
  def map between parameters and aortic_arch_C64_module for
    vars E_aortic_arch_C64 and E;
    vars l_aortic_arch_C64 and l;
    vars r_aortic_arch_C64 and r;
    vars theta_aortic_arch_C64 and theta;
    vars u_ext_aortic_arch_C64 and u_ext;
  enddef;
  def map between parameters and brachiocephalic_trunk_C4_module for
    vars E_brachiocephalic_trunk_C4 and E;
    vars l_brachiocephalic_trunk_C4 and l;
    vars r_brachiocephalic_trunk_C4 and r;
    vars theta_brachiocephalic_trunk_C4 and theta;
    vars u_ext_brachiocephalic_trunk_C4 and u_ext;
  enddef;
  def map between parameters and subclavian_L66_module for
    vars E_subclavian_L66 and E;
    vars l_subclavian_L66 and l;
    vars r_subclavian_L66 and r;
    vars theta_subclavian_L66 and theta;
    vars u_ext_subclavian_L66 and u_ext;
  enddef;
  def map between parameters and subclavian_L78_module for
    vars E_subclavian_L78 and E;
    vars l_subclavian_L78 and l;
    vars r_subclavian_L78 and r;
    vars u_ext_subclavian_L78 and u_ext;
    vars theta_subclavian_L78 and theta;
  enddef;
  def map between parameters and brachial_L82_module for
    vars E_brachial_L82 and E;
    vars l_brachial_L82 and l;
    vars r_brachial_L82 and r;
    vars u_ext_brachial_L82 and u_ext;
    vars theta_brachial_L82 and theta;
  enddef;
  def map between parameters and common_carotid_L48_A_module for
    vars E_common_carotid_L48_A and E;
    vars l_common_carotid_L48_A and l;
    vars r_common_carotid_L48_A and r;
    vars u_ext_common_carotid_L48_A and u_ext;
    vars theta_common_carotid_L48_A and theta;
  enddef;
  def map between parameters and common_carotid_L48_B_module for
    vars E_common_carotid_L48_B and E;
    vars l_common_carotid_L48_B and l;
    vars r_common_carotid_L48_B and r;
    vars u_ext_common_carotid_L48_B and u_ext;
    vars theta_common_carotid_L48_B and theta;
  enddef;
  def map between parameters and common_carotid_L48_C_module for
    vars E_common_carotid_L48_C and E;
    vars l_common_carotid_L48_C and l;
    vars r_common_carotid_L48_C and r;
    vars u_ext_common_carotid_L48_C and u_ext;
    vars theta_common_carotid_L48_C and theta;
  enddef;
  def map between parameters and common_carotid_L48_D_module for
    vars E_common_carotid_L48_D and E;
    vars l_common_carotid_L48_D and l;
    vars r_common_carotid_L48_D and r;
    vars theta_common_carotid_L48_D and theta;
    vars u_ext_common_carotid_L48_D and u_ext;
  enddef;
  def map between parameters and common_carotid_R6_A_module for
    vars E_common_carotid_R6_A and E;
    vars l_common_carotid_R6_A and l;
    vars r_common_carotid_R6_A and r;
    vars u_ext_common_carotid_R6_A and u_ext;
    vars theta_common_carotid_R6_A and theta;
  enddef;
  def map between parameters and common_carotid_R6_B_module for
    vars E_common_carotid_R6_B and E;
    vars l_common_carotid_R6_B and l;
    vars r_common_carotid_R6_B and r;
    vars u_ext_common_carotid_R6_B and u_ext;
    vars theta_common_carotid_R6_B and theta;
  enddef;
  def map between parameters and common_carotid_R6_C_module for
    vars E_common_carotid_R6_C and E;
    vars l_common_carotid_R6_C and l;
    vars r_common_carotid_R6_C and r;
    vars theta_common_carotid_R6_C and theta;
    vars u_ext_common_carotid_R6_C and u_ext;
  enddef;
  def map between parameters and external_carotid_L62_module for
    vars E_external_carotid_L62 and E;
    vars l_external_carotid_L62 and l;
    vars r_external_carotid_L62 and r;
    vars u_ext_external_carotid_L62 and u_ext;
    vars theta_external_carotid_L62 and theta;
  enddef;
  def map between parameters and external_carotid_R26_module for
    vars E_external_carotid_R26 and E;
    vars l_external_carotid_R26 and l;
    vars r_external_carotid_R26 and r;
    vars u_ext_external_carotid_R26 and u_ext;
    vars theta_external_carotid_R26 and theta;
  enddef;
  def map between parameters and internal_carotid_L50_A_module for
    vars E_internal_carotid_L50_A and E;
    vars l_internal_carotid_L50_A and l;
    vars r_internal_carotid_L50_A and r;
    vars u_ext_internal_carotid_L50_A and u_ext;
    vars theta_internal_carotid_L50_A and theta;
  enddef;
  def map between parameters and internal_carotid_L50_B_module for
    vars E_internal_carotid_L50_B and E;
    vars l_internal_carotid_L50_B and l;
    vars r_internal_carotid_L50_B and r;
    vars u_ext_internal_carotid_L50_B and u_ext;
    vars theta_internal_carotid_L50_B and theta;
  enddef;
  def map between parameters and internal_carotid_L50_C_module for
    vars E_internal_carotid_L50_C and E;
    vars l_internal_carotid_L50_C and l;
    vars r_internal_carotid_L50_C and r;
    vars theta_internal_carotid_L50_C and theta;
    vars u_ext_internal_carotid_L50_C and u_ext;
  enddef;
  def map between parameters and internal_carotid_R8_A_module for
    vars E_internal_carotid_R8_A and E;
    vars l_internal_carotid_R8_A and l;
    vars r_internal_carotid_R8_A and r;
    vars u_ext_internal_carotid_R8_A and u_ext;
    vars theta_internal_carotid_R8_A and theta;
  enddef;
  def map between parameters and internal_carotid_R8_B_module for
    vars E_internal_carotid_R8_B and E;
    vars l_internal_carotid_R8_B and l;
    vars r_internal_carotid_R8_B and r;
    vars u_ext_internal_carotid_R8_B and u_ext;
    vars theta_internal_carotid_R8_B and theta;
  enddef;
  def map between parameters and internal_carotid_R8_C_module for
    vars E_internal_carotid_R8_C and E;
    vars l_internal_carotid_R8_C and l;
    vars r_internal_carotid_R8_C and r;
    vars theta_internal_carotid_R8_C and theta;
    vars u_ext_internal_carotid_R8_C and u_ext;
  enddef;
  def map between parameters and posterior_communicating_L8_module for
    vars E_posterior_communicating_L8 and E;
    vars l_posterior_communicating_L8 and l;
    vars r_posterior_communicating_L8 and r;
    vars u_ext_posterior_communicating_L8 and u_ext;
    vars theta_posterior_communicating_L8 and theta;
  enddef;
  def map between parameters and posterior_communicating_R206_module for
    vars E_posterior_communicating_R206 and E;
    vars l_posterior_communicating_R206 and l;
    vars r_posterior_communicating_R206 and r;
    vars u_ext_posterior_communicating_R206 and u_ext;
    vars theta_posterior_communicating_R206 and theta;
  enddef;
  def map between parameters and internal_carotid_L112_module for
    vars E_internal_carotid_L112 and E;
    vars l_internal_carotid_L112 and l;
    vars r_internal_carotid_L112 and r;
    vars theta_internal_carotid_L112 and theta;
    vars u_ext_internal_carotid_L112 and u_ext;
  enddef;
  def map between parameters and internal_carotid_R48_module for
    vars E_internal_carotid_R48 and E;
    vars l_internal_carotid_R48 and l;
    vars r_internal_carotid_R48 and r;
    vars theta_internal_carotid_R48 and theta;
    vars u_ext_internal_carotid_R48 and u_ext;
  enddef;
  def map between parameters and middle_cerebral_L114_module for
    vars E_middle_cerebral_L114 and E;
    vars l_middle_cerebral_L114 and l;
    vars r_middle_cerebral_L114 and r;
    vars u_ext_middle_cerebral_L114 and u_ext;
    vars theta_middle_cerebral_L114 and theta;
  enddef;
  def map between parameters and middle_cerebral_R52_module for
    vars E_middle_cerebral_R52 and E;
    vars l_middle_cerebral_R52 and l;
    vars r_middle_cerebral_R52 and r;
    vars u_ext_middle_cerebral_R52 and u_ext;
    vars theta_middle_cerebral_R52 and theta;
  enddef;
  def map between parameters and anterior_cerebral_L110_module for
    vars E_anterior_cerebral_L110 and E;
    vars l_anterior_cerebral_L110 and l;
    vars r_anterior_cerebral_L110 and r;
    vars u_ext_anterior_cerebral_L110 and u_ext;
    vars theta_anterior_cerebral_L110 and theta;
  enddef;
  def map between parameters and anterior_cerebral_R46_module for
    vars E_anterior_cerebral_R46 and E;
    vars l_anterior_cerebral_R46 and l;
    vars r_anterior_cerebral_R46 and r;
    vars theta_anterior_cerebral_R46 and theta;
    vars u_ext_anterior_cerebral_R46 and u_ext;
  enddef;
  def map between parameters and anterior_cerebral_R238_module for
    vars E_anterior_cerebral_R238 and E;
    vars l_anterior_cerebral_R238 and l;
    vars r_anterior_cerebral_R238 and r;
    vars u_ext_anterior_cerebral_R238 and u_ext;
    vars theta_anterior_cerebral_R238 and theta;
  enddef;
  def map between parameters and anterior_cerebral_L42_module for
    vars E_anterior_cerebral_L42 and E;
    vars l_anterior_cerebral_L42 and l;
    vars r_anterior_cerebral_L42 and r;
    vars u_ext_anterior_cerebral_L42 and u_ext;
    vars theta_anterior_cerebral_L42 and theta;
  enddef;
  def map between parameters and anterior_communicating_C44_module for
    vars E_anterior_communicating_C44 and E;
    vars l_anterior_communicating_C44 and l;
    vars r_anterior_communicating_C44 and r;
    vars u_ext_anterior_communicating_C44 and u_ext;
    vars theta_anterior_communicating_C44 and theta;
  enddef;
  def map between parameters and vertebral_L2_module for
    vars E_vertebral_L2 and E;
    vars l_vertebral_L2 and l;
    vars r_vertebral_L2 and r;
    vars u_ext_vertebral_L2 and u_ext;
    vars theta_vertebral_L2 and theta;
  enddef;
  def map between parameters and subclavian_R28_module for
    vars E_subclavian_R28 and E;
    vars l_subclavian_R28 and l;
    vars r_subclavian_R28 and r;
    vars theta_subclavian_R28 and theta;
    vars u_ext_subclavian_R28 and u_ext;
  enddef;
  def map between parameters and subclavian_R30_module for
    vars E_subclavian_R30 and E;
    vars l_subclavian_R30 and l;
    vars r_subclavian_R30 and r;
    vars u_ext_subclavian_R30 and u_ext;
    vars theta_subclavian_R30 and theta;
  enddef;
  def map between parameters and brachial_R34_module for
    vars E_brachial_R34 and E;
    vars l_brachial_R34 and l;
    vars r_brachial_R34 and r;
    vars u_ext_brachial_R34 and u_ext;
    vars theta_brachial_R34 and theta;
  enddef;
  def map between parameters and vertebral_R272_module for
    vars E_vertebral_R272 and E;
    vars l_vertebral_R272 and l;
    vars r_vertebral_R272 and r;
    vars u_ext_vertebral_R272 and u_ext;
    vars theta_vertebral_R272 and theta;
  enddef;
  def map between parameters and basilar_C4_module for
    vars E_basilar_C4 and E;
    vars l_basilar_C4 and l;
    vars r_basilar_C4 and r;
    vars theta_basilar_C4 and theta;
    vars u_ext_basilar_C4 and u_ext;
  enddef;
  def map between parameters and posterior_cerebral_pre_L6_module for
    vars E_posterior_cerebral_pre_L6 and E;
    vars l_posterior_cerebral_pre_L6 and l;
    vars r_posterior_cerebral_pre_L6 and r;
    vars u_ext_posterior_cerebral_pre_L6 and u_ext;
    vars theta_posterior_cerebral_pre_L6 and theta;
  enddef;
  def map between parameters and posterior_cerebral_post_L12_module for
    vars E_posterior_cerebral_post_L12 and E;
    vars l_posterior_cerebral_post_L12 and l;
    vars r_posterior_cerebral_post_L12 and r;
    vars u_ext_posterior_cerebral_post_L12 and u_ext;
    vars theta_posterior_cerebral_post_L12 and theta;
  enddef;
  def map between parameters and posterior_cerebral_pre_R204_module for
    vars E_posterior_cerebral_pre_R204 and E;
    vars l_posterior_cerebral_pre_R204 and l;
    vars r_posterior_cerebral_pre_R204 and r;
    vars u_ext_posterior_cerebral_pre_R204 and u_ext;
    vars theta_posterior_cerebral_pre_R204 and theta;
  enddef;
  def map between parameters and posterior_cerebral_post_R208_module for
    vars E_posterior_cerebral_post_R208 and E;
    vars l_posterior_cerebral_post_R208 and l;
    vars r_posterior_cerebral_post_R208 and r;
    vars u_ext_posterior_cerebral_post_R208 and u_ext;
    vars theta_posterior_cerebral_post_R208 and theta;
  enddef;
  def map between parameters and posterior_cerebral_L_T_module for
    vars R_T_posterior_cerebral_L_T and R_T;
    vars C_T_posterior_cerebral_L_T and C_T;
    vars I_T_posterior_cerebral_L_T and I_T;
    vars u_ext_posterior_cerebral_L_T and u_ext;
    vars Delta_R_posterior_cerebral_L_T and Delta_R;
  enddef;
  def map between parameters and posterior_cerebral_R_T_module for
    vars R_T_posterior_cerebral_R_T and R_T;
    vars C_T_posterior_cerebral_R_T and C_T;
    vars I_T_posterior_cerebral_R_T and I_T;
    vars u_ext_posterior_cerebral_R_T and u_ext;
    vars Delta_R_posterior_cerebral_R_T and Delta_R;
  enddef;
  def map between parameters and external_carotid_L_T_module for
    vars R_T_external_carotid_L_T and R_T;
    vars C_T_external_carotid_L_T and C_T;
    vars I_T_external_carotid_L_T and I_T;
    vars u_ext_external_carotid_L_T and u_ext;
    vars Delta_R_external_carotid_L_T and Delta_R;
  enddef;
  def map between parameters and external_carotid_R_T_module for
    vars R_T_external_carotid_R_T and R_T;
    vars C_T_external_carotid_R_T and C_T;
    vars I_T_external_carotid_R_T and I_T;
    vars u_ext_external_carotid_R_T and u_ext;
    vars Delta_R_external_carotid_R_T and Delta_R;
  enddef;
  def map between parameters and middle_cerebral_L_T_module for
    vars R_T_middle_cerebral_L_T and R_T;
    vars C_T_middle_cerebral_L_T and C_T;
    vars I_T_middle_cerebral_L_T and I_T;
    vars u_ext_middle_cerebral_L_T and u_ext;
    vars Delta_R_middle_cerebral_L_T and Delta_R;
  enddef;
  def map between parameters and middle_cerebral_R_T_module for
    vars R_T_middle_cerebral_R_T and R_T;
    vars C_T_middle_cerebral_R_T and C_T;
    vars I_T_middle_cerebral_R_T and I_T;
    vars u_ext_middle_cerebral_R_T and u_ext;
    vars Delta_R_middle_cerebral_R_T and Delta_R;
  enddef;
  def map between parameters and anterior_cerebral_L_T_module for
    vars R_T_anterior_cerebral_L_T and R_T;
    vars C_T_anterior_cerebral_L_T and C_T;
    vars I_T_anterior_cerebral_L_T and I_T;
    vars u_ext_anterior_cerebral_L_T and u_ext;
    vars Delta_R_anterior_cerebral_L_T and Delta_R;
  enddef;
  def map between parameters and anterior_cerebral_R_T_module for
    vars R_T_anterior_cerebral_R_T and R_T;
    vars C_T_anterior_cerebral_R_T and C_T;
    vars I_T_anterior_cerebral_R_T and I_T;
    vars u_ext_anterior_cerebral_R_T and u_ext;
    vars Delta_R_anterior_cerebral_R_T and Delta_R;
  enddef;
  def map between parameters and arm_L_T_module for
    vars R_T_arm_L_T and R_T;
    vars C_T_arm_L_T and C_T;
    vars I_T_arm_L_T and I_T;
    vars u_ext_arm_L_T and u_ext;
  enddef;
  def map between parameters and arm_R_T_module for
    vars R_T_arm_R_T and R_T;
    vars C_T_arm_R_T and C_T;
    vars I_T_arm_R_T and I_T;
    vars u_ext_arm_R_T and u_ext;
  enddef;
  def map between parameters and aortic_arch_C94_module for
    vars E_aortic_arch_C94 and E;
    vars l_aortic_arch_C94 and l;
    vars r_aortic_arch_C94 and r;
    vars u_ext_aortic_arch_C94 and u_ext;
    vars theta_aortic_arch_C94 and theta;
  enddef;
  def map between parameters and thoracic_aorta_C96_module for
    vars E_thoracic_aorta_C96 and E;
    vars l_thoracic_aorta_C96 and l;
    vars r_thoracic_aorta_C96 and r;
    vars u_ext_thoracic_aorta_C96 and u_ext;
    vars theta_thoracic_aorta_C96 and theta;
  enddef;
  def map between parameters and thoracic_aorta_C100_module for
    vars E_thoracic_aorta_C100 and E;
    vars l_thoracic_aorta_C100 and l;
    vars r_thoracic_aorta_C100 and r;
    vars u_ext_thoracic_aorta_C100 and u_ext;
    vars theta_thoracic_aorta_C100 and theta;
  enddef;
  def map between parameters and thoracic_aorta_C104_module for
    vars E_thoracic_aorta_C104 and E;
    vars l_thoracic_aorta_C104 and l;
    vars r_thoracic_aorta_C104 and r;
    vars u_ext_thoracic_aorta_C104 and u_ext;
    vars theta_thoracic_aorta_C104 and theta;
  enddef;
  def map between parameters and thoracic_aorta_C108_module for
    vars E_thoracic_aorta_C108 and E;
    vars l_thoracic_aorta_C108 and l;
    vars r_thoracic_aorta_C108 and r;
    vars u_ext_thoracic_aorta_C108 and u_ext;
    vars theta_thoracic_aorta_C108 and theta;
  enddef;
  def map between parameters and thoracic_aorta_C112_module for
    vars E_thoracic_aorta_C112 and E;
    vars l_thoracic_aorta_C112 and l;
    vars r_thoracic_aorta_C112 and r;
    vars u_ext_thoracic_aorta_C112 and u_ext;
    vars theta_thoracic_aorta_C112 and theta;
  enddef;
  def map between parameters and abdominal_aorta_C114_module for
    vars E_abdominal_aorta_C114 and E;
    vars l_abdominal_aorta_C114 and l;
    vars r_abdominal_aorta_C114 and r;
    vars theta_abdominal_aorta_C114 and theta;
    vars u_ext_abdominal_aorta_C114 and u_ext;
  enddef;
  def map between parameters and trunk_C_T_module for
    vars R_T_trunk_C_T and R_T;
    vars C_T_trunk_C_T and C_T;
    vars I_T_trunk_C_T and I_T;
    vars u_ext_trunk_C_T and u_ext;
    vars R_local_multiplier_trunk_C_T and R_local_multiplier;
  enddef;
  def map between parameters and abdominal_aorta_C136_module for
    vars E_abdominal_aorta_C136 and E;
    vars l_abdominal_aorta_C136 and l;
    vars r_abdominal_aorta_C136 and r;
    vars u_ext_abdominal_aorta_C136 and u_ext;
    vars theta_abdominal_aorta_C136 and theta;
  enddef;
  def map between parameters and abdominal_aorta_C164_module for
    vars E_abdominal_aorta_C164 and E;
    vars l_abdominal_aorta_C164 and l;
    vars r_abdominal_aorta_C164 and r;
    vars u_ext_abdominal_aorta_C164 and u_ext;
    vars theta_abdominal_aorta_C164 and theta;
  enddef;
  def map between parameters and abdominal_aorta_C176_module for
    vars E_abdominal_aorta_C176 and E;
    vars l_abdominal_aorta_C176 and l;
    vars r_abdominal_aorta_C176 and r;
    vars u_ext_abdominal_aorta_C176 and u_ext;
    vars theta_abdominal_aorta_C176 and theta;
  enddef;
  def map between parameters and abdominal_aorta_C188_module for
    vars E_abdominal_aorta_C188 and E;
    vars l_abdominal_aorta_C188 and l;
    vars r_abdominal_aorta_C188 and r;
    vars u_ext_abdominal_aorta_C188 and u_ext;
    vars theta_abdominal_aorta_C188 and theta;
  enddef;
  def map between parameters and abdominal_aorta_C192_module for
    vars E_abdominal_aorta_C192 and E;
    vars l_abdominal_aorta_C192 and l;
    vars r_abdominal_aorta_C192 and r;
    vars theta_abdominal_aorta_C192 and theta;
    vars u_ext_abdominal_aorta_C192 and u_ext;
  enddef;
  def map between parameters and common_iliac_L194_module for
    vars E_common_iliac_L194 and E;
    vars l_common_iliac_L194 and l;
    vars r_common_iliac_L194 and r;
    vars u_ext_common_iliac_L194 and u_ext;
    vars theta_common_iliac_L194 and theta;
  enddef;
  def map between parameters and external_iliac_L198_module for
    vars E_external_iliac_L198 and E;
    vars l_external_iliac_L198 and l;
    vars r_external_iliac_L198 and r;
    vars u_ext_external_iliac_L198 and u_ext;
    vars theta_external_iliac_L198 and theta;
  enddef;
  def map between parameters and common_iliac_R216_module for
    vars E_common_iliac_R216 and E;
    vars l_common_iliac_R216 and l;
    vars r_common_iliac_R216 and r;
    vars u_ext_common_iliac_R216 and u_ext;
    vars theta_common_iliac_R216 and theta;
  enddef;
  def map between parameters and external_iliac_R220_module for
    vars E_external_iliac_R220 and E;
    vars l_external_iliac_R220 and l;
    vars r_external_iliac_R220 and r;
    vars u_ext_external_iliac_R220 and u_ext;
    vars theta_external_iliac_R220 and theta;
  enddef;
  def map between parameters and femoral_L200_module for
    vars E_femoral_L200 and E;
    vars l_femoral_L200 and l;
    vars r_femoral_L200 and r;
    vars u_ext_femoral_L200 and u_ext;
    vars theta_femoral_L200 and theta;
  enddef;
  def map between parameters and femoral_R222_module for
    vars E_femoral_R222 and E;
    vars l_femoral_R222 and l;
    vars r_femoral_R222 and r;
    vars u_ext_femoral_R222 and u_ext;
    vars theta_femoral_R222 and theta;
  enddef;
  def map between parameters and leg_L_T_module for
    vars R_T_leg_L_T and R_T;
    vars C_T_leg_L_T and C_T;
    vars I_T_leg_L_T and I_T;
    vars u_ext_leg_L_T and u_ext;
  enddef;
  def map between parameters and leg_R_T_module for
    vars R_T_leg_R_T and R_T;
    vars C_T_leg_R_T and C_T;
    vars I_T_leg_R_T and I_T;
    vars u_ext_leg_R_T and u_ext;
  enddef;
  def map between parameters and venous_lb_module for
    vars R_venous_lb and R;
    vars C_venous_lb and C;
    vars u_ext_venous_lb and u_ext;
    vars I_venous_lb and I;
    vars q_us_0_venous_lb and q_us_0;
    vars q_C_init_venous_lb and q_C_init;
  enddef;
  def map between parameters and venous_ub_module for
    vars R_venous_ub and R;
    vars C_venous_ub and C;
    vars u_ext_venous_ub and u_ext;
    vars I_venous_ub and I;
    vars q_us_0_venous_ub and q_us_0;
    vars q_C_init_venous_ub and q_C_init;
  enddef;
  def map between parameters and venous_ivc_module for
    vars R_venous_ivc and R;
    vars C_venous_ivc and C;
    vars u_ext_venous_ivc and u_ext;
    vars I_venous_ivc and I;
    vars q_us_0_venous_ivc and q_us_0;
    vars q_C_init_venous_ivc and q_C_init;
  enddef;
  def map between parameters and venous_svc_module for
    vars R_venous_svc and R;
    vars C_venous_svc and C;
    vars u_ext_venous_svc and u_ext;
    vars I_venous_svc and I;
    vars q_us_0_venous_svc and q_us_0;
    vars q_C_init_venous_svc and q_C_init;
  enddef;
  def map between parameters and middle_cerebral_L_GE_module for
    vars q_0_middle_cerebral_L_GE and q_0;
    vars M_CO2_middle_cerebral_L_GE and M_CO2;
    vars M_O2_middle_cerebral_L_GE and M_O2;
  enddef;
  def map between parameters and middle_cerebral_R_GE_module for
    vars q_0_middle_cerebral_R_GE and q_0;
    vars M_CO2_middle_cerebral_R_GE and M_CO2;
    vars M_O2_middle_cerebral_R_GE and M_O2;
  enddef;
  def map between parameters and anterior_cerebral_L_GE_module for
    vars q_0_anterior_cerebral_L_GE and q_0;
    vars M_CO2_anterior_cerebral_L_GE and M_CO2;
    vars M_O2_anterior_cerebral_L_GE and M_O2;
  enddef;
  def map between parameters and anterior_cerebral_R_GE_module for
    vars q_0_anterior_cerebral_R_GE and q_0;
    vars M_CO2_anterior_cerebral_R_GE and M_CO2;
    vars M_O2_anterior_cerebral_R_GE and M_O2;
  enddef;
  def map between parameters and posterior_cerebral_L_GE_module for
    vars q_0_posterior_cerebral_L_GE and q_0;
    vars M_CO2_posterior_cerebral_L_GE and M_CO2;
    vars M_O2_posterior_cerebral_L_GE and M_O2;
  enddef;
  def map between parameters and posterior_cerebral_R_GE_module for
    vars q_0_posterior_cerebral_R_GE and q_0;
    vars M_CO2_posterior_cerebral_R_GE and M_CO2;
    vars M_O2_posterior_cerebral_R_GE and M_O2;
  enddef;
  def map between parameters and external_carotid_L_GE_module for
    vars q_0_external_carotid_L_GE and q_0;
    vars M_CO2_external_carotid_L_GE and M_CO2;
    vars M_O2_external_carotid_L_GE and M_O2;
  enddef;
  def map between parameters and external_carotid_R_GE_module for
    vars q_0_external_carotid_R_GE and q_0;
    vars M_CO2_external_carotid_R_GE and M_CO2;
    vars M_O2_external_carotid_R_GE and M_O2;
  enddef;
  def map between parameters and arm_L_GE_module for
    vars q_0_arm_L_GE and q_0;
    vars M_CO2_arm_L_GE and M_CO2;
    vars M_O2_arm_L_GE and M_O2;
  enddef;
  def map between parameters and arm_R_GE_module for
    vars q_0_arm_R_GE and q_0;
    vars M_CO2_arm_R_GE and M_CO2;
    vars M_O2_arm_R_GE and M_O2;
  enddef;
  def map between parameters and leg_L_GE_module for
    vars q_0_leg_L_GE and q_0;
    vars M_CO2_leg_L_GE and M_CO2;
    vars M_O2_leg_L_GE and M_O2;
  enddef;
  def map between parameters and leg_R_GE_module for
    vars q_0_leg_R_GE and q_0;
    vars M_CO2_leg_R_GE and M_CO2;
    vars M_O2_leg_R_GE and M_O2;
  enddef;
  def map between parameters and trunk_C_GE_module for
    vars q_0_trunk_C_GE and q_0;
    vars M_CO2_trunk_C_GE and M_CO2;
    vars M_O2_trunk_C_GE and M_O2;
  enddef;
  def map between parameters and arterial_gas_transport_module for
    vars q_0_arterial_gas_transport and q_0;
  enddef;
  def map between parameters and venous_gas_transport_module for
    vars q_0_venous_gas_transport and q_0;
  enddef;
  def map between parameters and common_carotid_L_baro_module for
    vars P_baro_init_common_carotid_L_baro and P_baro_init;
    vars P_nom_common_carotid_L_baro and P_nom;
    vars tau_zb_common_carotid_L_baro and tau_zb;
    vars tau_pb_common_carotid_L_baro and tau_pb;
    vars f_ab_min_common_carotid_L_baro and f_ab_min;
    vars f_ab_max_common_carotid_L_baro and f_ab_max;
    vars k_ab_common_carotid_L_baro and k_ab;
  enddef;
  def map between parameters and arterial_chemoreceptor_module for
    vars AA_arterial_chemoreceptor and AA;
    vars BB_arterial_chemoreceptor and BB;
    vars C_CO2_a_nom_arterial_chemoreceptor and C_CO2_a_nom;
    vars K_O2_arterial_chemoreceptor and K_O2;
    vars K_CO2_arterial_chemoreceptor and K_CO2;
    vars K_stat_arterial_chemoreceptor and K_stat;
    vars K_dyn_arterial_chemoreceptor and K_dyn;
    vars tau_cap_arterial_chemoreceptor and tau_cap;
    vars tau_CO2_cc_dyn_arterial_chemoreceptor and tau_CO2_cc_dyn;
  enddef;
  def map between parameters and lung_stretch_module for
    vars tau_lung_lung_stretch and tau_lung;
    vars G_al_lung_stretch and G_al;
  enddef;
  def map between parameters and cardiopulm_receptor_module for
    vars tau_cp_cardiopulm_receptor and tau_cp;
    vars P_l_init_cardiopulm_receptor and P_l_init;
    vars f_maxl_cardiopulm_receptor and f_maxl;
    vars P_tn_cardiopulm_receptor and P_tn;
    vars k_l_cardiopulm_receptor and k_l;
  enddef;
  def map between parameters and NTS_module for
    vars f_min_br_NTS and f_min_br;
    vars f_max_br_NTS and f_max_br;
    vars f_mid_br_NTS and f_mid_br;
    vars f_min_ls_NTS and f_min_ls;
    vars f_max_ls_NTS and f_max_ls;
    vars f_mid_ls_NTS and f_mid_ls;
    vars f_min_cp_NTS and f_min_cp;
    vars f_max_cp_NTS and f_max_cp;
    vars f_mid_cp_NTS and f_mid_cp;
    vars f_min_ch_NTS and f_min_ch;
    vars f_max_ch_NTS and f_max_ch;
    vars f_mid_ch_NTS and f_mid_ch;
    vars k_NTS_br_NTS and k_NTS_br;
    vars k_NTS_ls_NTS and k_NTS_ls;
    vars k_NTS_cp_NTS and k_NTS_cp;
    vars k_NTS_ch_NTS and k_NTS_ch;
  enddef;
  def map between parameters and DMV_module for
    vars f_min_DMV_DMV and f_min_DMV;
    vars f_max_DMV_DMV and f_max_DMV;
    vars f_mid_DMV_DMV and f_mid_DMV;
    vars k_DMV_DMV and k_DMV;
  enddef;
  def map between parameters and NA_module for
    vars f_min_NA_NA and f_min_NA;
    vars f_max_NA_NA and f_max_NA;
    vars f_mid_NA_NA and f_mid_NA;
    vars k_RSA_NA and k_RSA;
    vars k_NA_NA and k_NA;
    vars s_NA and s;
  enddef;
  def map between parameters and NActr_module for
    vars f_min_NActr_NActr and f_min_NActr;
    vars f_max_NActr_NActr and f_max_NActr;
    vars f_mid_NActr_NActr and f_mid_NActr;
    vars k_NActr_NActr and k_NActr;
  enddef;
  def map between parameters and LCN_module for
    vars f_min_LCN_LCN and f_min_LCN;
    vars f_max_LCN_LCN and f_max_LCN;
    vars f_mid_LCN_LCN and f_mid_LCN;
    vars k_evEmax_gainLCN_LCN and k_evEmax_gainLCN;
    vars k_br_gainLCN_LCN and k_br_gainLCN;
    vars k_esh_gainLCN_LCN and k_esh_gainLCN;
    vars k_cp_gainLCN_LCN and k_cp_gainLCN;
    vars k_LCN_LCN and k_LCN;
  enddef;
  def map between parameters and PNNA_module for
    vars f_min_PNNA_PNNA and f_min_PNNA;
    vars f_max_PNNA_PNNA and f_max_PNNA;
    vars f_mid_PNNA_PNNA and f_mid_PNNA;
    vars k_PNNA_PNNA and k_PNNA;
  enddef;
  def map between parameters and PNDMV_module for
    vars f_min_PNDMV_PNDMV and f_min_PNDMV;
    vars f_max_PNDMV_PNDMV and f_max_PNDMV;
    vars f_mid_PNDMV_PNDMV and f_mid_PNDMV;
    vars k_PNDMV_PNDMV and k_PNDMV;
    vars tau_PNDMV_PNDMV and tau_PNDMV;
  enddef;
  def map between parameters and sympathetic_efferent_module for
    vars W_bs_sympathetic_efferent and W_bs;
    vars W_cs_sympathetic_efferent and W_cs;
  enddef;
  def map between parameters and trunk_resistance_effector_module for
    vars G_theta_trunk_resistance_effector and G_theta;
    vars tau_theta_trunk_resistance_effector and tau_theta;
  enddef;
  def map between parameters and arm_leg_resistance_effector_module for
    vars G_theta_arm_leg_resistance_effector and G_theta;
    vars tau_theta_arm_leg_resistance_effector and tau_theta;
  enddef;
  def map between parameters and lv_elastance_effector_module for
    vars inv_G_Es_lv_elastance_effector and inv_G_Es;
    vars tau_Es_lv_elastance_effector and tau_Es;
    vars inv_G_Ev_lv_elastance_effector and inv_G_Ev;
    vars tau_Ev_lv_elastance_effector and tau_Ev;
    vars scale_lv_elastance_effector and scale;
  enddef;
  def map between parameters and rv_elastance_effector_module for
    vars inv_G_Es_rv_elastance_effector and inv_G_Es;
    vars tau_Es_rv_elastance_effector and tau_Es;
    vars inv_G_Ev_rv_elastance_effector and inv_G_Ev;
    vars tau_Ev_rv_elastance_effector and tau_Ev;
    vars scale_rv_elastance_effector and scale;
  enddef;
  def map between parameters and heart_period_effector_module for
    vars G_Ts_heart_period_effector and G_Ts;
    vars G_Tv_heart_period_effector and G_Tv;
    vars tau_Ts_heart_period_effector and tau_Ts;
    vars tau_Tv_heart_period_effector and tau_Tv;
  enddef;
  def map between parameters and venous_us_volume_effector_module for
    vars G_theta_venous_us_volume_effector and G_theta;
    vars tau_theta_venous_us_volume_effector and tau_theta;
  enddef;
  def map between parameters_global and pulmonary_GE_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between parameters_global and arterial_chemoreceptor_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars Hgb and Hgb;
  enddef;
  def map between parameters_global and arm_L_LC_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
  enddef;
  def map between parameters_global and arm_R_LC_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
  enddef;
  def map between parameters_global and leg_L_LC_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
  enddef;
  def map between parameters_global and leg_R_LC_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
  enddef;
  def map between parameters_global and middle_cerebral_L_LC_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
  enddef;
  def map between parameters_global and middle_cerebral_R_LC_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
  enddef;
  def map between parameters_global and anterior_cerebral_L_LC_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
  enddef;
  def map between parameters_global and anterior_cerebral_R_LC_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
  enddef;
  def map between parameters_global and posterior_cerebral_L_LC_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
  enddef;
  def map between parameters_global and posterior_cerebral_R_LC_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
  enddef;
  def map between parameters_global and external_carotid_L_LC_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
  enddef;
  def map between parameters_global and external_carotid_R_LC_module for
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
  enddef;
  def map between parameters_global and respiratory_gt_module for
    vars P_atm and P_atm;
    vars P_ws and P_ws;
  enddef;
  def map between parameters_global and lung_module for
    vars P_m and P_m;
  enddef;
  def map between parameters_global and heart_module for
    vars rho and rho;
    vars T and T;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars l_eff and l_eff;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
  enddef;
  def map between parameters_global and ascending_aorta_A_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and ascending_aorta_B_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and ascending_aorta_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and ascending_aorta_D_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and aortic_arch_C2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and aortic_arch_C46_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and aortic_arch_C64_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and brachiocephalic_trunk_C4_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and subclavian_L66_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and subclavian_L78_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and brachial_L82_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and common_carotid_L48_A_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and common_carotid_L48_B_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and common_carotid_L48_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and common_carotid_L48_D_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and common_carotid_R6_A_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and common_carotid_R6_B_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and common_carotid_R6_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and external_carotid_L62_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and external_carotid_R26_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and internal_carotid_L50_A_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and internal_carotid_L50_B_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and internal_carotid_L50_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and internal_carotid_R8_A_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and internal_carotid_R8_B_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and internal_carotid_R8_C_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and posterior_communicating_L8_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and posterior_communicating_R206_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and internal_carotid_L112_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and internal_carotid_R48_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and middle_cerebral_L114_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and middle_cerebral_R52_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and anterior_cerebral_L110_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and anterior_cerebral_R46_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and anterior_cerebral_R238_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and anterior_cerebral_L42_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and anterior_communicating_C44_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and vertebral_L2_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and subclavian_R28_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and subclavian_R30_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and brachial_R34_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and vertebral_R272_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and basilar_C4_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and posterior_cerebral_pre_L6_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and posterior_cerebral_post_L12_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and posterior_cerebral_pre_R204_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and posterior_cerebral_post_R208_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and aortic_arch_C94_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and thoracic_aorta_C96_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and thoracic_aorta_C100_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and thoracic_aorta_C104_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and thoracic_aorta_C108_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and thoracic_aorta_C112_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and abdominal_aorta_C114_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and abdominal_aorta_C136_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and abdominal_aorta_C164_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and abdominal_aorta_C176_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and abdominal_aorta_C188_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and abdominal_aorta_C192_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and common_iliac_L194_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and external_iliac_L198_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and common_iliac_R216_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and external_iliac_R220_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and femoral_L200_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and femoral_R222_module for
    vars rho and rho;
    vars beta_g and beta_g;
    vars mu and mu;
    vars g and g;
    vars a_vessel and a_vessel;
    vars b_vessel and b_vessel;
    vars c_vessel and c_vessel;
    vars d_vessel and d_vessel;
  enddef;
  def map between parameters_global and sympathetic_efferent_module for
    vars f_es_0 and f_es_0;
    vars f_es_inf and f_es_inf;
    vars f_es_max and f_es_max;
    vars k_es and k_es;
  enddef;
  def map between parameters_global and trunk_resistance_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and arm_leg_resistance_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and lv_elastance_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and rv_elastance_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and heart_period_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between parameters_global and venous_us_volume_effector_module for
    vars f_es_min and f_es_min;
  enddef;
  def map between environment and par_module for
    vars time and t;
  enddef;
  def map between environment and pcap_module for
    vars time and t;
  enddef;
  def map between environment and pulmonary_GE_module for
    vars time and t;
  enddef;
  def map between environment and respiratory_gt_module for
    vars time and t;
  enddef;
  def map between environment and lung_module for
    vars time and t;
  enddef;
  def map between environment and pvn_module for
    vars time and t;
  enddef;
  def map between environment and heart_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_A_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_B_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_C_module for
    vars time and t;
  enddef;
  def map between environment and ascending_aorta_D_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C2_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C46_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C64_module for
    vars time and t;
  enddef;
  def map between environment and brachiocephalic_trunk_C4_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L66_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_L78_module for
    vars time and t;
  enddef;
  def map between environment and brachial_L82_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_A_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_B_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_C_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L48_D_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_A_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_B_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_R6_C_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L62_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R26_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_A_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_B_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L50_C_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_A_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_B_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R8_C_module for
    vars time and t;
  enddef;
  def map between environment and posterior_communicating_L8_module for
    vars time and t;
  enddef;
  def map between environment and posterior_communicating_R206_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_L112_module for
    vars time and t;
  enddef;
  def map between environment and internal_carotid_R48_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L114_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R52_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L110_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R46_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R238_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L42_module for
    vars time and t;
  enddef;
  def map between environment and anterior_communicating_C44_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_L2_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R28_module for
    vars time and t;
  enddef;
  def map between environment and subclavian_R30_module for
    vars time and t;
  enddef;
  def map between environment and brachial_R34_module for
    vars time and t;
  enddef;
  def map between environment and vertebral_R272_module for
    vars time and t;
  enddef;
  def map between environment and basilar_C4_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_pre_L6_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_post_L12_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_pre_R204_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_post_R208_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L_T_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L_T_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R_T_module for
    vars time and t;
  enddef;
  def map between environment and arm_L_T_module for
    vars time and t;
  enddef;
  def map between environment and arm_R_T_module for
    vars time and t;
  enddef;
  def map between environment and aortic_arch_C94_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C96_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C100_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C104_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C108_module for
    vars time and t;
  enddef;
  def map between environment and thoracic_aorta_C112_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C114_module for
    vars time and t;
  enddef;
  def map between environment and trunk_C_T_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C136_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C164_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C176_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C188_module for
    vars time and t;
  enddef;
  def map between environment and abdominal_aorta_C192_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_L194_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_L198_module for
    vars time and t;
  enddef;
  def map between environment and common_iliac_R216_module for
    vars time and t;
  enddef;
  def map between environment and external_iliac_R220_module for
    vars time and t;
  enddef;
  def map between environment and femoral_L200_module for
    vars time and t;
  enddef;
  def map between environment and femoral_R222_module for
    vars time and t;
  enddef;
  def map between environment and leg_L_T_module for
    vars time and t;
  enddef;
  def map between environment and leg_R_T_module for
    vars time and t;
  enddef;
  def map between environment and venous_lb_module for
    vars time and t;
  enddef;
  def map between environment and venous_ub_module for
    vars time and t;
  enddef;
  def map between environment and venous_ivc_module for
    vars time and t;
  enddef;
  def map between environment and venous_svc_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L_GE_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R_GE_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L_GE_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R_GE_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_L_GE_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_R_GE_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L_GE_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R_GE_module for
    vars time and t;
  enddef;
  def map between environment and arm_L_GE_module for
    vars time and t;
  enddef;
  def map between environment and arm_R_GE_module for
    vars time and t;
  enddef;
  def map between environment and leg_L_GE_module for
    vars time and t;
  enddef;
  def map between environment and leg_R_GE_module for
    vars time and t;
  enddef;
  def map between environment and trunk_C_GE_module for
    vars time and t;
  enddef;
  def map between environment and arterial_gas_transport_module for
    vars time and t;
  enddef;
  def map between environment and venous_gas_transport_module for
    vars time and t;
  enddef;
  def map between environment and common_carotid_L_baro_module for
    vars time and t;
  enddef;
  def map between environment and arterial_chemoreceptor_module for
    vars time and t;
  enddef;
  def map between environment and lung_stretch_module for
    vars time and t;
  enddef;
  def map between environment and cardiopulm_receptor_module for
    vars time and t;
  enddef;
  def map between environment and NTS_module for
    vars time and t;
  enddef;
  def map between environment and DMV_module for
    vars time and t;
  enddef;
  def map between environment and NA_module for
    vars time and t;
  enddef;
  def map between environment and NActr_module for
    vars time and t;
  enddef;
  def map between environment and LCN_module for
    vars time and t;
  enddef;
  def map between environment and PNNA_module for
    vars time and t;
  enddef;
  def map between environment and PNDMV_module for
    vars time and t;
  enddef;
  def map between environment and sympathetic_efferent_module for
    vars time and t;
  enddef;
  def map between environment and trunk_resistance_effector_module for
    vars time and t;
  enddef;
  def map between environment and arm_leg_resistance_effector_module for
    vars time and t;
  enddef;
  def map between environment and lv_elastance_effector_module for
    vars time and t;
  enddef;
  def map between environment and rv_elastance_effector_module for
    vars time and t;
  enddef;
  def map between environment and heart_period_effector_module for
    vars time and t;
  enddef;
  def map between environment and venous_us_volume_effector_module for
    vars time and t;
  enddef;
  def map between environment and arm_L_LC_module for
    vars time and t;
  enddef;
  def map between environment and arm_R_LC_module for
    vars time and t;
  enddef;
  def map between environment and leg_L_LC_module for
    vars time and t;
  enddef;
  def map between environment and leg_R_LC_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_L_LC_module for
    vars time and t;
  enddef;
  def map between environment and middle_cerebral_R_LC_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_L_LC_module for
    vars time and t;
  enddef;
  def map between environment and anterior_cerebral_R_LC_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_L_LC_module for
    vars time and t;
  enddef;
  def map between environment and posterior_cerebral_R_LC_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_L_LC_module for
    vars time and t;
  enddef;
  def map between environment and external_carotid_R_LC_module for
    vars time and t;
  enddef;
  def map between par_module and par for
    vars I and I;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C and q_C;
    vars v and v;
  enddef;
  def map between par_module and heart_module for
    vars v_in and v_puv;
    vars u and u_par;
  enddef;
  def map between par_module and pcap_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between pcap_module and pcap for
    vars I and I;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C and q_C;
    vars v and v;
  enddef;
  def map between pcap_module and pulmonary_GE_module for
    vars v and v;
  enddef;
  def map between pcap_module and pvn_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between pulmonary_GE_module and pulmonary_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_v and C_O2_v;
    vars C_CO2_v and C_CO2_v;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
    vars k_O2 and k_O2;
    vars k_CO2 and k_CO2;
    vars P_O2_A and P_O2_A;
    vars P_CO2_A and P_CO2_A;
    vars shunt_fraction and shunt_fraction;
    vars P_O2_p and P_O2_p;
    vars P_CO2_p and P_CO2_p;
    vars d_C_O2_p_dt and d_C_O2_p_dt;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between pulmonary_GE_module and respiratory_gt_module for
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars P_O2_A and P_O2_A;
    vars P_CO2_A and P_CO2_A;
  enddef;
  def map between pulmonary_GE_module and venous_gas_transport_module for
    vars C_O2_v and C_O2_out;
    vars C_CO2_v and C_CO2_out;
  enddef;
  def map between pulmonary_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_in;
    vars C_CO2_a and C_CO2_in;
  enddef;
  def map between respiratory_gt_module and respiratory_gt for
    vars F_O2_i and F_O2_i;
    vars F_CO2_i and F_CO2_i;
    vars P_atm and P_atm;
    vars P_ws and P_ws;
    vars K_LOSSES and K_LOSSES;
    vars F_O2_D and F_O2_D;
    vars F_CO2_D and F_CO2_D;
    vars F_O2_A and F_O2_A;
    vars F_CO2_A and F_CO2_A;
    vars P_O2_A and P_O2_A;
    vars P_CO2_A and P_CO2_A;
  enddef;
  def map between respiratory_gt_module and lung_module for
    vars v_ml and v_ml;
    vars v_bA and v_bA;
    vars q_D and q_D;
    vars q_A and q_A;
  enddef;
  def map between lung_module and lung for
    vars P_m and P_m;
    vars P_l and P_l;
    vars P_t and P_t;
    vars P_b and P_b;
    vars P_A and P_A;
    vars P_pl and P_pl;
    vars P_mus and P_mus;
    vars P_mus_min and P_mus_min;
    vars P_plEE and P_plEE;
    vars q_l and q_l;
    vars q_t and q_t;
    vars q_b and q_b;
    vars q_A and q_A;
    vars q_pl and q_pl;
    vars q_D and q_D;
    vars v_ml and v_ml;
    vars v_lt and v_lt;
    vars v_tb and v_tb;
    vars v_bA and v_bA;
    vars v_twall and v_twall;
    vars v_bwall and v_bwall;
    vars v_plwall and v_plwall;
    vars R_ml and R_ml;
    vars R_lt and R_lt;
    vars R_tb and R_tb;
    vars R_bA and R_bA;
    vars R_plwall and R_plwall;
    vars C_l and C_l;
    vars C_t and C_t;
    vars C_b and C_b;
    vars C_A and C_A;
    vars C_pl and C_pl;
    vars t_floor and t_floor;
    vars T_resp and T_resp;
    vars T_I and T_I;
    vars T_E and T_E;
    vars tau and tau;
    vars IE_ratio and IE_ratio;
    vars q_l_us and q_l_us;
    vars q_t_us and q_t_us;
    vars q_b_us and q_b_us;
    vars q_A_us and q_A_us;
  enddef;
  def map between lung_module and cardiopulm_receptor_module for
    vars P_mus and P_mus;
  enddef;
  def map between lung_module and lung_stretch_module for
    vars q_b and q_b;
    vars q_A and q_A;
  enddef;
  def map between pvn_module and pvn for
    vars I and I;
    vars C and C;
    vars R and R;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars v and v;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
    vars Delta_q_us and Delta_q_us;
  enddef;
  def map between pvn_module and heart_module for
    vars v and v_pvn;
    vars u_out and u_la;
  enddef;
  def map between pvn_module and cardiopulm_receptor_module for
    vars u_out and u_out;
  enddef;
  def map between heart_module and heart for
    vars mt and mt;
    vars e_a and e_a;
    vars e_v and e_v;
    vars T and T;
    vars T_ac and T_ac;
    vars T_ar and T_ar;
    vars t_astart and t_astart;
    vars t_astart_norm and t_astart_norm;
    vars T_vc and T_vc;
    vars T_vr and T_vr;
    vars t_vstart and t_vstart;
    vars t_vstart_norm and t_vstart_norm;
    vars T_wCont and T_wCont;
    vars T_ac_wCont and T_ac_wCont;
    vars T_ar_wCont and T_ar_wCont;
    vars T_vc_wCont and T_vc_wCont;
    vars T_vr_wCont and T_vr_wCont;
    vars E_lv_A and E_lv_A;
    vars E_lv_B and E_lv_B;
    vars E_la_A and E_la_A;
    vars E_la_B and E_la_B;
    vars E_rv_A and E_rv_A;
    vars E_rv_B and E_rv_B;
    vars E_ra_A and E_ra_A;
    vars E_ra_B and E_ra_B;
    vars q_ra_us and q_ra_us;
    vars q_rv_us and q_rv_us;
    vars q_la_us and q_la_us;
    vars q_lv_us and q_lv_us;
    vars q_ra_init and q_ra_init;
    vars q_rv_init and q_rv_init;
    vars q_la_init and q_la_init;
    vars q_lv_init and q_lv_init;
    vars u_ra and u_ra;
    vars u_rv and u_rv;
    vars u_la and u_la;
    vars u_lv and u_lv;
    vars v_trv and v_trv;
    vars v_puv and v_puv;
    vars v_miv and v_miv;
    vars v_aov and v_aov;
    vars A_eff_trv and A_eff_trv;
    vars A_eff_puv and A_eff_puv;
    vars A_eff_miv and A_eff_miv;
    vars A_eff_aov and A_eff_aov;
    vars A_nn_trv and A_nn_trv;
    vars A_nn_puv and A_nn_puv;
    vars A_nn_miv and A_nn_miv;
    vars A_nn_aov and A_nn_aov;
    vars l_eff and l_eff;
    vars K_vo_trv and K_vo_trv;
    vars K_vo_puv and K_vo_puv;
    vars K_vo_miv and K_vo_miv;
    vars K_vo_aov and K_vo_aov;
    vars K_vc_trv and K_vc_trv;
    vars K_vc_puv and K_vc_puv;
    vars K_vc_miv and K_vc_miv;
    vars K_vc_aov and K_vc_aov;
    vars M_rg_trv and M_rg_trv;
    vars M_rg_puv and M_rg_puv;
    vars M_rg_miv and M_rg_miv;
    vars M_rg_aov and M_rg_aov;
    vars M_st_trv and M_st_trv;
    vars M_st_puv and M_st_puv;
    vars M_st_miv and M_st_miv;
    vars M_st_aov and M_st_aov;
    vars rho and rho;
    vars q_lv and q_lv;
    vars q_rv and q_rv;
    vars q_la and q_la;
    vars q_ra and q_ra;
    vars chi_a and chi_a;
    vars chi_afloor and chi_afloor;
    vars E_rv_A_wCont and E_rv_A_wCont;
    vars E_lv_A_wCont and E_lv_A_wCont;
  enddef;
  def map between heart_module and venous_ivc_module for
    vars u_ra and u_out;
    vars v_ivc and v;
  enddef;
  def map between heart_module and venous_svc_module for
    vars u_ra and u_out;
    vars v_svc and v;
  enddef;
  def map between heart_module and ascending_aorta_A_module for
    vars u_root and u;
    vars v_aov and v_in;
  enddef;
  def map between heart_module and heart_period_effector_module for
    vars Delta_T and Delta_T;
  enddef;
  def map between heart_module and rv_elastance_effector_module for
    vars Delta_E_rv and delta_Emax;
  enddef;
  def map between heart_module and lv_elastance_effector_module for
    vars Delta_E_lv and delta_Emax;
  enddef;
  def map between ascending_aorta_A_module and ascending_aorta_A for
    vars mu and mu;
    vars E and E;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
  enddef;
  def map between ascending_aorta_A_module and ascending_aorta_B_module for
    vars u_d and u_in;
    vars v_out and v;
  enddef;
  def map between ascending_aorta_B_module and ascending_aorta_B for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between ascending_aorta_B_module and ascending_aorta_C_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between ascending_aorta_C_module and ascending_aorta_C for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between ascending_aorta_C_module and arterial_gas_transport_module for
    vars v and v;
  enddef;
  def map between ascending_aorta_C_module and ascending_aorta_D_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between ascending_aorta_D_module and ascending_aorta_D for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between ascending_aorta_D_module and aortic_arch_C2_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between aortic_arch_C2_module and aortic_arch_C2 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between aortic_arch_C2_module and aortic_arch_C46_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between aortic_arch_C2_module and brachiocephalic_trunk_C4_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between aortic_arch_C46_module and aortic_arch_C46 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between aortic_arch_C46_module and aortic_arch_C64_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between aortic_arch_C46_module and common_carotid_L48_A_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between aortic_arch_C64_module and aortic_arch_C64 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between aortic_arch_C64_module and subclavian_L66_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between aortic_arch_C64_module and aortic_arch_C94_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between brachiocephalic_trunk_C4_module and brachiocephalic_trunk_C4 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between brachiocephalic_trunk_C4_module and common_carotid_R6_A_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between brachiocephalic_trunk_C4_module and subclavian_R28_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between subclavian_L66_module and subclavian_L66 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between subclavian_L66_module and subclavian_L78_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between subclavian_L66_module and vertebral_L2_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between subclavian_L78_module and subclavian_L78 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between subclavian_L78_module and brachial_L82_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between brachial_L82_module and brachial_L82 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between brachial_L82_module and arm_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between common_carotid_L48_A_module and common_carotid_L48_A for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between common_carotid_L48_A_module and common_carotid_L48_B_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between common_carotid_L48_B_module and common_carotid_L48_B for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between common_carotid_L48_B_module and common_carotid_L48_C_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between common_carotid_L48_C_module and common_carotid_L48_C for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between common_carotid_L48_C_module and common_carotid_L48_D_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between common_carotid_L48_D_module and common_carotid_L48_D for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between common_carotid_L48_D_module and external_carotid_L62_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between common_carotid_L48_D_module and internal_carotid_L50_A_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between common_carotid_L48_D_module and common_carotid_L_baro_module for
    vars u_C and P_sys;
    vars du_C_dt and dP_sys_dt;
  enddef;
  def map between common_carotid_R6_A_module and common_carotid_R6_A for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between common_carotid_R6_A_module and common_carotid_R6_B_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between common_carotid_R6_B_module and common_carotid_R6_B for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between common_carotid_R6_B_module and common_carotid_R6_C_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between common_carotid_R6_C_module and common_carotid_R6_C for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between common_carotid_R6_C_module and external_carotid_R26_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between common_carotid_R6_C_module and internal_carotid_R8_A_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between external_carotid_L62_module and external_carotid_L62 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between external_carotid_L62_module and external_carotid_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between external_carotid_R26_module and external_carotid_R26 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between external_carotid_R26_module and external_carotid_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between internal_carotid_L50_A_module and internal_carotid_L50_A for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between internal_carotid_L50_A_module and internal_carotid_L50_B_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between internal_carotid_L50_B_module and internal_carotid_L50_B for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between internal_carotid_L50_B_module and internal_carotid_L50_C_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between internal_carotid_L50_C_module and internal_carotid_L50_C for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between internal_carotid_L50_C_module and posterior_communicating_L8_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between internal_carotid_L50_C_module and internal_carotid_L112_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between internal_carotid_R8_A_module and internal_carotid_R8_A for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between internal_carotid_R8_A_module and internal_carotid_R8_B_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between internal_carotid_R8_B_module and internal_carotid_R8_B for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between internal_carotid_R8_B_module and internal_carotid_R8_C_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between internal_carotid_R8_C_module and internal_carotid_R8_C for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between internal_carotid_R8_C_module and posterior_communicating_R206_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between internal_carotid_R8_C_module and internal_carotid_R48_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between posterior_communicating_L8_module and posterior_communicating_L8 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between posterior_communicating_L8_module and posterior_cerebral_post_L12_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between posterior_communicating_R206_module and posterior_communicating_R206 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between posterior_communicating_R206_module and posterior_cerebral_post_R208_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between internal_carotid_L112_module and internal_carotid_L112 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between internal_carotid_L112_module and middle_cerebral_L114_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between internal_carotid_L112_module and anterior_cerebral_L110_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between internal_carotid_R48_module and internal_carotid_R48 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between internal_carotid_R48_module and middle_cerebral_R52_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between internal_carotid_R48_module and anterior_cerebral_R46_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between middle_cerebral_L114_module and middle_cerebral_L114 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between middle_cerebral_L114_module and middle_cerebral_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between middle_cerebral_R52_module and middle_cerebral_R52 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between middle_cerebral_R52_module and middle_cerebral_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between anterior_cerebral_L110_module and anterior_cerebral_L110 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between anterior_cerebral_L110_module and anterior_cerebral_L42_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_cerebral_R46 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_cerebral_R238_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between anterior_cerebral_R46_module and anterior_communicating_C44_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between anterior_cerebral_R238_module and anterior_cerebral_R238 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between anterior_cerebral_R238_module and anterior_cerebral_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between anterior_cerebral_L42_module and anterior_cerebral_L42 for
    vars E and E;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
  enddef;
  def map between anterior_cerebral_L42_module and anterior_communicating_C44_module for
    vars v_in_2 and v_d;
    vars u and u_out;
  enddef;
  def map between anterior_cerebral_L42_module and anterior_cerebral_L_T_module for
    vars u_d and u_in;
    vars v_out and v;
  enddef;
  def map between anterior_communicating_C44_module and anterior_communicating_C44 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between vertebral_L2_module and vertebral_L2 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between vertebral_L2_module and basilar_C4_module for
    vars v_d and v_in_1;
    vars u_out and u;
  enddef;
  def map between subclavian_R28_module and subclavian_R28 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between subclavian_R28_module and subclavian_R30_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between subclavian_R28_module and vertebral_R272_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between subclavian_R30_module and subclavian_R30 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between subclavian_R30_module and brachial_R34_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between brachial_R34_module and brachial_R34 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between brachial_R34_module and arm_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between vertebral_R272_module and vertebral_R272 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between vertebral_R272_module and basilar_C4_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between basilar_C4_module and basilar_C4 for
    vars E and E;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
  enddef;
  def map between basilar_C4_module and posterior_cerebral_pre_L6_module for
    vars u_d and u_in;
    vars v_out_1 and v;
  enddef;
  def map between basilar_C4_module and posterior_cerebral_pre_R204_module for
    vars u_d and u_in;
    vars v_out_2 and v;
  enddef;
  def map between posterior_cerebral_pre_L6_module and posterior_cerebral_pre_L6 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between posterior_cerebral_pre_L6_module and posterior_cerebral_post_L12_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_post_L12_module and posterior_cerebral_post_L12 for
    vars E and E;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_cerebral_post_L12_module and posterior_cerebral_L_T_module for
    vars u_d and u_in;
    vars v_out and v;
  enddef;
  def map between posterior_cerebral_pre_R204_module and posterior_cerebral_pre_R204 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between posterior_cerebral_pre_R204_module and posterior_cerebral_post_R208_module for
    vars v_d and v_in_2;
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_post_R208_module and posterior_cerebral_post_R208 for
    vars E and E;
    vars u_ext and u_ext;
    vars u and u;
    vars v and v;
  enddef;
  def map between posterior_cerebral_post_R208_module and posterior_cerebral_R_T_module for
    vars u_d and u_in;
    vars v_out and v;
  enddef;
  def map between posterior_cerebral_L_T_module and posterior_cerebral_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
    vars Delta_R and Delta_R;
  enddef;
  def map between posterior_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_posterior_cerebral_L_T;
  enddef;
  def map between posterior_cerebral_L_T_module and posterior_cerebral_L_GE_module for
    vars v_T and v;
  enddef;
  def map between posterior_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_L_T_module and posterior_cerebral_L_LC_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between posterior_cerebral_R_T_module and posterior_cerebral_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
    vars Delta_R and Delta_R;
  enddef;
  def map between posterior_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_posterior_cerebral_R_T;
  enddef;
  def map between posterior_cerebral_R_T_module and posterior_cerebral_R_GE_module for
    vars v_T and v;
  enddef;
  def map between posterior_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between posterior_cerebral_R_T_module and posterior_cerebral_R_LC_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between external_carotid_L_T_module and external_carotid_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
    vars Delta_R and Delta_R;
  enddef;
  def map between external_carotid_L_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_L_T;
  enddef;
  def map between external_carotid_L_T_module and external_carotid_L_GE_module for
    vars v_T and v;
  enddef;
  def map between external_carotid_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between external_carotid_L_T_module and external_carotid_L_LC_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between external_carotid_R_T_module and external_carotid_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
    vars Delta_R and Delta_R;
  enddef;
  def map between external_carotid_R_T_module and terminal_venous_connection for
    vars v_T and v_external_carotid_R_T;
  enddef;
  def map between external_carotid_R_T_module and external_carotid_R_GE_module for
    vars v_T and v;
  enddef;
  def map between external_carotid_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between external_carotid_R_T_module and external_carotid_R_LC_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between middle_cerebral_L_T_module and middle_cerebral_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
    vars Delta_R and Delta_R;
  enddef;
  def map between middle_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_L_T;
  enddef;
  def map between middle_cerebral_L_T_module and middle_cerebral_L_GE_module for
    vars v_T and v;
  enddef;
  def map between middle_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_L_T_module and middle_cerebral_L_LC_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between middle_cerebral_R_T_module and middle_cerebral_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
    vars Delta_R and Delta_R;
  enddef;
  def map between middle_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_middle_cerebral_R_T;
  enddef;
  def map between middle_cerebral_R_T_module and middle_cerebral_R_GE_module for
    vars v_T and v;
  enddef;
  def map between middle_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between middle_cerebral_R_T_module and middle_cerebral_R_LC_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between anterior_cerebral_L_T_module and anterior_cerebral_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
    vars Delta_R and Delta_R;
  enddef;
  def map between anterior_cerebral_L_T_module and terminal_venous_connection for
    vars v_T and v_anterior_cerebral_L_T;
  enddef;
  def map between anterior_cerebral_L_T_module and anterior_cerebral_L_GE_module for
    vars v_T and v;
  enddef;
  def map between anterior_cerebral_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_L_T_module and anterior_cerebral_L_LC_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between anterior_cerebral_R_T_module and anterior_cerebral_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
    vars Delta_R and Delta_R;
  enddef;
  def map between anterior_cerebral_R_T_module and terminal_venous_connection for
    vars v_T and v_anterior_cerebral_R_T;
  enddef;
  def map between anterior_cerebral_R_T_module and anterior_cerebral_R_GE_module for
    vars v_T and v;
  enddef;
  def map between anterior_cerebral_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between anterior_cerebral_R_T_module and anterior_cerebral_R_LC_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between arm_L_T_module and arm_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
  enddef;
  def map between arm_L_T_module and terminal_venous_connection for
    vars v_T and v_arm_L_T;
  enddef;
  def map between arm_L_T_module and arm_L_GE_module for
    vars v_T and v;
  enddef;
  def map between arm_L_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between arm_L_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between arm_L_T_module and arm_L_LC_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between arm_R_T_module and arm_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
  enddef;
  def map between arm_R_T_module and terminal_venous_connection for
    vars v_T and v_arm_R_T;
  enddef;
  def map between arm_R_T_module and arm_R_GE_module for
    vars v_T and v;
  enddef;
  def map between arm_R_T_module and venous_ub_module for
    vars u_out and u;
  enddef;
  def map between arm_R_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between arm_R_T_module and arm_R_LC_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between aortic_arch_C94_module and aortic_arch_C94 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between aortic_arch_C94_module and thoracic_aorta_C96_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_C96_module and thoracic_aorta_C96 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between thoracic_aorta_C96_module and thoracic_aorta_C100_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_C100_module and thoracic_aorta_C100 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between thoracic_aorta_C100_module and thoracic_aorta_C104_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_C104_module and thoracic_aorta_C104 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between thoracic_aorta_C104_module and thoracic_aorta_C108_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_C108_module and thoracic_aorta_C108 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between thoracic_aorta_C108_module and thoracic_aorta_C112_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between thoracic_aorta_C112_module and thoracic_aorta_C112 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between thoracic_aorta_C112_module and abdominal_aorta_C114_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between abdominal_aorta_C114_module and abdominal_aorta_C114 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between abdominal_aorta_C114_module and trunk_C_T_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between abdominal_aorta_C114_module and abdominal_aorta_C136_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between trunk_C_T_module and trunk_C_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between trunk_C_T_module and terminal_venous_connection for
    vars v_T and v_trunk_C_T;
  enddef;
  def map between trunk_C_T_module and trunk_C_GE_module for
    vars v_T and v;
  enddef;
  def map between trunk_C_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between trunk_C_T_module and trunk_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between abdominal_aorta_C136_module and abdominal_aorta_C136 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between abdominal_aorta_C136_module and abdominal_aorta_C164_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between abdominal_aorta_C164_module and abdominal_aorta_C164 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between abdominal_aorta_C164_module and abdominal_aorta_C176_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between abdominal_aorta_C176_module and abdominal_aorta_C176 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between abdominal_aorta_C176_module and abdominal_aorta_C188_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between abdominal_aorta_C188_module and abdominal_aorta_C188 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between abdominal_aorta_C188_module and abdominal_aorta_C192_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between abdominal_aorta_C192_module and abdominal_aorta_C192 for
    vars E and E;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_L194_module for
    vars u and u_in;
    vars v_out_1 and v;
  enddef;
  def map between abdominal_aorta_C192_module and common_iliac_R216_module for
    vars u and u_in;
    vars v_out_2 and v;
  enddef;
  def map between common_iliac_L194_module and common_iliac_L194 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between common_iliac_L194_module and external_iliac_L198_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between external_iliac_L198_module and external_iliac_L198 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between external_iliac_L198_module and femoral_L200_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between common_iliac_R216_module and common_iliac_R216 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between common_iliac_R216_module and external_iliac_R220_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between external_iliac_R220_module and external_iliac_R220 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between external_iliac_R220_module and femoral_R222_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between femoral_L200_module and femoral_L200 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between femoral_L200_module and leg_L_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between femoral_R222_module and femoral_R222 for
    vars E and E;
    vars r and r;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
  enddef;
  def map between femoral_R222_module and leg_R_T_module for
    vars u and u_in;
    vars v_out and v;
  enddef;
  def map between leg_L_T_module and leg_L_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
  enddef;
  def map between leg_L_T_module and terminal_venous_connection for
    vars v_T and v_leg_L_T;
  enddef;
  def map between leg_L_T_module and leg_L_GE_module for
    vars v_T and v;
  enddef;
  def map between leg_L_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between leg_L_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between leg_L_T_module and leg_L_LC_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between leg_R_T_module and leg_R_T for
    vars I_T and I_T;
    vars R_T and R_T;
    vars C_T and C_T;
    vars u_ext and u_ext;
    vars v and v;
    vars u and u;
    vars v_T and v_T;
    vars q_T and q_T;
    vars R_T_wCont and R_T_wCont;
  enddef;
  def map between leg_R_T_module and terminal_venous_connection for
    vars v_T and v_leg_R_T;
  enddef;
  def map between leg_R_T_module and leg_R_GE_module for
    vars v_T and v;
  enddef;
  def map between leg_R_T_module and venous_lb_module for
    vars u_out and u;
  enddef;
  def map between leg_R_T_module and arm_leg_resistance_effector_module for
    vars Delta_R and Delta_theta;
  enddef;
  def map between leg_R_T_module and leg_R_LC_module for
    vars R_local_multiplier and R_local_multiplier;
  enddef;
  def map between venous_lb_module and venous_lb for
    vars I and I;
    vars C and C;
    vars R and R;
    vars R_v and R_v;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars u_C and u_C;
    vars v and v;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
  enddef;
  def map between venous_lb_module and terminal_venous_connection for
    vars v_in and v_venous_lb;
  enddef;
  def map between venous_lb_module and venous_ivc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_lb_module and venous_us_volume_effector_module for
    vars Delta_q_us and Delta_theta;
  enddef;
  def map between venous_ub_module and venous_ub for
    vars I and I;
    vars C and C;
    vars R and R;
    vars R_v and R_v;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars u_C and u_C;
    vars v and v;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
  enddef;
  def map between venous_ub_module and terminal_venous_connection for
    vars v_in and v_venous_ub;
  enddef;
  def map between venous_ub_module and venous_svc_module for
    vars v and v_in;
    vars u_out and u;
  enddef;
  def map between venous_ub_module and venous_us_volume_effector_module for
    vars Delta_q_us and Delta_theta;
  enddef;
  def map between venous_ivc_module and venous_ivc for
    vars I and I;
    vars C and C;
    vars R and R;
    vars R_v and R_v;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars u_C and u_C;
    vars v and v;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
  enddef;
  def map between venous_ivc_module and venous_us_volume_effector_module for
    vars Delta_q_us and Delta_theta;
  enddef;
  def map between venous_svc_module and venous_svc for
    vars I and I;
    vars C and C;
    vars R and R;
    vars R_v and R_v;
    vars u_ext and u_ext;
    vars u and u;
    vars q_C_init and q_C_init;
    vars q_C_change and q_C_change;
    vars q_C and q_C;
    vars q and q;
    vars u_C and u_C;
    vars v and v;
    vars q_us_0 and q_us_0;
    vars q_us_wCont and q_us_wCont;
  enddef;
  def map between venous_svc_module and venous_us_volume_effector_module for
    vars Delta_q_us and Delta_theta;
  enddef;
  def map between middle_cerebral_L_GE_module and middle_cerebral_L_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between middle_cerebral_L_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between middle_cerebral_L_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_middle_cerebral_L_GE;
    vars C_CO2_p and C_CO2_p_middle_cerebral_L_GE;
  enddef;
  def map between middle_cerebral_L_GE_module and middle_cerebral_L_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between middle_cerebral_R_GE_module and middle_cerebral_R_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between middle_cerebral_R_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between middle_cerebral_R_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_middle_cerebral_R_GE;
    vars C_CO2_p and C_CO2_p_middle_cerebral_R_GE;
  enddef;
  def map between middle_cerebral_R_GE_module and middle_cerebral_R_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between anterior_cerebral_L_GE_module and anterior_cerebral_L_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between anterior_cerebral_L_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between anterior_cerebral_L_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_anterior_cerebral_L_GE;
    vars C_CO2_p and C_CO2_p_anterior_cerebral_L_GE;
  enddef;
  def map between anterior_cerebral_L_GE_module and anterior_cerebral_L_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between anterior_cerebral_R_GE_module and anterior_cerebral_R_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between anterior_cerebral_R_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between anterior_cerebral_R_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_anterior_cerebral_R_GE;
    vars C_CO2_p and C_CO2_p_anterior_cerebral_R_GE;
  enddef;
  def map between anterior_cerebral_R_GE_module and anterior_cerebral_R_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between posterior_cerebral_L_GE_module and posterior_cerebral_L_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between posterior_cerebral_L_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between posterior_cerebral_L_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_posterior_cerebral_L_GE;
    vars C_CO2_p and C_CO2_p_posterior_cerebral_L_GE;
  enddef;
  def map between posterior_cerebral_L_GE_module and posterior_cerebral_L_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between posterior_cerebral_R_GE_module and posterior_cerebral_R_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between posterior_cerebral_R_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between posterior_cerebral_R_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_posterior_cerebral_R_GE;
    vars C_CO2_p and C_CO2_p_posterior_cerebral_R_GE;
  enddef;
  def map between posterior_cerebral_R_GE_module and posterior_cerebral_R_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between external_carotid_L_GE_module and external_carotid_L_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between external_carotid_L_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between external_carotid_L_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_external_carotid_L_GE;
    vars C_CO2_p and C_CO2_p_external_carotid_L_GE;
  enddef;
  def map between external_carotid_L_GE_module and external_carotid_L_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between external_carotid_R_GE_module and external_carotid_R_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between external_carotid_R_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between external_carotid_R_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_external_carotid_R_GE;
    vars C_CO2_p and C_CO2_p_external_carotid_R_GE;
  enddef;
  def map between external_carotid_R_GE_module and external_carotid_R_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between arm_L_GE_module and arm_L_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between arm_L_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between arm_L_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_arm_L_GE;
    vars C_CO2_p and C_CO2_p_arm_L_GE;
  enddef;
  def map between arm_L_GE_module and arm_L_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between arm_R_GE_module and arm_R_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between arm_R_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between arm_R_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_arm_R_GE;
    vars C_CO2_p and C_CO2_p_arm_R_GE;
  enddef;
  def map between arm_R_GE_module and arm_R_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between leg_L_GE_module and leg_L_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between leg_L_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between leg_L_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_leg_L_GE;
    vars C_CO2_p and C_CO2_p_leg_L_GE;
  enddef;
  def map between leg_L_GE_module and leg_L_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between leg_R_GE_module and leg_R_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between leg_R_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between leg_R_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_leg_R_GE;
    vars C_CO2_p and C_CO2_p_leg_R_GE;
  enddef;
  def map between leg_R_GE_module and leg_R_LC_module for
    vars C_O2_p and C_O2_p;
  enddef;
  def map between trunk_C_GE_module and trunk_C_GE for
    vars q_0 and q_0;
    vars v and v;
    vars M_O2 and M_O2;
    vars M_CO2 and M_CO2;
    vars C_O2_p and C_O2_p;
    vars C_CO2_p and C_CO2_p;
  enddef;
  def map between trunk_C_GE_module and arterial_gas_transport_module for
    vars C_O2_a and C_O2_out;
    vars C_CO2_a and C_CO2_out;
  enddef;
  def map between trunk_C_GE_module and terminal_venous_connection for
    vars C_O2_p and C_O2_p_trunk_C_GE;
    vars C_CO2_p and C_CO2_p_trunk_C_GE;
  enddef;
  def map between arterial_gas_transport_module and arterial_gas_transport for
    vars C_O2_out and C_O2_out;
    vars C_CO2_out and C_CO2_out;
    vars q_0 and q_0;
    vars v and v;
  enddef;
  def map between arterial_gas_transport_module and arterial_chemoreceptor_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
    vars dot_C_CO2_out and dot_C_CO2_a;
  enddef;
  def map between arterial_gas_transport_module and arm_L_LC_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
  enddef;
  def map between arterial_gas_transport_module and arm_R_LC_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
  enddef;
  def map between arterial_gas_transport_module and leg_L_LC_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
  enddef;
  def map between arterial_gas_transport_module and leg_R_LC_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
  enddef;
  def map between arterial_gas_transport_module and middle_cerebral_L_LC_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
  enddef;
  def map between arterial_gas_transport_module and middle_cerebral_R_LC_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
  enddef;
  def map between arterial_gas_transport_module and anterior_cerebral_L_LC_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
  enddef;
  def map between arterial_gas_transport_module and anterior_cerebral_R_LC_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
  enddef;
  def map between arterial_gas_transport_module and posterior_cerebral_L_LC_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
  enddef;
  def map between arterial_gas_transport_module and posterior_cerebral_R_LC_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
  enddef;
  def map between arterial_gas_transport_module and external_carotid_L_LC_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
  enddef;
  def map between arterial_gas_transport_module and external_carotid_R_LC_module for
    vars C_O2_out and C_O2_a;
    vars C_CO2_out and C_CO2_a;
  enddef;
  def map between venous_gas_transport_module and terminal_venous_connection for
    vars C_O2_in and C_O2_p_venous_ave;
    vars C_CO2_in and C_CO2_p_venous_ave;
    vars v and v_venous_total;
  enddef;
  def map between venous_gas_transport_module and venous_gas_transport for
    vars C_O2_out and C_O2_out;
    vars C_CO2_out and C_CO2_out;
    vars q_0 and q_0;
    vars v and v;
  enddef;
  def map between common_carotid_L_baro_module and common_carotid_L_baro for
    vars P_baro_init and P_baro_init;
    vars P_baro and P_baro;
    vars f_ab and f_ab;
    vars P_nom and P_nom;
    vars f_ab_min and f_ab_min;
    vars f_ab_max and f_ab_max;
    vars k_ab and k_ab;
    vars tau_zb and tau_zb;
    vars tau_pb and tau_pb;
  enddef;
  def map between common_carotid_L_baro_module and NTS_module for
    vars f_ab and f_br;
  enddef;
  def map between common_carotid_L_baro_module and LCN_module for
    vars f_ab and f_br;
  enddef;
  def map between common_carotid_L_baro_module and sympathetic_efferent_module for
    vars f_ab and f_ab;
  enddef;
  def map between arterial_chemoreceptor_module and arterial_chemoreceptor for
    vars X_O2 and X_O2;
    vars phi_stat and phi_stat;
    vars phi_CO2_dyn and phi_CO2_dyn;
    vars f_c_stat and f_c_stat;
    vars f_c_dyn and f_c_dyn;
    vars f_apc and f_apc;
    vars phi_apc and phi_apc;
    vars AA and AA;
    vars BB and BB;
    vars C_CO2_a_nom and C_CO2_a_nom;
    vars K_O2 and K_O2;
    vars K_CO2 and K_CO2;
    vars K_stat and K_stat;
    vars K_dyn and K_dyn;
    vars tau_cap and tau_cap;
    vars tau_CO2_cc_dyn and tau_CO2_cc_dyn;
    vars C_O2_a_diss and C_O2_a_diss;
    vars S_O2_a and S_O2_a;
    vars Hgb and Hgb;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between arterial_chemoreceptor_module and NTS_module for
    vars f_apc and f_apc;
  enddef;
  def map between arterial_chemoreceptor_module and sympathetic_efferent_module for
    vars f_apc and f_apc;
  enddef;
  def map between lung_stretch_module and lung_stretch for
    vars q_A and q_A;
    vars q_b and q_b;
    vars V_lung and V_lung;
    vars f_ls and f_ls;
    vars tau_lung and tau_lung;
    vars G_al and G_al;
  enddef;
  def map between lung_stretch_module and NTS_module for
    vars f_ls and f_ls;
  enddef;
  def map between cardiopulm_receptor_module and cardiopulm_receptor for
    vars u_out and u_out;
    vars P_pv_P_thor and P_pv_P_thor;
    vars tau_cp and tau_cp;
    vars P_l_init and P_l_init;
    vars P_l and P_l;
    vars f_cp and f_cp;
    vars f_maxl and f_maxl;
    vars P_tn and P_tn;
    vars k_l and k_l;
  enddef;
  def map between cardiopulm_receptor_module and NTS_module for
    vars f_cp and f_cp;
  enddef;
  def map between cardiopulm_receptor_module and LCN_module for
    vars f_cp and f_cp;
  enddef;
  def map between NTS_module and NTS for
    vars f_min_br and f_min_br;
    vars f_max_br and f_max_br;
    vars f_mid_br and f_mid_br;
    vars f_NTS_br and f_NTS_br;
    vars k_NTS_br and k_NTS_br;
    vars f_min_ls and f_min_ls;
    vars f_max_ls and f_max_ls;
    vars f_mid_ls and f_mid_ls;
    vars f_NTS_ls and f_NTS_ls;
    vars k_NTS_ls and k_NTS_ls;
    vars f_min_cp and f_min_cp;
    vars f_max_cp and f_max_cp;
    vars f_mid_cp and f_mid_cp;
    vars f_NTS_cp and f_NTS_cp;
    vars k_NTS_cp and k_NTS_cp;
    vars f_min_ch and f_min_ch;
    vars f_max_ch and f_max_ch;
    vars f_mid_ch and f_mid_ch;
    vars f_NTS_ch and f_NTS_ch;
    vars k_NTS_ch and k_NTS_ch;
  enddef;
  def map between NTS_module and NA_module for
    vars f_NTS_br and f_NTS_br;
    vars f_NTS_ls and f_NTS_ls;
    vars f_NTS_cp and f_NTS_cp;
    vars f_NTS_ch and f_NTS_ch;
  enddef;
  def map between NTS_module and DMV_module for
    vars f_NTS_ls and f_NTS_ls;
    vars f_NTS_cp and f_NTS_cp;
  enddef;
  def map between DMV_module and DMV for
    vars f_min_DMV and f_min_DMV;
    vars f_max_DMV and f_max_DMV;
    vars f_mid_DMV and f_mid_DMV;
    vars f_DMV and f_DMV;
    vars k_DMV and k_DMV;
  enddef;
  def map between DMV_module and LCN_module for
    vars f_DMV and f_DMV;
  enddef;
  def map between DMV_module and PNDMV_module for
    vars f_DMV and f_DMV;
  enddef;
  def map between NA_module and NA for
    vars f_NTS_output and f_NTS_output;
    vars f_NA_input and f_NA_input;
    vars k_RSA and k_RSA;
    vars s and s;
    vars f_min_NA and f_min_NA;
    vars f_max_NA and f_max_NA;
    vars f_mid_NA and f_mid_NA;
    vars f_NA and f_NA;
    vars k_NA and k_NA;
  enddef;
  def map between NA_module and NActr_module for
    vars f_NA and f_NA;
  enddef;
  def map between NA_module and PNNA_module for
    vars f_NA and f_NA;
  enddef;
  def map between NActr_module and NActr for
    vars f_min_NActr and f_min_NActr;
    vars f_max_NActr and f_max_NActr;
    vars f_mid_NActr and f_mid_NActr;
    vars f_NActr and f_NActr;
    vars k_NActr and k_NActr;
  enddef;
  def map between NActr_module and LCN_module for
    vars f_NActr and f_NActr;
  enddef;
  def map between NActr_module and PNDMV_module for
    vars f_NActr and f_NActr;
  enddef;
  def map between LCN_module and LCN for
    vars k_evEmax_gainLCN and k_evEmax_gainLCN;
    vars k_br_gainLCN and k_br_gainLCN;
    vars k_esh_gainLCN and k_esh_gainLCN;
    vars k_cp_gainLCN and k_cp_gainLCN;
    vars f_input_LCN_sum and f_input_LCN_sum;
    vars f_input_LCN and f_input_LCN;
    vars f_LCN and f_LCN;
    vars f_mid_LCN and f_mid_LCN;
    vars f_min_LCN and f_min_LCN;
    vars f_max_LCN and f_max_LCN;
    vars k_LCN and k_LCN;
  enddef;
  def map between LCN_module and sympathetic_efferent_module for
    vars f_esh and f_s;
  enddef;
  def map between LCN_module and PNNA_module for
    vars f_LCN and f_LCN;
  enddef;
  def map between LCN_module and PNDMV_module for
    vars f_LCN and f_LCN;
  enddef;
  def map between PNNA_module and PNNA for
    vars f_PNNA and f_PNNA;
    vars f_mid_PNNA and f_mid_PNNA;
    vars f_min_PNNA and f_min_PNNA;
    vars f_max_PNNA and f_max_PNNA;
    vars k_PNNA and k_PNNA;
  enddef;
  def map between PNNA_module and heart_period_effector_module for
    vars f_PNNA and f_v;
  enddef;
  def map between PNDMV_module and PNDMV for
    vars f_PNDMV and f_PNDMV;
    vars f_mid_PNDMV and f_mid_PNDMV;
    vars f_min_PNDMV and f_min_PNDMV;
    vars f_max_PNDMV and f_max_PNDMV;
    vars k_PNDMV and k_PNDMV;
    vars f_PNDMV_filt and f_PNDMV_filt;
    vars tau_PNDMV and tau_PNDMV;
  enddef;
  def map between PNDMV_module and lv_elastance_effector_module for
    vars f_PNDMV_filt and f_PNDMV_filt;
  enddef;
  def map between PNDMV_module and rv_elastance_effector_module for
    vars f_PNDMV_filt and f_PNDMV_filt;
  enddef;
  def map between sympathetic_efferent_module and sympathetic_efferent for
    vars f_es_0 and f_es_0;
    vars f_es_inf and f_es_inf;
    vars f_es_max and f_es_max;
    vars k_es and k_es;
    vars W_bs and W_bs;
    vars W_cs and W_cs;
    vars f_ab and f_ab;
    vars f_s and f_s;
  enddef;
  def map between sympathetic_efferent_module and trunk_resistance_effector_module for
    vars f_s and f_s;
  enddef;
  def map between sympathetic_efferent_module and arm_leg_resistance_effector_module for
    vars f_s and f_s;
  enddef;
  def map between sympathetic_efferent_module and lv_elastance_effector_module for
    vars f_s and f_esh;
  enddef;
  def map between sympathetic_efferent_module and rv_elastance_effector_module for
    vars f_s and f_esh;
  enddef;
  def map between sympathetic_efferent_module and heart_period_effector_module for
    vars f_s and f_s;
  enddef;
  def map between sympathetic_efferent_module and venous_us_volume_effector_module for
    vars f_s and f_s;
  enddef;
  def map between trunk_resistance_effector_module and trunk_resistance_effector for
    vars G_theta and G_theta;
    vars f_es_min and f_es_min;
    vars tau_theta and tau_theta;
    vars f_s and f_s;
    vars Delta_theta and Delta_theta;
    vars sigma_theta and sigma_theta;
  enddef;
  def map between arm_leg_resistance_effector_module and arm_leg_resistance_effector for
    vars G_theta and G_theta;
    vars f_es_min and f_es_min;
    vars tau_theta and tau_theta;
    vars f_s and f_s;
    vars Delta_theta and Delta_theta;
    vars sigma_theta and sigma_theta;
  enddef;
  def map between lv_elastance_effector_module and lv_elastance_effector for
    vars inv_sigma_Es and inv_sigma_Es;
    vars inv_G_Es and inv_G_Es;
    vars f_es_min and f_es_min;
    vars inv_delta_Es and inv_delta_Es;
    vars tau_Es and tau_Es;
    vars inv_sigma_Ev and inv_sigma_Ev;
    vars inv_G_Ev and inv_G_Ev;
    vars inv_delta_Ev and inv_delta_Ev;
    vars tau_Ev and tau_Ev;
    vars delta_Emax and delta_Emax;
    vars scale and scale;
  enddef;
  def map between rv_elastance_effector_module and rv_elastance_effector for
    vars inv_sigma_Es and inv_sigma_Es;
    vars inv_G_Es and inv_G_Es;
    vars f_es_min and f_es_min;
    vars inv_delta_Es and inv_delta_Es;
    vars tau_Es and tau_Es;
    vars inv_sigma_Ev and inv_sigma_Ev;
    vars inv_G_Ev and inv_G_Ev;
    vars inv_delta_Ev and inv_delta_Ev;
    vars tau_Ev and tau_Ev;
    vars delta_Emax and delta_Emax;
    vars scale and scale;
  enddef;
  def map between heart_period_effector_module and heart_period_effector for
    vars G_Ts and G_Ts;
    vars G_Tv and G_Tv;
    vars f_es_min and f_es_min;
    vars tau_Ts and tau_Ts;
    vars tau_Tv and tau_Tv;
    vars f_s and f_s;
    vars f_v and f_v;
    vars Delta_Ts and Delta_Ts;
    vars Delta_Tv and Delta_Tv;
    vars Delta_T and Delta_T;
    vars sigma_Ts and sigma_Ts;
    vars sigma_Tv and sigma_Tv;
  enddef;
  def map between venous_us_volume_effector_module and venous_us_volume_effector for
    vars G_theta and G_theta;
    vars f_es_min and f_es_min;
    vars tau_theta and tau_theta;
    vars f_s and f_s;
    vars Delta_theta and Delta_theta;
    vars sigma_theta and sigma_theta;
  enddef;
  def map between arm_L_LC_module and arm_L_LC for
    vars x_O2 and x_O2;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars x_CO2 and x_CO2;
    vars C_O2_p and C_O2_p;
    vars P_CO2_a and P_CO2_a;
    vars R_local_multiplier and R_local_multiplier;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between arm_R_LC_module and arm_R_LC for
    vars x_O2 and x_O2;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars x_CO2 and x_CO2;
    vars C_O2_p and C_O2_p;
    vars P_CO2_a and P_CO2_a;
    vars R_local_multiplier and R_local_multiplier;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between leg_L_LC_module and leg_L_LC for
    vars x_O2 and x_O2;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars x_CO2 and x_CO2;
    vars C_O2_p and C_O2_p;
    vars P_CO2_a and P_CO2_a;
    vars R_local_multiplier and R_local_multiplier;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between leg_R_LC_module and leg_R_LC for
    vars x_O2 and x_O2;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars x_CO2 and x_CO2;
    vars C_O2_p and C_O2_p;
    vars P_CO2_a and P_CO2_a;
    vars R_local_multiplier and R_local_multiplier;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars k_CO2_m and k_CO2_m;
    vars C_O2_vm_nom and C_O2_vm_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_m and g_O2_m;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between middle_cerebral_L_LC_module and middle_cerebral_L_LC for
    vars x_O2 and x_O2;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars x_CO2 and x_CO2;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars P_CO2_a and P_CO2_a;
    vars R_local_multiplier and R_local_multiplier;
    vars G_p and G_p;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between middle_cerebral_R_LC_module and middle_cerebral_R_LC for
    vars x_O2 and x_O2;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars x_CO2 and x_CO2;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars P_CO2_a and P_CO2_a;
    vars R_local_multiplier and R_local_multiplier;
    vars G_p and G_p;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between anterior_cerebral_L_LC_module and anterior_cerebral_L_LC for
    vars x_O2 and x_O2;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars x_CO2 and x_CO2;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars P_CO2_a and P_CO2_a;
    vars R_local_multiplier and R_local_multiplier;
    vars G_p and G_p;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between anterior_cerebral_R_LC_module and anterior_cerebral_R_LC for
    vars x_O2 and x_O2;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars x_CO2 and x_CO2;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars P_CO2_a and P_CO2_a;
    vars R_local_multiplier and R_local_multiplier;
    vars G_p and G_p;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between posterior_cerebral_L_LC_module and posterior_cerebral_L_LC for
    vars x_O2 and x_O2;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars x_CO2 and x_CO2;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars P_CO2_a and P_CO2_a;
    vars R_local_multiplier and R_local_multiplier;
    vars G_p and G_p;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between posterior_cerebral_R_LC_module and posterior_cerebral_R_LC for
    vars x_O2 and x_O2;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars x_CO2 and x_CO2;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars P_CO2_a and P_CO2_a;
    vars R_local_multiplier and R_local_multiplier;
    vars G_p and G_p;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between external_carotid_L_LC_module and external_carotid_L_LC for
    vars x_O2 and x_O2;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars x_CO2 and x_CO2;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars P_CO2_a and P_CO2_a;
    vars R_local_multiplier and R_local_multiplier;
    vars G_p and G_p;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
  def map between external_carotid_R_LC_module and external_carotid_R_LC for
    vars x_O2 and x_O2;
    vars phi_P_CO2_a and phi_P_CO2_a;
    vars x_CO2 and x_CO2;
    vars C_O2_a and C_O2_a;
    vars C_CO2_a and C_CO2_a;
    vars C_O2_p and C_O2_p;
    vars P_CO2_a and P_CO2_a;
    vars R_local_multiplier and R_local_multiplier;
    vars G_p and G_p;
    vars P_CO2_a_nom and P_CO2_a_nom;
    vars C_O2_vb_nom and C_O2_vb_nom;
    vars tau_O2 and tau_O2;
    vars tau_CO2 and tau_CO2;
    vars g_O2_b and g_O2_b;
    vars A_b_lc and A_b_lc;
    vars B_b_lc and B_b_lc;
    vars C_b_lc and C_b_lc;
    vars D_b_lc and D_b_lc;
    vars k_1 and k_1;
    vars k_2 and k_2;
    vars h_1 and h_1;
    vars h_2 and h_2;
    vars alpha_1 and alpha_1;
    vars alpha_2 and alpha_2;
    vars beta_1 and beta_1;
    vars beta_2 and beta_2;
    vars C_O2_sat and C_O2_sat;
    vars C_CO2_sat and C_CO2_sat;
  enddef;
enddef;
