def model modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////////// non-BC Vessel ////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp pv_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    // Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp vp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    // C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v_in-v);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp vp_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp pp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp pp_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
    ode(v_d, t) = (u-u_out-R_flag*R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp pv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // emperical relation
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(q_C, t) = v-v_out;
    // constitutive laws
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out);
  enddef;

  def comp pp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v)/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp vv_rigid_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R: Js_per_m6 {pub: in};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    // Conservation Laws
    u = (v_in-v_out)/R;
  enddef;

  def comp vp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v_in-v);
  enddef;

  def comp vp_ven_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_T_change: m3 {init: 0.0, pub: out};
    var q_T: m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us_0: m3 {pub: in};
    var q_us_wCont: m3 {pub: out};
    var Delta_q_us: m3 {pub: in};
    // TODO double check that this applies to veins
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_T_change, t) = v_in-v;
    q_T = q_T_change+q_us_0;
    u_C = (q_T-q_us_wCont)/C+u_ext;
    u = u_C+R_v*(v_in-v);
    q_us_wCont = q_us_0+Delta_q_us;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////////////////////////////////// output-BC Vessel ///////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pp_T_fixed_I_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    // + u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp pp_T_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    var R_1_T: Js_per_m6 {pub: in};
    var R_2_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    // + u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_1_T)/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_2_T)/I_T;
  enddef;

  def comp pp_T_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp pp_T_R1CR2_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T1: Js_per_m6 {pub: in};
    var R_T2: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    var R_T1_wCont: Js_per_m6 {pub: out};
    var R_T2_wCont: Js_per_m6 {pub: out};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u = q_T/C_T+u_ext;
    v = (u_in-u)/R_T1_wCont;
    v_T = (u-u_out)/R_T2_wCont;
    R_T1_wCont = (R_T1+Delta_R*R_T1/(R_T1+R_T2))*R_local_multiplier;
    R_T2_wCont = (R_T2+Delta_R*R_T2/(R_T1+R_T2))*R_local_multiplier;
  enddef;

  def comp pp_T_RCR_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    u = q_T/C_T+u_ext;
    v = (u_in-u)/(R_T_wCont/2{dimensionless});
    v_T = (u-u_out)/(R_T_wCont/2{dimensionless});
    R_T_wCont = (R_T+Delta_R)*R_local_multiplier;
  enddef;

  def comp pp_T_RICRI_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T_1: Js2_per_m6 {pub: in};
    var I_T_2: Js2_per_m6 {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_1: Js_per_m6;
    var R_T_2: Js_per_m6;
    var frac_R_T_1_of_R_T: dimensionless {pub: in};
    var C_T: m6_per_J {pub: in};
    R_T_1 = frac_R_T_1_of_R_T*R_T;
    R_T_2 = (1{dimensionless}-frac_R_T_1_of_R_T)*R_T;
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    // rearrange to try to make opencor recognise an ode
    // ode(q_T, t) = (u_in-(q_T/C_T+u_ext))/R_T_1-(q_T/C_T+u_ext-u_out)/R_T_2;
    u = q_T/C_T+u_ext;
    ode(v, t) = (u_in-u-R_T_1*v)/I_T_1;
    ode(v_T, t) = (u-u_out-R_T_2*v_T)/I_T_2;
  enddef;

  def comp pp_T_RICRI_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T_1: Js2_per_m6 {pub: in};
    var I_T_2: Js2_per_m6 {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_1: Js_per_m6;
    var R_T_2: Js_per_m6;
    var frac_R_T_1_of_R_T: dimensionless {pub: in};
    // var C_T: m6_per_J {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    R_T_1 = frac_R_T_1_of_R_T*R_T;
    R_T_2 = (1{dimensionless}-frac_R_T_1_of_R_T)*R_T;
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T: m3 {init: 0.0, pub: out};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
    var q_total: m3 {pub: out};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v-v_T;
    q_total = q_init+q_T;
    // rearrange to try to make opencor recognise an ode
    // ode(q_T, t) = (u_in-(q_T/C_T+u_ext))/R_T_1-(q_T/C_T+u_ext-u_out)/R_T_2;
    // u           = q_T/C_T+u_ext;
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
    ode(v, t) = (u_in-u-R_T_1*v)/I_T_1;
    ode(v_T, t) = (u-u_out-R_T_2*v_T)/I_T_2;
  enddef;

  def comp vp_T_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T2: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_in: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T_init: m3 {pub: in};
    var q_T: m3 {init: q_T_init, pub: out};
    var R_T2_wCont: Js_per_m6 {pub: out};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v_in-v_T;
    u = q_T/C_T+u_ext;
    v_T = (u-u_out)/R_T2_wCont;
    R_T2_wCont = (R_T2+Delta_R)*R_local_multiplier;
  enddef;

  def comp vp_T_R1CR2_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T1: Js_per_m6 {pub: in};
    var R_T2: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_in: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_T_init: m3 {pub: in};
    var q_T: m3 {init: q_T_init, pub: out};
    // R_T1_wCont is only used to transfer to the FV coupling with Lucas' models.
    var R_T1_wCont: Js_per_m6 {pub: out};
    var R_T2_wCont: Js_per_m6 {pub: out};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q_T, t) = v_in-v_T;
    u = q_T/C_T+u_ext;
    v_T = (u-u_out)/R_T2_wCont;
    // The below assumes that Delta_R1 is proportional to R1 etc
    R_T1_wCont = (R_T1+Delta_R*R_T1/(R_T1+R_T2))*R_local_multiplier;
    R_T2_wCont = (R_T2+Delta_R*R_T2/(R_T1+R_T2))*R_local_multiplier;
  enddef;
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////// Junctions //////////////////////////////////////////////
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // Bifurcation

  def comp pv_split_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var du_C_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp pv_split_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be.
    du_dt = K_tube*(m_tube*pow(q_total, m_tube-1{dimensionless})/pow(q_us, m_tube)-n_tube*pow(q_total, n_tube-1{dimensionless})/pow(q_us, n_tube))*(v-v_out_1-v_out_2);
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp pv_split_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    R_v = 0.01{second}/C;
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var du_C_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp vv_split_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_in: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp vv_split_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    R_v = 0.01{second}/C;
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_in: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//
  // 2 in 2 out junction

  def comp vv_2in2out_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;
  // 2in1out merge vv

  def comp vv_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;
  // 2in1out merge vp

  def comp vp_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v_in_1+v_in_2-v);
  enddef;

  def comp vp_merge_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp vp_merge_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    // ode(u_C, t) = (v_in_1+v_in_2-v)/C;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/C+u_ext;
    u = u_C+R_v*(v_in_1+v_in_2-v);
  enddef;
  // 2in1out merge vv simple

  def comp vv_merge_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    R_v = 0.01{second}/C;
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp flow_sum_2_type as
    var t: second {pub: in};
    var v_1: m3_per_s {pub: in};
    var v_2: m3_per_s {pub: in};
    var v_total: m3_per_s {pub: out};
    v_total = v_1+v_2;
  enddef;

  def comp W_controller2_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: out};
    var q_T: m3 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    // Conservation Laws
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js_per_m6};
    // Conservation Laws
    //  For now terminals don't have a gravity effect, change this for leg terminals
    // u_out = 0{J_per_m3};
    u_out = 0{dimensionless};
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = R_T;
  enddef;
  // -----------------------------------------------------------------------------//
  // --------------- NONLINEAR ELASTIC/VISCOELASTIC VESSEL MODULES ---------------//
  // -----------------------------------------------------------------------------//

  def comp pv_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    // boundary_condition provided by its own module
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r_us, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp pv_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    // {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    // boundary_condition provided by its own module
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp pv_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    // {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vp_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r_us, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp vp_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp vp_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+K_tube_visco*(v_in-v)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp pp_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r_us, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    ode(v_d, t) = (u-u_out-R_flag*R/2{dimensionless}*v_d)/(I/2{dimensionless});
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp pp_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    ode(v_d, t) = (u-u_out-R_flag*R/2{dimensionless}*v_d)/(I/2{dimensionless});
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp pp_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    ode(v_d, t) = (u-u_out-R_flag*R/2{dimensionless}*v_d)/(I/2{dimensionless});
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+K_tube_visco*(v-v_d)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vv_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_total_d: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_us_d: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l/2{dimensionless};
    q_us_d = pi*sqr(r_us)*l/2{dimensionless};
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r_us, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out;
    q_total = q_C+q_us;
    q_total_d = q_C_d+q_us_d;
    // Nonlinear tube law
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
    u_d = K_tube*(pow(q_total_d/q_us_d, m_tube)-pow(q_total_d/q_us_d, n_tube))+u_ext;
  enddef;

  def comp vv_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_total_d: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_us_d: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l/2{dimensionless};
    q_us_d = pi*sqr(r_us)*l/2{dimensionless};
    q_total = q_C+q_us;
    q_total_d = q_C_d+q_us_d;
    r = sqrt((q_total+q_total_d)/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
    u_d = K_tube*(pow(q_total_d/q_us_d, m_tube)-pow(q_total_d/q_us_d, n_tube))+u_ext;
  enddef;

  def comp vv_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q_total: m3 {pub: out};
    var q_total_d: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_us_d: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_us = pi*sqr(r_us)*l/2{dimensionless};
    q_us_d = pi*sqr(r_us)*l/2{dimensionless};
    q_total = q_C+q_us;
    q_total_d = q_C_d+q_us_d;
    r = sqrt((q_total+q_total_d)/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+K_tube_visco*2{dimensionless}*(v_in-v)+u_ext;
    u_d = K_tube*(pow(q_total_d/q_us_d, m_tube)-pow(q_total_d/q_us_d, n_tube))+K_tube_visco*2{dimensionless}*(v-v_out)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp pv_split_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r_us, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be.
    du_dt = K_tube*(m_tube*pow(q_total, m_tube-1{dimensionless})/pow(q_us, m_tube)-n_tube*pow(q_total, n_tube-1{dimensionless})/pow(q_us, n_tube))*(v-v_out_1-v_out_2);
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp pv_split_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be.
    du_dt = K_tube*(m_tube*pow(q_total, m_tube-1{dimensionless})/pow(q_us, m_tube)-n_tube*pow(q_total, n_tube-1{dimensionless})/pow(q_us, n_tube))*(v-v_out_1-v_out_2);
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp pv_split_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be.
    du_dt = K_tube*(m_tube*pow(q_total, m_tube-1{dimensionless})/pow(q_us, m_tube)-n_tube*pow(q_total, n_tube-1{dimensionless})/pow(q_us, n_tube))*(v-v_out_1-v_out_2);
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    // Nonlinear tube law
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+K_tube_visco*(v-v_out_1-v_out_2)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vv_split_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_total_d: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_us_d: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l/2{dimensionless};
    q_us_d = pi*sqr(r_us)*l/2{dimensionless};
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r_us, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    q_total = q_C+q_us;
    q_total_d = q_C_d+q_us_d;
    // Nonlinear tube law
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
    u_d = K_tube*(pow(q_total_d/q_us_d, m_tube)-pow(q_total_d/q_us_d, n_tube))+u_ext;
  enddef;

  def comp vv_split_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_total_d: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_us_d: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l/2{dimensionless};
    q_us_d = pi*sqr(r_us)*l/2{dimensionless};
    q_total = q_C+q_us;
    q_total_d = q_C_d+q_us_d;
    r = sqrt((q_total+q_total_d)/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    // Nonlinear tube law
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
    u_d = K_tube*(pow(q_total_d/q_us_d, m_tube)-pow(q_total_d/q_us_d, n_tube))+u_ext;
  enddef;

  def comp vv_split_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q_total: m3 {pub: out};
    var q_total_d: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_us_d: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_us = pi*sqr(r_us)*l/2{dimensionless};
    q_us_d = pi*sqr(r_us)*l/2{dimensionless};
    q_total = q_C+q_us;
    q_total_d = q_C_d+q_us_d;
    r = sqrt((q_total+q_total_d)/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+K_tube_visco*2{dimensionless}*(v_in-v)+u_ext;
    u_d = K_tube*(pow(q_total_d/q_us_d, m_tube)-pow(q_total_d/q_us_d, n_tube))+K_tube_visco*2{dimensionless}*(v-v_out_1-v_out_2)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vp_merge_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r_us, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    q_total = q_C+q_us;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp vp_merge_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    // Nonlinear tube law.
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
  enddef;

  def comp vp_merge_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_total: m3 {pub: out};
    var q_us: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_us = pi*sqr(r_us)*l;
    q_total = q_C+q_us;
    r = sqrt(q_total/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    // Nonlinear tube law
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+K_tube_visco*(v_in_1+v_in_2-v)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vv_merge_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_total_d: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_us_d: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l/2{dimensionless};
    q_us_d = pi*sqr(r_us)*l/2{dimensionless};
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r_us, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    ode(q_C_d, t) = v-v_out;
    q_total = q_C+q_us;
    q_total_d = q_C_d+q_us_d;
    // Nonlinear tube law
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
    u_d = K_tube*(pow(q_total_d/q_us_d, m_tube)-pow(q_total_d/q_us_d, n_tube))+u_ext;
  enddef;

  def comp vv_merge_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q_total: m3 {pub: out};
    var q_total_d: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_us_d: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_us = pi*sqr(r_us)*l/2{dimensionless};
    q_us_d = pi*sqr(r_us)*l/2{dimensionless};
    q_total = q_C+q_us;
    q_total_d = q_C_d+q_us_d;
    r = sqrt((q_total+q_total_d)/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+u_ext;
    u_d = K_tube*(pow(q_total_d/q_us_d, m_tube)-pow(q_total_d/q_us_d, n_tube))+u_ext;
  enddef;

  def comp vv_merge_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var K_m: Js_per_m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_us: metre {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q_total: m3 {pub: out};
    var q_total_d: m3 {pub: out};
    var q_us: m3 {pub: out};
    var q_us_d: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_us = pi*sqr(r_us)*l/2{dimensionless};
    q_us_d = pi*sqr(r_us)*l/2{dimensionless};
    q_total = q_C+q_us;
    q_total_d = q_C_d+q_us_d;
    r = sqrt((q_total+q_total_d)/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_us));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = K_tube*(pow(q_total/q_us, m_tube)-pow(q_total/q_us, n_tube))+K_tube_visco*2{dimensionless}*(v_in_1+v_in_2-v)+u_ext;
    u_d = K_tube*(pow(q_total_d/q_us_d, m_tube)-pow(q_total_d/q_us_d, n_tube))+K_tube_visco*2{dimensionless}*(v-v_out)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//
enddef;
