def model modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////// module baroreceptor firing rate from carotid and aortic arch pressures ///
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp baroreceptor_type as
    var t: second {pub: in};
    var P_sys: J_per_m3 {pub: in};
    var P_baro_init: J_per_m3 {pub: in};
    var P_baro: J_per_m3 {init: P_baro_init, pub: out};
    var f_ab: per_s {pub: out};
    var dP_sys_dt: J_per_m3s {pub: in};
    // Constants
    var P_nom: J_per_m3 {pub: in};
    var f_ab_min: per_s {pub: in};
    var f_ab_max: per_s {pub: in};
    var k_ab: J_per_m3 {pub: in};
    var tau_zb: second {pub: in};
    var tau_pb: second {pub: in};
    ode(P_baro, t) = (P_sys+tau_zb*dP_sys_dt-P_baro)/tau_pb;
    f_ab = (f_ab_min+f_ab_max*exp((P_baro-P_nom)/k_ab))/(1{dimensionless}+exp((P_baro-P_nom)/k_ab));
  enddef;

  def comp chemoreceptor_type as
    var t: second {pub: in};
    // inp variables
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_a: dimensionless {pub: in};
    var dot_C_CO2_a: per_s {pub: in};
    // output variables
    var X_O2: dimensionless {pub: out};
    var phi_stat: per_s {pub: out};
    var phi_CO2_dyn: per_s {init: 0.0, pub: out};
    var f_c_stat: per_s {pub: out};
    var f_c_dyn: per_s {pub: out};
    var f_apc: per_s {pub: out};
    var phi_apc: per_s {init: 0.0, pub: out};
    var P_O2_a: J_per_m3 {pub: out};
    // Constants
    var AA: dimensionless {pub: in};
    var BB: dimensionless {pub: in};
    var C_CO2_a_nom: dimensionless {pub: in};
    var K_O2: dimensionless {pub: in};
    var K_CO2: per_s {pub: in};
    var K_stat: per_s {pub: in};
    var K_dyn: per_s {pub: in};
    var tau_cap: second {pub: in};
    var tau_CO2_cc_dyn: dimensionless {pub: in};
    // second {pub: in};
    // equations
    X_O2 = AA*(1{dimensionless}-S_O2_a)+BB;
    phi_stat = K_CO2*(C_CO2_a-C_CO2_a_nom)*K_O2*(1{dimensionless}-exp(-X_O2/K_O2));
    f_c_stat = sel
      case C_CO2_a >= C_CO2_a_nom:
        K_stat*(1{dimensionless}-exp(-phi_stat/K_stat));
      otherwise:
        0{per_s};
    endsel;
    ode(phi_CO2_dyn, t) = (dot_C_CO2_a*tau_CO2_cc_dyn-phi_CO2_dyn)/tau_cap;
    f_c_dyn = K_dyn*(1{dimensionless}-exp(-phi_CO2_dyn/K_dyn));
    ode(phi_apc, t) = (f_c_stat+f_c_dyn-phi_apc)/tau_cap;
    f_apc = max(phi_apc, 0{per_s});
    // Calculate saturation
    var C_O2_a_diss: dimensionless {pub: out};
    var S_O2_a: dimensionless {pub: out};
    var Hgb: kg_per_m3 {pub: in};
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    // P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_p)/(1{dimensionless}+beta_2*P_O2_p);
    C_O2_a_diss = sel
      case C_O2_sat-Hgb*1.34e-3{m3_per_kg}-P_O2_a*0.003{dimensionless}/100{dimensionless} >= 0{dimensionless}:
        P_O2_a*0.003{dimensionless}/100{dimensionless};
      otherwise:
        C_O2_sat-Hgb*1.34e-3{m3_per_kg};
    endsel;
    S_O2_a = (C_O2_a-C_O2_a_diss)/(Hgb*1.34e-3{m3_per_kg});
    // ____________ inverted dissociation curve below here___________
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp afferent_to_vagal_efferent_type as
    var t: second {pub: in};
    // Constants
    var f_ev_0: per_s {pub: in};
    var f_ev_inf: per_s {pub: in};
    var f_ab_0: per_s {pub: in};
    var theta_v: per_s {pub: in};
    var W_cv: dimensionless {pub: in};
    // var W_pv: dimensionless {pub: in}; not yet including lung stretch receptor effects
    var k_ev: per_s {pub: in};
    // Variables
    var f_apc: per_s {pub: in};
    var f_ab: per_s {pub: in};
    // var f_ap: per_s {pub: in};
    var f_v: per_s {pub: out};
    f_v = (f_ev_0+f_ev_inf*exp((f_ab-f_ab_0)/k_ev))/(1{dimensionless}+exp((f_ab-f_ab_0)/k_ev))+W_cv*f_apc-theta_v;
    // + W_pv*f_ap
  enddef;

  def comp afferent_to_sympathetic_efferent_type as
    var t: second {pub: in};
    // Constants
    var f_es_0: per_s {pub: in};
    var f_es_inf: per_s {pub: in};
    var f_es_max: per_s {pub: in};
    var k_es: per_s {pub: in};
    // var theta_s: per_s {pub: in}; //currently ignoring CNS
    var W_bs: dimensionless {pub: in};
    var W_cs: dimensionless {pub: in};
    // var W_ps: dimensionless {pub: in}; not yet including lung stretch receptor effects
    // Variables
    var f_apc: per_s {pub: in};
    var f_ab: per_s {pub: in};
    // var f_ap: per_s {pub: in};
    var f_s_premax: per_s {pub: out};
    var f_s: per_s {pub: out};
    f_s_premax = f_es_inf+(f_es_0-f_es_inf)*exp(k_es*(W_bs*f_ab+W_cs*f_apc));
    // IGNORING CNS and LUNG STRETCH
    f_s = sel
      case f_s_premax <= f_es_max:
        f_s_premax;
      otherwise:
        f_es_max;
    endsel;
  enddef;

  def comp efferent_resistance_effector_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_theta: Js_per_m6 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_theta: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var Delta_theta: Js_per_m6 {init: 0.0, pub: out};
    var sigma_theta: Js_per_m6 {pub: out};
    // Equations
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{Js_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp efferent_heart_elastance_effector_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_theta: J_per_m6 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_theta: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var Delta_theta: J_per_m6 {init: 0.0, pub: out};
    var sigma_theta: J_per_m6 {pub: out};
    // Equations
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{J_per_m6};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp efferent_venous_us_volume_effector_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // IMPORTANT: THIS MODULE HAS BEEN MODIFIED TO CONTROL COMPLIANCE INSTEAD OF UNSTRESSED VOLUME. PARAMS ARE UNVALIDATED
    // Constants
    var G_theta: m3 {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_theta: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var Delta_theta: m3 {init: 0.0, pub: out};
    var sigma_theta: m3 {pub: out};
    // Equations
    sigma_theta = sel
      case f_s >= f_es_min:
        G_theta*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{m3};
    endsel;
    ode(Delta_theta, t) = (-Delta_theta+sigma_theta)/tau_theta;
  enddef;

  def comp efferent_heart_period_effector_type as
    var t: second {pub: in};
    // IMPORTANT: THIS MODULE ASSUMES NO DELAY CONSTANTS, WHICH IS DIFFERENT TO THE ORIGINAL PAPER, ALBANESE2016
    // Constants
    var G_Ts: second {pub: in};
    var G_Tv: second {pub: in};
    var f_es_min: per_s {pub: in};
    var tau_Ts: second {pub: in};
    var tau_Tv: second {pub: in};
    // Variables
    var f_s: per_s {pub: in};
    var f_v: per_s {pub: in};
    var Delta_Ts: second {init: 0.0, pub: out};
    var Delta_Tv: second {init: 0.0, pub: out};
    var Delta_T: second {pub: out};
    var sigma_Ts: second {pub: out};
    var sigma_Tv: second {pub: out};
    // Equations
    sigma_Ts = sel
      case f_s >= f_es_min:
        G_Ts*ln(1{second}*(f_s-f_es_min+1{per_s}));
      otherwise:
        0{second};
    endsel;
    ode(Delta_Ts, t) = (-Delta_Ts+sigma_Ts)/tau_Ts;
    sigma_Tv = G_Tv*f_v;
    // DELAY IGNORED
    ode(Delta_Tv, t) = (-Delta_Tv+sigma_Tv)/tau_Tv;
    Delta_T = Delta_Tv+Delta_Ts;
  enddef;

  def comp local_flow_control_muscle_type as
    var t: second {pub: in};
    var x_O2: dimensionless {init: 0.0, pub: out};
    var phi_P_CO2_a: dimensionless {pub: out};
    var x_CO2: dimensionless {init: 0.0, pub: out};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: out};
    var R_local_multiplier: dimensionless {pub: out};
    var P_O2_a: J_per_m3 {pub: out};
    // Constants
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var k_CO2_m: J_per_m3 {pub: in};
    var C_O2_vm_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_m: dimensionless {pub: in};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vm_nom)/tau_O2;
    phi_P_CO2_a = (1{dimensionless}-exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m))/(1{dimensionless}+exp((P_CO2_a-P_CO2_a_nom)/k_CO2_m));
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    R_local_multiplier = (1{dimensionless}+x_CO2)/(1{dimensionless}-g_O2_m*x_O2);
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;

  def comp local_flow_control_brain_type as
    var t: second {pub: in};
    var x_O2: dimensionless {init: 0.0, pub: out};
    var phi_P_CO2_a: dimensionless {pub: out};
    var x_CO2: dimensionless {init: 0.0, pub: out};
    var C_O2_a: dimensionless {pub: in};
    var C_CO2_a: dimensionless {pub: in};
    var C_O2_p: dimensionless {pub: in};
    var P_CO2_a: J_per_m3 {pub: out};
    var R_local_multiplier: dimensionless {pub: out};
    var P_O2_a: J_per_m3 {pub: out};
    var G_p: dimensionless {pub: out};
    // Constants
    var P_CO2_a_nom: J_per_m3 {pub: in};
    var C_O2_vb_nom: dimensionless {pub: in};
    var tau_O2: second {pub: in};
    var tau_CO2: second {pub: in};
    var g_O2_b: dimensionless {pub: in};
    var A_b_lc: dimensionless {pub: in};
    var B_b_lc: dimensionless {pub: in};
    var C_b_lc: dimensionless {pub: in};
    var D_b_lc: dimensionless {pub: in};
    ode(x_O2, t) = (-x_O2+C_O2_p-C_O2_vb_nom)/tau_O2;
    phi_P_CO2_a = (A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a))))/(A_b_lc+B_b_lc/(1{dimensionless}+C_b_lc*exp(D_b_lc*ln(P_CO2_a_nom))))-1{dimensionless};
    ode(x_CO2, t) = (-x_CO2+phi_P_CO2_a)/tau_CO2;
    G_p = 1{dimensionless}-g_O2_b*x_O2+x_CO2;
    R_local_multiplier = 1{dimensionless}/G_p;
    // from inverted dissociation
    P_O2_a = r_1+sqrt(sqr(r_1)-s_1);
    P_CO2_a = d_2*(1{dimensionless}+alpha_2*P_O2_a)/(1{dimensionless}+beta_2*P_O2_a);
    var k_1: J_per_m3 {pub: in};
    var k_2: J_per_m3 {pub: in};
    var h_1: dimensionless {pub: in};
    var h_2: dimensionless {pub: in};
    var d_1: J_per_m3 {pub: out};
    var d_2: J_per_m3 {pub: out};
    var r_1: J_per_m3 {pub: out};
    var r_2: J_per_m3 {pub: out};
    var s_1: J2_per_m6 {pub: out};
    var s_2: J2_per_m6 {pub: out};
    var alpha_1: m3_per_J {pub: in};
    var alpha_2: m3_per_J {pub: in};
    var beta_1: m3_per_J {pub: in};
    var beta_2: m3_per_J {pub: in};
    var C_O2_sat: dimensionless {pub: in};
    var C_CO2_sat: dimensionless {pub: in};
    d_1 = max(k_1*pow(C_O2_a/(C_O2_sat-C_O2_a), h_1), 0{J_per_m3});
    d_2 = max(k_2*pow(C_CO2_a/(C_CO2_sat-C_CO2_a), h_2), 0{J_per_m3});
    r_1 = -0.5{dimensionless}*(1{dimensionless}+beta_1*d_2-beta_2*d_1-alpha_1*alpha_2*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    r_2 = -0.5{dimensionless}*(1{dimensionless}+beta_2*d_1-beta_1*d_2-alpha_2*alpha_1*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
    s_1 = -1{dimensionless}*(d_1+alpha_1*d_1*d_2)/(beta_2+alpha_2*beta_1*d_2);
    s_2 = -1{dimensionless}*(d_2+alpha_2*d_2*d_1)/(beta_1+alpha_1*beta_2*d_1);
  enddef;
enddef;
